<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Draws a transformed 3D model stimulus.</Description>
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:BonVision;assembly=BonVision" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ViewMatrix</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="X" DisplayName="ScaleX" />
        <Property Name="Y" DisplayName="ScaleY" />
        <Property Name="Z" DisplayName="ScaleZ" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MeshName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Ambient" Category="Model Material" />
        <Property Name="Diffuse" Category="Model Material" />
        <Property Name="Specular" Category="Model Material" />
        <Property Name="SpecularExponent" Category="Model Material" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RotationZ" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:AngleProperty">
          <q2:Value>0</q2:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RotationY" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:AngleProperty">
          <q2:Value>0</q2:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RotationX" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:AngleProperty">
          <q2:Value>0</q2:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateVector3">
          <q1:X>0</q1:X>
          <q1:Y>0</q1:Y>
          <q1:Z>0</q1:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="X" Selector="X" />
          <Property Name="Y" Selector="Y" />
          <Property Name="Z" Selector="Z" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Translate">
          <q1:Order>Prepend</q1:Order>
          <q1:X>-0.009018869</q1:X>
          <q1:Y>0.07173262</q1:Y>
          <q1:Z>-0.09103233</q1:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RotateZ">
          <q1:Order>Prepend</q1:Order>
          <q1:Angle>0</q1:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RotateY">
          <q1:Order>Prepend</q1:Order>
          <q1:Angle>0</q1:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RotateX">
          <q1:Order>Prepend</q1:Order>
          <q1:Angle>0</q1:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Scale">
          <q1:Order>Prepend</q1:Order>
          <q1:X>1</q1:X>
          <q1:Y>1</q1:Y>
          <q1:Z>1</q1:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>modelview</q1:UniformName>
          <q1:ShaderName>Model</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ProjectionMatrix</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>projection</q1:UniformName>
          <q1:ShaderName>Model</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Light</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>light</q1:UniformName>
          <q1:ShaderName>Model</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateMaterial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Ambient" />
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateLookAtVector3">
              <MemberName>Eye</MemberName>
              <Value>
                <X>0.2</X>
                <Y>0.2</Y>
                <Z>0.2</Z>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Ka</q1:UniformName>
                <q1:ShaderName>Model</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Diffuse" />
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateLookAtVector3">
              <MemberName>Eye</MemberName>
              <Value>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Kd</q1:UniformName>
                <q1:ShaderName>Model</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Specular" />
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateLookAtVector3">
              <MemberName>Eye</MemberName>
              <Value>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Ks</q1:UniformName>
                <q1:ShaderName>Model</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SpecularExponent" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Ns</q1:UniformName>
                <q1:ShaderName>Model</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>Model</q1:ShaderName>
          <q1:MeshName>icoSphereHIgh</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="22" Label="Source1" />
      <Edge From="0" To="24" Label="Source1" />
      <Edge From="1" To="16" Label="Source1" />
      <Edge From="2" To="20" Label="Source2" />
      <Edge From="3" To="28" Label="Source2" />
      <Edge From="4" To="27" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="17" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="18" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="19" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="26" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="26" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source3" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Shaders.CreateLookAt, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null],[OpenTK.Vector3, OpenTK, Version=1.1.0.0, Culture=neutral, PublicKeyToken=bad199fe84eb3df4]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector3, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RotateX, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RotateY, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RotateZ, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Scale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Translate, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>BonVision.AngleProperty, BonVision, Version=0.2.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>