<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Draws multiple colored circles using the input array as position data.</Description>
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:;assembly=Extensions" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>LocationX</MemberName>
        <Name>LocationX</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>LocationY</MemberName>
        <Name>LocationY</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>ColorR</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>X</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>ColorG</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Y</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>ColorB</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Z</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>ColorA</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>W</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>Diameter</Name>
      </Expression>
      <Expression xsi:type="PropertySourceOfCreateScaleSingle">
        <MemberName>X</MemberName>
        <Value>1</Value>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ExtentX" />
          <Property Name="ExtentY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ViewMatrix</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Translate">
          <q1:Order>Prepend</q1:Order>
          <q1:X>0</q1:X>
          <q1:Y>0</q1:Y>
          <q1:Z>0</q1:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>modelview</q1:UniformName>
          <q1:ShaderName>ModelArray</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ProjectionMatrix</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>projection</q1:UniformName>
          <q1:ShaderName>ModelArray</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Angle</MemberName>
              <Name>Angle</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name>ExtentX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name>ExtentY</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name>LocationX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name>LocationY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateTranslation">
                <q1:X>0.5</q1:X>
                <q1:Y>0</q1:Y>
                <q1:Z>0</q1:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Scale">
                <q1:Order>Prepend</q1:Order>
                <q1:X>1</q1:X>
                <q1:Y>1</q1:Y>
                <q1:Z>1</q1:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:RotateZ">
                <q1:Order>Prepend</q1:Order>
                <q1:Angle>0</q1:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="7" Label="Source2" />
            <Edge From="3" To="7" Label="Source3" />
            <Edge From="4" To="6" Label="Source2" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateVector4">
          <q1:X>1</q1:X>
          <q1:Y>1</q1:Y>
          <q1:Z>1</q1:Z>
          <q1:W>1</q1:W>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="q1:UpdateUniform">
            <q1:UniformName>color</q1:UniformName>
            <q1:ShaderName>ModelArray</q1:ShaderName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Sample" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>VelocityX</MemberName>
        <Name>VelocityX</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>VelocityY</MemberName>
        <Name>VelocityY</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Coherence</MemberName>
        <Name>Coherence</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Borders</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="top" Selector="Item1" />
          <Property Name="bottom" Selector="Item2" />
          <Property Name="left" Selector="Item3" />
          <Property Name="right" Selector="Item4" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:moveDots_3d">
          <q2:VelocityX>0.05</q2:VelocityX>
          <q2:VelocityY>0</q2:VelocityY>
          <q2:Coherence>10</q2:Coherence>
          <q2:left>-20</q2:left>
          <q2:right>20</q2:right>
          <q2:top>20</q2:top>
          <q2:bottom>-20</q2:bottom>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Ambient" Category="Model Material" />
        <Property Name="Diffuse" Category="Model Material" />
        <Property Name="Specular" Category="Model Material" />
        <Property Name="SpecularExponent" Category="Model Material" />
      </Expression>
      <Expression xsi:type="Sink">
        <Name>UpdateMaterial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Ambient" />
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateLookAtVector3">
              <MemberName>Eye</MemberName>
              <Value>
                <X>0.2</X>
                <Y>0.2</Y>
                <Z>0.2</Z>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Ka</q1:UniformName>
                <q1:ShaderName>ModelArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Diffuse" />
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateLookAtVector3">
              <MemberName>Eye</MemberName>
              <Value>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Kd</q1:UniformName>
                <q1:ShaderName>ModelArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Specular" />
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateLookAtVector3">
              <MemberName>Eye</MemberName>
              <Value>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Ks</q1:UniformName>
                <q1:ShaderName>ModelArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SpecularExponent" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>Ns</q1:UniformName>
                <q1:ShaderName>ModelArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMeshInstanced">
          <q1:ShaderName>ModelArray</q1:ShaderName>
          <q1:MeshName>Sphere</q1:MeshName>
          <q1:Usage>DynamicDraw</q1:Usage>
          <q1:InstanceAttributes>
            <q1:InstanceAttributeMapping>
              <q1:Size>3</q1:Size>
              <q1:Normalized>false</q1:Normalized>
              <q1:Type>Float</q1:Type>
              <q1:Divisor>1</q1:Divisor>
            </q1:InstanceAttributeMapping>
          </q1:InstanceAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="25" Label="Source2" />
      <Edge From="1" To="25" Label="Source3" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="26" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="26" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="26" Label="Source4" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="26" Label="Source5" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="25" Label="Source4" />
      <Edge From="17" To="28" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="27" To="29" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="36" Label="Source1" />
      <Edge From="31" To="36" Label="Source2" />
      <Edge From="32" To="36" Label="Source3" />
      <Edge From="33" To="36" Label="Source4" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source5" />
      <Edge From="36" To="38" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Shaders.CreateLookAt, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null],[OpenTK.Vector3, OpenTK, Version=1.1.0.0, Culture=neutral, PublicKeyToken=bad199fe84eb3df4]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Shaders.CreateScale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null],[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SinkBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateTranslation, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector4, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMeshInstanced, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RotateZ, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Scale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Translate, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>moveDots_3d, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>