WorkflowBuilder(Version=2.4.0-preview)
SubscribeSubject "Difficulty Level"
-> Condition "Block 2" => #25
    WorkflowInput Source1
    -> Equal(Operand=FloatProperty(Value=2))
    -> WorkflowOutput
SubscribeSubject "Difficulty Level"
-> Condition "Block 3" => #27
    WorkflowInput Source1
    -> Equal(Operand=FloatProperty(Value=3))
    -> WorkflowOutput
ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #20
ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #21
ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #22
ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #23
#20, #21, #22, #23 -> GroupWorkflow "Trial Block 1" => #24
    SubscribeSubject Random => #3
    ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime, Description="Max time to wait for a response from subject", Category="Time Options") => #5
    ExternalizedProperty outputOnTime(MemberName=outputOnTime, Description="Duration of time to activate arduino for a correct response", Category="Time Options") => #6
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #7
    ExternalizedProperty InterStimInterval(MemberName=InterStimInterval, Description="delay time between end of arduino activation and next stimulus presentation", Category="Time Options") => #8
    -> GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT0.5S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
    DotMotionSpecification
      Trials
        DotMotionParameters
          Duration=1
          Size=1
          Colour1=1
          Colour2=0
          Contrast=1
          VelocityX=0.5
          VelocityY=0
          VelocityZ=0
          Coherence=100
          numDots1=100
          numDots2=100
          dotLifeBool=0
          dotLifetime=20
        DotMotionParameters
          Duration=1
          Size=1
          Colour1=1
          Colour2=0
          Contrast=1
          VelocityX=0
          VelocityY=0.5
          VelocityZ=0
          Coherence=100
          numDots1=100
          numDots2=100
          dotLifeBool=0
          dotLifetime=20
    -> IncludeWorkflow => #12
      Path=Extensions\EnsureDotParameters.bonsai
      Duration=1
      Size=1
      Colour1=1
      Contrast=1
      VelX=0
      VelY=0
      VelZ=0
      Coherence=100
      numDots1=200
      dotLifetime=1000
      dotLifeBool=0
      numDots2=0
      Colour2=0
    #12, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6, #7, #8 -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> ReplaySubject Parameters(BufferSize=nil)

        ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #2
        ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #3
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #4
        ExternalizedProperty InterStimInterval(MemberName=DueTime, Description="delay time after response") => #6
        GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
        -> SelectMany DrawStimulus
            SubscribeSubject Parameters => #2
            -> PropertyMapping => #0
              numDotsWhite(Selector=numDots1)
              numDotsBlack(Selector=numDots2)
              dotLifetime(Selector=dotLifetime)
              dotLifetimeBool(Selector=dotLifetimeBool)
              ColorA(Selector=Contrast)
              VelocityX(Selector=VelocityX)
              VelocityY(Selector=VelocityY)
              Diameter(Selector=size)
              Coherence(Selector=Coherence)
              ColorRw(Selector=Colour1)
              ColorGw(Selector=Colour1)
              ColorBw(Selector=Colour1)
              ColorRb(Selector=Colour2)
              ColorGb(Selector=Colour2)
              ColorBb(Selector=Colour2)
            #2 -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #6
            WorkflowInput Source1 => #10
            #0, #10 -> GroupWorkflow "MotionCoherence BandW" => #11
                WorkflowInput Source1

                ExternalizedProperty dotLifetime(MemberName=dotLifetime) => #4
                ExternalizedProperty ColorRw(MemberName=ColorR) => #5
                ExternalizedProperty ColorGw(MemberName=ColorG) => #6
                ExternalizedProperty ColorBw(MemberName=ColorB) => #7
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                ExternalizedProperty ColorRb(MemberName=ColorR) => #15
                ExternalizedProperty ColorGb(MemberName=ColorG) => #16
                ExternalizedProperty ColorBb(MemberName=ColorB) => #17
                ExternalizedProperty numDotsBlack(MemberName=Value)
                -> FloatProperty(Value=100)
                -> Divide(Operand=FloatProperty(Value=2))
                -> ExternalizedProperty numDotsBlackhalf(MemberName=numDots) => #12
                #12, #9 -> GenerateDotField(numDots=50, left=-30, right=30, top=30, bottom=-24) => #11
                #12, #4 -> GenerateDotLives(dotLifetime=20, numDots=50) => #13
                #11, #13 -> Zip => #14
                #9, #12 -> GenerateDotField4(numDots=50, left=-30, right=30, top=30, bottom=-24) => #25
                #4, #12 -> GenerateDotLives(dotLifetime=20, numDots=50) => #29
                #25, #29 -> Zip => #28
                ExternalizedProperty numDotsWhite(MemberName=Value)
                -> FloatProperty(Value=100)
                -> Divide(Operand=FloatProperty(Value=2))
                -> ExternalizedProperty numDotsWhitehalf(MemberName=numDots) => #1
                #4, #1 -> GenerateDotLives(dotLifetime=20, numDots=50) => #2
                #9, #1 -> GenerateDotField2(numDots=50, left=-30, right=30, top=30, bottom=-24) => #10
                #10, #2 -> Zip => #3
                #9, #1 -> GenerateDotField3(numDots=50, left=-30, right=30, top=30, bottom=-24) => #24
                #1, #4 -> GenerateDotLives(dotLifetime=20, numDots=50) => #26
                #24, #26 -> Zip => #27
                ExternalizedProperty Coherence(MemberName=Coherence) => #30
                ExternalizedProperty VelocityX(MemberName=VelocityX) => #31
                ExternalizedProperty VelocityY(MemberName=VelocityY) => #32
                ExternalizedProperty Diameter(MemberName=Diameter) => #33
                ExternalizedProperty dotLifetimeBool(MemberName=dotLifetimeBool) => #34
                ExternalizedProperty ColorA(MemberName=ColorA) => #35
                #3, #4, #30, #31, #32, #33, #34, #35, #5, #6, #7 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.")
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty ColorR(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=X) => #4
                    ExternalizedProperty ColorG(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorB(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=1)
                    -> PropertyMapping(ExtentX, ExtentY) => #17
                    WorkflowInput Source1 => #22
                    SubscribeSubject DrawStimuli
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #21
                    #21, #1, #2, #17 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=1, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    #22, #8 -> CombineLatest => #25
                    #25, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #23
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #27
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #28
                    ExternalizedProperty Coherence(MemberName=Coherence) => #29
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #31
                    ExternalizedProperty dotLifetime(MemberName=dotLifetime) => #32
                    ExternalizedProperty dotLifetimeBool(MemberName=dotLifetimeBool) => #33
                    #23, #27, #28, #29, #31, #32, #33 -> moveDots_2dLife2(VelocityX=0, VelocityY=0.5, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-30, right=30, top=30, bottom=-24)
                    -> MemberSelector(Selector=Item1) => #35
                    #35, #31 -> wrapAroundDots(Left=-30, Right=30, Top=30, Bottom=-24)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #14, #30, #31, #32, #33, #34, #35, #15, #16, #17 -> IncludeWorkflow
                  Path=Extensions\DrawMovingCircleArray-2d.bonsai
                  LocationX=0
                  LocationY=0
                  ColorR=0
                  ColorG=0
                  ColorB=0
                  ColorA=1
                  Diameter=1
                  VelocityX=0
                  VelocityY=0.5
                  Coherence=100
                  dotLifetime=20
                  dotLifetimeBool=0
                -> WorkflowOutput
                Source2=#27, Source2=#30, Source3=#31, Source4=#32, Source5=#33, Source6=#34, Source7=#35, Source8=#15, Source9=#16, Source10=#17 -> IncludeWorkflow
                  Path=Extensions\DrawMovingCircleArray-2d.bonsai
                  LocationX=0
                  LocationY=0
                  ColorR=0
                  ColorG=0
                  ColorB=0
                  ColorA=1
                  Diameter=1
                  VelocityX=0
                  VelocityY=0.5
                  Coherence=100
                  dotLifetime=20
                  dotLifetimeBool=0
                Source2=#28, Source2=#30, Source3=#31, Source4=#32, Source5=#33, Source6=#34, Source7=#35, Source8=#5, Source9=#6, Source10=#7 -> IncludeWorkflow
                  Path=Extensions\DrawMovingCircleArray-2d.bonsai
                  LocationX=0
                  LocationY=0
                  ColorR=1
                  ColorG=1
                  ColorB=1
                  ColorA=1
                  Diameter=1
                  VelocityX=0
                  VelocityY=0.5
                  Coherence=100
                  dotLifetime=20
                  dotLifetimeBool=0
            #11, #6 -> TakeUntil
            -> Last => #3
            #3, #2 -> Zip
            -> WorkflowOutput
        -> Sink OffState => #10
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        #10, #2, #3, #4 -> SelectMany Response => #9
            Bonsai.Windows.Input.KeyDown(Filter=Right)
            -> First
            -> FloatProperty(Value=1) => #3
            Bonsai.Windows.Input.KeyDown(Filter=Left)
            -> First
            -> FloatProperty(Value=-1) => #2
            ExternalizedProperty waitForResponseTime(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #5
            #2, #3, #5 -> Amb => #11
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #8
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #9
            WorkflowInput Source1 => #10
            -> MemberSelector(Selector=Item2.VelocityX) => #16
            #10 -> MemberSelector(Selector=Item2.VelocityY) => #17
            #16, #17, #11 -> Zip
            -> MulticastSubject ptrack => #15
            #15, #8, #9 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response") => #1
                ExternalizedProperty timeoutTime(MemberName=DueTime) => #2
                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      trialParam = value.Item1;
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif trialParam > 0: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif trialParam <= 0: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse => #21
                    WorkflowInput Source1
                    -> WorkflowOutput
                #21, #1 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect => #22
                    WorkflowInput Source1
                    -> WorkflowOutput
                #22, #1 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect => #23
                    WorkflowInput Source1
                    -> WorkflowOutput
                Source2=#1, Source2=#23 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse => #24
                    WorkflowInput Source1
                    -> WorkflowOutput
                Source2=#2, Source2=#24 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT5S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                SubscribeSubject Parameters => #15
                #15, #0 -> Zip
                -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
        #9, #6 -> Delay(DueTime=PT0.5S)
    -> Concat
    -> Repeat
    -> WorkflowOutput
#24, #25 -> TakeUntil
#20, #21, #22, #23 -> GroupWorkflow "Trial Block 2" => #26
    SubscribeSubject Random => #3
    DotMotionSpecification
      Trials
        DotMotionParameters
          Duration=1
          Size=1
          Colour1=nil
          Colour2=nil
          Contrast=nil
          VelocityX=1
          VelocityY=nil
          VelocityZ=nil
          Coherence=100
          numDots1=nil
          numDots2=nil
          dotLifeBool=nil
          dotLifetime=nil
        DotMotionParameters
          Duration=1
          Size=1
          Colour1=nil
          Colour2=nil
          Contrast=nil
          VelocityX=0
          VelocityY=1
          VelocityZ=nil
          Coherence=100
          numDots1=nil
          numDots2=nil
          dotLifeBool=nil
          dotLifetime=nil
        DotMotionParameters
          Duration=1
          Size=nil
          Colour1=nil
          Colour2=nil
          Contrast=nil
          VelocityX=-0.66
          VelocityY=0.66
          VelocityZ=nil
          Coherence=100
          numDots1=nil
          numDots2=nil
          dotLifeBool=nil
          dotLifetime=nil
    -> IncludeWorkflow => #11
      Path=Extensions\EnsureDotParameters.bonsai
      Duration=1
      Size=1
      Colour1=1
      Contrast=1
      VelX=0
      VelY=0
      VelZ=0
      Coherence=100
      numDots1=200
      dotLifetime=0
      dotLifeBool=1000
      numDots2=0
      Colour2=0
    #11, #3 -> Bonsai.Numerics.Permutation => #2
    ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime, Description="Max time to wait for a response from subject", Category="Time Options") => #6
    ExternalizedProperty outputOnTime(MemberName=outputOnTime, Description="Duration of time to activate arduino for a correct response", Category="Time Options") => #7
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #8
    ExternalizedProperty InterStimInterval(MemberName=InterStimInterval, Description="delay time between end of arduino activation and next stimulus presentation", Category="Time Options") => #9
    #2, #6, #7, #8, #9 -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> ReplaySubject Parameters(BufferSize=nil)

        ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #2
        ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #3
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #4
        ExternalizedProperty InterStimInterval(MemberName=DueTime, Description="delay time after response") => #6
        GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
        -> SelectMany DrawStimulus
            SubscribeSubject DrawStimuli => #0
            SubscribeSubject Parameters => #4
            -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            -> PropertyMapping(Coherence(Selector=Coherence), VelocityX(Selector=VelocityX), VelocityY(Selector=VelocityY), Diameter(Selector=Size), numDots(Selector=numDots1)) => #1
            #1, #0 -> GroupWorkflow MotionCoherenceStimulus => #13
                ExternalizedProperty Coherence(MemberName=Coherence) => #1
                ExternalizedProperty VelocityX(MemberName=VelocityX) => #2
                ExternalizedProperty VelocityY(MemberName=VelocityY) => #3
                ExternalizedProperty Diameter(MemberName=Diameter) => #4
                ExternalizedProperty numDots(MemberName=numDots)
                -> GenerateDotField(numDots=200, left=-30, right=30, top=30, bottom=-30) => #0
                #0, #1, #2, #3, #4 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.")
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty ColorR(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=X) => #4
                    ExternalizedProperty ColorG(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorB(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=1)
                    -> PropertyMapping(ExtentX, ExtentY) => #17
                    WorkflowInput Source1 => #22
                    SubscribeSubject DrawStimuli
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #21
                    #21, #1, #2, #17 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=1, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    #22, #8 -> CombineLatest => #26
                    #26, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #24
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #28
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #29
                    ExternalizedProperty Coherence(MemberName=Coherence) => #30
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #32
                    #24, #28, #29, #30, #32 -> moveDots_2d(VelocityX=1, VelocityY=0, Coherence=100, left=-30, right=30, top=30, bottom=-30)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                -> WorkflowOutput

                WorkflowInput Source1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #3
            #13, #3 -> TakeUntil
            -> Last => #9
            #9, #4 -> CombineLatest
            -> WorkflowOutput
        -> Sink OffState => #10
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        #10, #2, #3, #4 -> SelectMany Response => #9
            Bonsai.Windows.Input.KeyDown(Filter=Right)
            -> First
            -> FloatProperty(Value=1) => #3
            Bonsai.Windows.Input.KeyDown(Filter=Left)
            -> First
            -> FloatProperty(Value=-1) => #2
            ExternalizedProperty waitForResponseTime(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT3S, Period=PT0S)
            -> FloatProperty(Value=0) => #5
            #2, #3, #5 -> Amb => #11
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #8
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #9
            WorkflowInput Source1 => #10
            -> MemberSelector(Selector=Item2.VelocityX) => #16
            #10 -> MemberSelector(Selector=Item2.VelocityY) => #17
            #16, #17, #11 -> Zip
            -> MulticastSubject ptrack2 => #15
            #15, #8, #9 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response") => #1
                ExternalizedProperty timeoutTime(MemberName=DueTime) => #2
                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      trialParam = value.Item1;
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif trialParam > 0: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif trialParam <= 0: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse => #19
                    WorkflowInput Source1
                    -> WorkflowOutput
                #19, #1 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect => #20
                    WorkflowInput Source1
                    -> WorkflowOutput
                #20, #1 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect => #21
                    WorkflowInput Source1
                    -> WorkflowOutput
                Source2=#1, Source2=#21 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse => #22
                    WorkflowInput Source1
                    -> WorkflowOutput
                Source2=#2, Source2=#22 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT5S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
            -> WorkflowOutput
        #9, #6 -> Delay(DueTime=PT1S)
    -> Concat
    -> Repeat
    -> WorkflowOutput

    GroupWorkflow "Performance Tracking 2"
        SubscribeSubject ptrack2
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #7
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct UpLeft" => #18
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #18 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #17
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #17 -> MemberSelector(Selector=Item2) => #6
            #2 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #20
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #13
            #4, #5, #13 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #20 -> MemberSelector(Selector=Item2) => #14
            #6, #7, #14 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #7 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #2 -> MemberSelector(Selector=Item3) => #25
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #8 -> MemberSelector(Selector=Item3) => #27
            #0 -> FloatProperty(Value=2) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #25, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #26
            #5, #6, #26 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #27, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #28
            #11, #12, #28 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #29
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=3)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput
            #20, #29 -> TakeUntil
            -> MulticastSubject "Difficulty Level"

        GroupWorkflow "Initialise ptrack2"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack2
            -> WorkflowOutput
#26, #27 -> TakeUntil => #2
#2, #25 -> SubscribeWhen

FloatProperty(Value=1)
-> BehaviorSubject "Difficulty Level"

StringProperty(Value=StartSession)
-> Take(Count=1)
-> IncludeWorkflow Events(Path=BonVision:Logging.TimestampedEventLogger.bonsai, Overwrite=false, Suffix=Timestamp)

Bonsai.Numerics.CreateRandom(Seed=42)
-> AsyncSubject Random

ExternalizedProperty PortName(MemberName=PortName, Category=Arduino) => #11
ExternalizedProperty "No Response pin"(MemberName="No Response pin", Category=Arduino) => #12
ExternalizedProperty "Incorrect Response pin"(MemberName="Incorrect Response pin", Category=Arduino) => #13
ExternalizedProperty "Left Correct pin"(MemberName="Left Correct pin", Category=Arduino) => #14
ExternalizedProperty "Right Correct pin"(MemberName="Right Correct pin", Category=Arduino) => #15
#11, #12, #13, #14, #15 -> GroupWorkflow ArduinoPinMapping
    BooleanProperty(Value=false)
    -> BehaviorSubject IncorrectResponse

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject RightCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject NoResponse

    SubscribeSubject IncorrectResponse => #8
    SubscribeSubject LeftCorrect => #10
    SubscribeSubject RightCorrect => #12
    SubscribeSubject NoResponse => #14
    ExternalizedProperty "No Response pin"(MemberName=Pin) => #16
    ExternalizedProperty "Incorrect Response pin"(MemberName=Pin) => #17
    ExternalizedProperty "Left Correct pin"(MemberName=Pin) => #18
    ExternalizedProperty "Right Correct pin"(MemberName=Pin) => #19
    ExternalizedProperty PortName(MemberName=PortName) => #20
    #8, #17, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=0)
    #10, #18, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=7)
    #12, #19, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=12)
    #14, #16, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=2)

ExternalizedProperty TopBorder(MemberName=TopBorder) => #16
ExternalizedProperty BottomBorder(MemberName=BottomBorder) => #17
ExternalizedProperty LeftBorder(MemberName=LeftBorder) => #18
ExternalizedProperty RightBorder(MemberName=RightBorder) => #19
#16, #17, #18, #19 -> GroupWorkflow "Display and Resources"
    Bonsai.Shaders.RenderFrame => #0
    SubscribeSubject ScreenBorders
    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #23
    #0, #23 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-30, Right=30, Bottom=-27, Top=30)
    -> PublishSubject DrawStimuli
    -> WorkflowOutput

    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.LoadResources

    ExternalizedProperty TopBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=30)
    -> ReplaySubject Top(BufferSize=nil) => #9
    ExternalizedProperty BottomBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-27)
    -> ReplaySubject Bottom(BufferSize=nil) => #11
    ExternalizedProperty LeftBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-30)
    -> ReplaySubject Left(BufferSize=nil) => #13
    ExternalizedProperty RightBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=30)
    -> ReplaySubject Right(BufferSize=nil) => #15
    #9, #11, #13, #15 -> Zip
    -> ReplaySubject ScreenBorders(BufferSize=nil)
    -> AlterBorders(TopAdjust=0, BottomAdjust=3, LeftAdjust=0, RightAdjust=0)
    -> ReplaySubject Borders(BufferSize=nil)

GroupWorkflow QuadState
    SubscribeSubject DrawStimuli => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #1
    #0, #1 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=29, LocationY=-29, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState
