<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:;assembly=Extensions" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedProperty">
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          <Name>Coherence</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedProperty">
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          <Name>VelocityY</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Borders</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="top" Selector="Item1" />
          <Property Name="bottom" Selector="Item2" />
          <Property Name="left" Selector="Item3" />
          <Property Name="right" Selector="Item4" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedProperty">
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          <Name>Diameter</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>200</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>numDots</MemberName>
        <Name>numDots</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:GenerateDotField">
          <q1:numDots>200</q1:numDots>
          <q1:left>-50</q1:left>
          <q1:right>50</q1:right>
          <q1:top>50</q1:top>
          <q1:bottom>-50</q1:bottom>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>WheelDisplacement</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedProperty">
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          <Name>VelocityX</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawMovingCircleArray-2d</Name>
        <Description>Draws multiple colored circles using the input array as position data.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationX</MemberName>
              <Name>LocationX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationY</MemberName>
              <Name>LocationY</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorR</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorG</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorB</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Z</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorA</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>W</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Diameter</Name>
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateScaleSingle">
              <MemberName>X</MemberName>
              <Value>1</Value>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>projection</q2:UniformName>
                <q2:ShaderName>CircleArray</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Transform</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Angle</MemberName>
                    <Name>Angle</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>ExtentX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>ExtentY</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>LocationX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>LocationY</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:CreateTranslation">
                      <q2:X>0.5</q2:X>
                      <q2:Y>0</q2:Y>
                      <q2:Z>0</q2:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:Scale">
                      <q2:Order>Prepend</q2:Order>
                      <q2:X>1</q2:X>
                      <q2:Y>1</q2:Y>
                      <q2:Z>1</q2:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:RotateZ">
                      <q2:Order>Prepend</q2:Order>
                      <q2:Angle>0</q2:Angle>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q2:UpdateUniform">
                      <q2:UniformName>transform</q2:UniformName>
                      <q2:ShaderName>CircleArray</q2:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="6" Label="Source1" />
                  <Edge From="1" To="8" Label="Source2" />
                  <Edge From="2" To="7" Label="Source2" />
                  <Edge From="3" To="7" Label="Source3" />
                  <Edge From="4" To="6" Label="Source2" />
                  <Edge From="5" To="6" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:CreateVector4">
                <q2:X>1</q2:X>
                <q2:Y>1</q2:Y>
                <q2:Z>1</q2:Z>
                <q2:W>1</q2:W>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:UpdateUniform">
                <q2:UniformName>color</q2:UniformName>
                <q2:ShaderName>CircleArray</q2:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Borders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="top" Selector="Item1" />
                <Property Name="bottom" Selector="Item2" />
                <Property Name="left" Selector="Item3" />
                <Property Name="right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:moveDots_expansion">
                <q1:Velocity>0.001</q1:Velocity>
                <q1:dir>0</q1:dir>
                <q1:Coherence>0</q1:Coherence>
                <q1:left>-50</q1:left>
                <q1:right>50</q1:right>
                <q1:top>50</q1:top>
                <q1:bottom>-50</q1:bottom>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:DrawMeshInstanced">
                <q2:ShaderName>CircleArray</q2:ShaderName>
                <q2:MeshName>Quad</q2:MeshName>
                <q2:Usage>DynamicDraw</q2:Usage>
                <q2:InstanceAttributes>
                  <q2:InstanceAttributeMapping>
                    <q2:Size>2</q2:Size>
                    <q2:Normalized>false</q2:Normalized>
                    <q2:Type>Float</q2:Type>
                    <q2:Divisor>1</q2:Divisor>
                  </q2:InstanceAttributeMapping>
                </q2:InstanceAttributes>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="20" Label="Source2" />
            <Edge From="1" To="20" Label="Source3" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="21" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="21" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="21" Label="Source4" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="21" Label="Source5" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="20" Label="Source4" />
            <Edge From="17" To="23" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="22" To="24" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="29" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="29" Label="Source2" />
            <Edge From="28" To="29" Label="Source3" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:RenderTexture">
          <q2:RenderState />
          <q2:ClearColor>Black</q2:ClearColor>
          <q2:ClearMask>DepthBufferBit ColorBufferBit</q2:ClearMask>
          <q2:Width xsi:nil="true" />
          <q2:Height xsi:nil="true" />
          <q2:InternalFormat>Rgba</q2:InternalFormat>
          <q2:WrapS>Repeat</q2:WrapS>
          <q2:WrapT>Repeat</q2:WrapT>
          <q2:MinFilter>Linear</q2:MinFilter>
          <q2:MagFilter>Linear</q2:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>mdtext</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveViewport.bonsai">
        <Light>
          <X>0</X>
          <Y>100000</Y>
          <Z>0</Z>
        </Light>
        <FieldOfView>125.541855</FieldOfView>
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <Target>
          <X>0</X>
          <Y>0</Y>
          <Z>-1</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <NearClip>0.1</NearClip>
        <FarClip>10</FarClip>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>bindmdtext</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>mdtext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ShaderName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:BindTexture">
                <q2:TextureSlot>Texture0</q2:TextureSlot>
                <q2:ShaderName>TexturedModel</q2:ShaderName>
                <q2:TextureTarget>Texture2D</q2:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>-0.7906977</TranslationZ>
        <ScaleX>5</ScaleX>
        <ScaleY>5</ScaleY>
        <ScaleZ>2</ScaleZ>
        <MeshName>icoSphereHIgh</MeshName>
        <Ambient>
          <X>0.5</X>
          <Y>0.5</Y>
          <Z>0.5</Z>
        </Ambient>
        <Diffuse>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>100</SpecularExponent>
        <RotationZ>0</RotationZ>
        <RotationY>180</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Parse">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>WheelDisplacement</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Display and Resources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:RenderFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Borders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Top" Selector="Item1" />
                <Property Name="Bottom" Selector="Item2" />
                <Property Name="Left" Selector="Item3" />
                <Property Name="Right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
              <Left>-50</Left>
              <Right>50</Right>
              <Bottom>-50</Bottom>
              <Top>50</Top>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:CreateWindow">
                <q2:Width>1280</q2:Width>
                <q2:Height>960</q2:Height>
                <q2:VSync>On</q2:VSync>
                <q2:SwapSync>false</q2:SwapSync>
                <q2:ClearColor>Gray</q2:ClearColor>
                <q2:ClearMask>DepthBufferBit ColorBufferBit</q2:ClearMask>
                <q2:CursorVisible>true</q2:CursorVisible>
                <q2:Location xsi:nil="true" />
                <q2:WindowBorder>Resizable</q2:WindowBorder>
                <q2:WindowState>Normal</q2:WindowState>
                <q2:DisplayDevice>Primary</q2:DisplayDevice>
                <q2:TargetRenderFrequency>0</q2:TargetRenderFrequency>
                <q2:RenderState />
                <q2:GraphicsMode>
                  <q2:ColorFormat>
                    <q2:Red>8</q2:Red>
                    <q2:Green>8</q2:Green>
                    <q2:Blue>8</q2:Blue>
                    <q2:Alpha>8</q2:Alpha>
                  </q2:ColorFormat>
                  <q2:Depth>16</q2:Depth>
                  <q2:Stencil>0</q2:Stencil>
                  <q2:Samples>0</q2:Samples>
                  <q2:AccumulatorFormat>
                    <q2:Red>0</q2:Red>
                    <q2:Green>0</q2:Green>
                    <q2:Blue>0</q2:Blue>
                    <q2:Alpha>0</q2:Alpha>
                  </q2:AccumulatorFormat>
                  <q2:Buffers>2</q2:Buffers>
                  <q2:Stereo>false</q2:Stereo>
                </q2:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:ShaderResources">
                <q2:Shaders />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:MeshResources">
                <q2:Meshes>
                  <q2:MeshConfiguration xsi:type="q2:TexturedModel">
                    <q2:Name>icoSphereHIgh</q2:Name>
                    <q2:FileName>C:\Users\edward.horrocks\Documents\icoSphereHIgh.obj</q2:FileName>
                  </q2:MeshConfiguration>
                </q2:Meshes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:TextureResources">
                <q2:Textures />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:LoadResources" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>TopBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Top</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BottomBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Bottom</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>LeftBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Left</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>RightBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Right</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Borders</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="24" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="24" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="24" Label="Source3" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source4" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>MovingDots_SpeedDiscrim</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>TextureLeft</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveViewport.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>BindLeft</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="10" Label="Source2" />
      <Edge From="1" To="10" Label="Source4" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="10" Label="Source5" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source3" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.ParseBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
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  </ExtensionTypes>
</WorkflowBuilder>