WorkflowBuilder(Version=2.4.0)
Bonsai.Shaders.CreateWindow
  Width=1280
  Height=960
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Hidden
  WindowState=Maximized
  DisplayDevice=First
  TargetRenderFrequency=0
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
-> Bonsai.Shaders.ShaderResources(Shaders="")
-> Bonsai.Shaders.MeshResources(Meshes="")
-> Bonsai.Shaders.TextureResources(Textures="")
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame => #7
-> IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #10
#7 -> PublishSubject DrawStimuli => #11
#10, #11 -> Sample => #12
-> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0.9599, Z=0), Translation(X=-13.5, Y=0, Z=-11))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1)))
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1)))
#12 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-0.9599, Z=0), Translation(X=13.5, Y=0, Z=-11))
-> IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
-> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
-> Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1)))

Disable IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=2.5, Z=-10))
-> Disable IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=MeshMapping\MeshMapping_Neo_Feb19.csv)
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=X:\CODE\DEV\GammaCalibration\LUT_GRB.bmp)
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)

Bonsai.Numerics.CreateRandom(Seed=42)
-> AsyncSubject Random

WorkflowInput Source1
-> GroupWorkflow "Trial Block 1"
    SubscribeSubject Random => #0
    WorkflowInput Source1
    -> SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=2
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-3.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=0
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=2
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=0
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-3.5
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #3
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #30, #37, #50 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #3, #0 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters => #0
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #5
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #7
            SubscribeSubject DrawStimuli => #8
            #3, #8 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #9
            #9, #7 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #23
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #25, #23, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #12
            #9, #1, #5 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #13, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #9, #14 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #24
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #26, #24, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #15
            #15, #12 -> Zip => #16
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #21
            #16, #21 -> TakeUntil
            -> Last => #23
            Source1=#0, Source3=#23 -> Zip
            -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput

            SubscribeSubject Draw3DStim => #28
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #28 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
        -> Unit
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput

        ExternalizedMapping(waitForResponseTime)
        ExternalizedMapping(outputOnTime)
        ExternalizedMapping(timeoutTime)
    -> Concat
    -> Repeat
    -> WorkflowOutput

ExternalizedMapping(TopBorder) => #33
ExternalizedMapping(BottomBorder) => #34
ExternalizedMapping(LeftBorder) => #35
ExternalizedMapping(RightBorder) => #36
#33, #34, #35, #36 -> GroupWorkflow "Display and Resources"
    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #2
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #5
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #8
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #11
    #2, #5, #8, #11 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

Disable SubscribeSubject Draw3D => #38
-> Disable IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0.9599, Z=0), Translation(X=-13.5, Y=0, Z=-11))
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
-> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1)))
#38 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
-> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1)))
#38 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-0.9599, Z=0), Translation(X=13.5, Y=0, Z=-11))
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
-> Disable IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
-> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1)))

Disable Bonsai.Shaders.RenderFrame => #51
-> Disable BehaviorSubject draw
-> Disable IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90)
-> Disable BehaviorSubject Draw2D
-> Disable WorkflowOutput
#51 -> Disable Take(Count=1)
-> Disable IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0))
-> Disable Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> Disable BehaviorSubject Draw3D
