WorkflowBuilder(Version=2.4.1)
Bonsai.Shaders.CreateWindow
  Width=1800
  Height=800
  VSync=Adaptive
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Hidden
  WindowState=Fullscreen
  DisplayDevice=Second
  TargetRenderFrequency=60
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
-> Bonsai.Shaders.ShaderResources(Shaders="")
-> Bonsai.Shaders.MeshResources(Meshes="")
-> Bonsai.Shaders.TextureResources(Textures="")
-> Bonsai.Resources.LoadResources
-> WorkflowOutput

Bonsai.Shaders.RenderFrame => #7
-> IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=200), NearClip=0.1, FarClip=10000, Light(X=0, Y=0, Z=0))
-> BehaviorSubject Draw3DStim
-> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
-> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=20, Height=15, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-10))
-> Disable IncludeWorkflow(Path=BonVision:Environment.MeshMapping.bonsai, ClearColor=Gray, FileName=X:\ibn-vision\CODE\DEV\BONSAI\Ste\MeshMapping\MeshMapping_Neo_Feb19.csv)
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=X:\CODE\DEV\GammaCalibration\LUT_GRB.bmp)
#7 -> PublishSubject DrawStimuli
#7 -> PublishSubject DrawQuad

FloatProperty(Value=0)
-> PublishSubject Sync

Bonsai.Numerics.CreateRandom(Seed=1)
-> AsyncSubject Random

ExternalizedMapping(Value(DisplayName=TopBorder))
-> FloatProperty(Value=90)
-> ReplaySubject Top(BufferSize=nil) => #22
ExternalizedMapping(Value(DisplayName=BottomBorder))
-> FloatProperty(Value=-90)
-> ReplaySubject Bottom(BufferSize=nil) => #25
ExternalizedMapping(Value(DisplayName=LeftBorder))
-> FloatProperty(Value=-180)
-> ReplaySubject Left(BufferSize=nil) => #28
ExternalizedMapping(Value(DisplayName=RightBorder))
-> FloatProperty(Value=180)
-> ReplaySubject Right(BufferSize=nil) => #31
#22, #25, #28, #31 -> Zip
-> ReplaySubject Borders(BufferSize=nil)

Disable WorkflowInput Source1
-> Disable GroupWorkflow SpeedTuning => #35
    SubscribeSubject Random => #0
    WorkflowInput Source1
    -> SpeedDiscSpecification2
      Trials
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-35
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-35
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-100
          transXRight=100
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-87
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-87
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-100
          transXRight=100
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-175
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-175
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-100
          transXRight=100
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-350
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-350
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-100
          transXRight=100
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-524
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-524
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-100
          transXRight=100
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-17
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-17
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-44
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-44
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-87
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-87
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-175
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-175
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=3.5
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-261
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-261
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
    -> GroupWorkflow EnsureSpeedDiscParameters => #3
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #1 -> MemberSelector(Selector=Value.transXLeft) => #51
        ExternalizedMapping(Value(DisplayName=transXL)) => #52
        #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
        #1 -> MemberSelector(Selector=Value.transXRight) => #54
        ExternalizedMapping(Value(DisplayName=transXR)) => #55
        #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
        #53, #56 -> Zip => #57
        #30, #37, #50, #57 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight,
            Item4.Item1 as transXL,
            Item4.Item2 as transXR)
        -> WorkflowOutput
    #3, #0 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
            SubscribeSubject DrawStimuli => #4
            #3, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #8
            SubscribeSubject Parameters => #9
            -> MemberSelector(Selector=VelXLeft) => #10
            #8, #10 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #13
            #9 -> MemberSelector(Selector=VelYLeft) => #14
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohLeft)
            -> PropertyMapping(Coherence) => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelXRight) => #19
            #19, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #22
            #14, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #25
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohRight)
            -> PropertyMapping(Coherence) => #28
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYRight) => #30
            #30, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #33
            #5, #1, #13, #17, #25 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=7, Y=7, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=-2.91666675, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #23
                    FloatProperty(Value=0) => #24
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #28, #26, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-2.91666675, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #23
                    FloatProperty(Value=0) => #24
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #26, #28, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-2.91666675, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #14, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #10, #9 -> moveDots_2dLife(VelocityX=-2.91666675, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft
            #5, #1, #22, #28, #33 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT1S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=-2.91666675, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
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                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
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                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
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                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight

            SubscribeSubject Draw3DStim => #40
            -> Sink BindLeft => #41
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #46
            SubscribeSubject Borders => #47
            -> MemberSelector(Selector=Item1) => #48
            #47 -> MemberSelector(Selector=Item2) => #49
            #48, #49 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleY) => #52
            #47 -> MemberSelector(Selector=Item3) => #53
            #47 -> MemberSelector(Selector=Item4) => #54
            #54, #53 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleX) => #57
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #60
            SubscribeSubject Parameters => #61
            -> MemberSelector(Selector=transXL)
            -> PropertyMapping(TranslationX) => #63
            #41, #57, #52, #63 -> IncludeWorkflow => #64
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-50
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #40 -> Sink BindRight => #65
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #61 -> MemberSelector(Selector=transXR)
            -> PropertyMapping(TranslationX) => #67
            #65, #57, #52, #67 -> IncludeWorkflow => #68
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=50
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #64, #68 -> Zip => #69
            #69, #46 -> TakeUntil
            -> Last => #71
            -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #71 -> FloatProperty(Value=0) => #75
            #75, #60 -> Merge
            -> BehaviorSubject quadState

            SubscribeSubject Draw3DStim
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #79
            SubscribeSubject quadState
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #81
            #79, #81 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=20, ExtentY=20, LocationX=170, LocationY=70, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
        -> Unit
        -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
Disable Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #36
-> Disable SubscribeWhen
#35, #36 -> Disable SubscribeWhen
Disable GroupWorkflow FastSpeedChanges => #39
    SubscribeSubject Random => #0
    WorkflowInput Source1
    -> SpeedDiscSpecification2
      Trials
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-35
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-35
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-87
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-87
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-175
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-175
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-350
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-350
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-524
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-524
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-17
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-17
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-44
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-44
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-87
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-87
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-175
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-175
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
        SpeedDiscParameters2
          Duration=0.25
          Size=7
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-261
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-261
          VelocityYRight=0
          CoherenceRight=100
          transXLeft=-50
          transXRight=50
    -> GroupWorkflow EnsureSpeedDiscParameters => #3
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #1 -> MemberSelector(Selector=Value.transXLeft) => #51
        ExternalizedMapping(Value(DisplayName=transXL)) => #52
        #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
        #1 -> MemberSelector(Selector=Value.transXRight) => #54
        ExternalizedMapping(Value(DisplayName=transXR)) => #55
        #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
        #53, #56 -> Zip => #57
        #30, #37, #50, #57 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight,
            Item4.Item1 as transXL,
            Item4.Item2 as transXR)
        -> WorkflowOutput
    #3, #0 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
            SubscribeSubject DrawStimuli => #4
            #3, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #8
            SubscribeSubject Parameters => #9
            -> MemberSelector(Selector=VelXLeft) => #10
            #8, #10 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #13
            #9 -> MemberSelector(Selector=VelYLeft) => #14
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohLeft)
            -> PropertyMapping(Coherence) => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelXRight) => #19
            #19, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #22
            #14, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #25
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohRight)
            -> PropertyMapping(Coherence) => #28
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYRight) => #30
            #30, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #33
            #5, #1, #13, #17, #25 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.45)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #22
                    Disable FloatProperty(Value=0) => #23
                    #18, #23 -> Disable Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Disable Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=7, Y=7, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=-1.45, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.45)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #23
                    Disable FloatProperty(Value=0) => #24
                    #23, #24 -> Disable Merge
                    -> PropertyMapping(VelocityY) => #26
                    #19, #24 -> Disable Merge
                    -> PropertyMapping(VelocityX) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #28, #26, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.45, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.45)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #23
                    Disable FloatProperty(Value=0) => #24
                    #19, #24 -> Disable Merge
                    -> PropertyMapping(VelocityX) => #26
                    #23, #24 -> Disable Merge
                    -> PropertyMapping(VelocityY) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #26, #28, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.45, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.45)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #22
                    Disable FloatProperty(Value=0) => #23
                    #18, #23 -> Disable Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Disable Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #14, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #10, #9 -> moveDots_2dLife(VelocityX=-1.45, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft
            #5, #1, #22, #28, #33 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.45)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Disable Delay(DueTime=PT1S) => #22
                    Disable FloatProperty(Value=0) => #23
                    #18, #23 -> Disable Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Disable Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=7)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=-1.45, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
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                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
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                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
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                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight

            SubscribeSubject Draw3DStim => #40
            -> Sink BindLeft => #41
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT0.25S) => #46
            SubscribeSubject Borders => #47
            -> MemberSelector(Selector=Item1) => #48
            #47 -> MemberSelector(Selector=Item2) => #49
            #48, #49 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleY) => #52
            #47 -> MemberSelector(Selector=Item3) => #53
            #47 -> MemberSelector(Selector=Item4) => #54
            #54, #53 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleX) => #57
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #60
            SubscribeSubject Parameters => #61
            -> MemberSelector(Selector=transXL)
            -> PropertyMapping(TranslationX) => #63
            #41, #57, #52, #63 -> IncludeWorkflow => #64
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-50
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #40 -> Sink BindRight => #65
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #61 -> MemberSelector(Selector=transXR)
            -> PropertyMapping(TranslationX) => #67
            #65, #57, #52, #67 -> IncludeWorkflow => #68
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=50
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #64, #68 -> Zip => #69
            #69, #46 -> TakeUntil
            -> Last => #71
            -> Unit
            -> WorkflowOutput
            #71 -> FloatProperty(Value=0) => #74
            #74, #60 -> Merge
            -> BehaviorSubject quadState

            SubscribeSubject Draw3DStim
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #78
            SubscribeSubject quadState
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #80
            #78, #80 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=20, ExtentY=20, LocationX=170, LocationY=70, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
        -> Unit
        -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
#39, #36 -> Disable SubscribeWhen

Disable Timer(DueTime=PT1S, Period=PT0.5S)
-> Disable randomDouble

Disable WorkflowInput Source1
-> Disable GroupWorkflow SizeDensity => #44
    SubscribeSubject Random => #0
    WorkflowInput Source1 => #1
    -> GroupWorkflow Size10Dots => #2
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=206
              numDots2=206
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-23
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-23
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=206
              numDots2=206
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-158
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-158
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=206
              numDots2=206
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-293
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-293
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=206
              numDots2=206
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-428
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-428
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
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        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> GroupWorkflow Size5Dots => #3
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=5
              Colour1=0
              Colour2=1
              numDots1=825
              numDots2=825
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-23
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-23
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=5
              Colour1=0
              Colour2=1
              numDots1=825
              numDots2=825
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-158
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-158
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=5
              Colour1=0
              Colour2=1
              numDots1=825
              numDots2=825
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-293
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-293
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=5
              Colour1=0
              Colour2=1
              numDots1=825
              numDots2=825
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-428
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-428
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
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        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
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            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> GroupWorkflow Size2Dots => #4
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=2.5
              Colour1=0
              Colour2=1
              numDots1=3300
              numDots2=3300
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-23
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-23
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=2.5
              Colour1=0
              Colour2=1
              numDots1=3300
              numDots2=3300
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-158
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-158
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=2.5
              Colour1=0
              Colour2=1
              numDots1=3300
              numDots2=3300
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-293
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-293
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=2.5
              Colour1=0
              Colour2=1
              numDots1=3300
              numDots2=3300
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-428
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-428
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
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        -> GroupWorkflow EnsureSpeedDiscParameters
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        -> WorkflowOutput
    #1 -> Disable GroupWorkflow NoDots => #5
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=2.5
              Colour1=0
              Colour2=1
              numDots1=0
              numDots2=0
              dotLifeBool=0
              dotLifetime=20
              Contrast=0
              VelocityXLeft=0
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=0
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow ContrastSize10 => #6
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=0.5
              VelocityXLeft=-23
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-23
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=0.5
              VelocityXLeft=-158
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-158
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=0.5
              VelocityXLeft=-293
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-293
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=0.5
              VelocityXLeft=-428
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-428
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=0.5
              VelocityXLeft=-563
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-563
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=0.5
              VelocityXLeft=-698
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-698
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=0.5
              VelocityXLeft=0
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=0
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow CoherenceSize10 => #7
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-23
              VelocityYLeft=0
              CoherenceLeft=75
              VelocityXRight=-23
              VelocityYRight=0
              CoherenceRight=75
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-158
              VelocityYLeft=0
              CoherenceLeft=75
              VelocityXRight=-158
              VelocityYRight=0
              CoherenceRight=75
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-293
              VelocityYLeft=0
              CoherenceLeft=75
              VelocityXRight=-293
              VelocityYRight=0
              CoherenceRight=75
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-428
              VelocityYLeft=0
              CoherenceLeft=75
              VelocityXRight=-428
              VelocityYRight=0
              CoherenceRight=75
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-563
              VelocityYLeft=0
              CoherenceLeft=75
              VelocityXRight=-563
              VelocityYRight=0
              CoherenceRight=75
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-698
              VelocityYLeft=0
              CoherenceLeft=75
              VelocityXRight=-698
              VelocityYRight=0
              CoherenceRight=75
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-23
              VelocityYLeft=0
              CoherenceLeft=10
              VelocityXRight=-23
              VelocityYRight=0
              CoherenceRight=10
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-158
              VelocityYLeft=0
              CoherenceLeft=10
              VelocityXRight=-158
              VelocityYRight=0
              CoherenceRight=10
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-293
              VelocityYLeft=0
              CoherenceLeft=10
              VelocityXRight=-293
              VelocityYRight=0
              CoherenceRight=10
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-428
              VelocityYLeft=0
              CoherenceLeft=10
              VelocityXRight=-428
              VelocityYRight=0
              CoherenceRight=10
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-563
              VelocityYLeft=0
              CoherenceLeft=10
              VelocityXRight=-563
              VelocityYRight=0
              CoherenceRight=10
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-698
              VelocityYLeft=0
              CoherenceLeft=10
              VelocityXRight=-698
              VelocityYRight=0
              CoherenceRight=10
              transXLeft=-100
              transXRight=100
        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #1 -> Disable GroupWorkflow UnilateralFlow => #8
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-100
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-300
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-33
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=100
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-100
              transXRight=100
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        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #2, #3, #4, #5, #6, #7, #8 -> Concat => #9
    #9, #0 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
            SubscribeSubject DrawStimuli => #4
            #3, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #8
            SubscribeSubject Parameters => #9
            -> MemberSelector(Selector=VelXLeft) => #10
            #8, #10 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #13
            #9 -> MemberSelector(Selector=VelYLeft) => #14
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohLeft)
            -> PropertyMapping(Coherence) => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelXRight) => #19
            #19, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #22
            #14, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #25
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohRight)
            -> PropertyMapping(Coherence) => #28
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYRight) => #30
            #30, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #33
            #5, #1, #13, #17, #25 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=103, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=103) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9.383333)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=5, Y=5, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=-0.383333325, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=103, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=103) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9.383333)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #28, #26, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-0.383333325, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=103, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=103) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9.383333)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #26, #28, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-0.383333325, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=103, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=103) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9.383333)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #14, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #10, #9 -> moveDots_2dLife(VelocityX=-0.383333325, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft
            #5, #1, #22, #28, #33 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=103, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=103) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9.383333)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=-0.383333325, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
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                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
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                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
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                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight

            SubscribeSubject Draw3DStim => #40
            -> Sink BindLeft => #41
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #46
            SubscribeSubject Borders => #47
            -> MemberSelector(Selector=Item1) => #48
            #47 -> MemberSelector(Selector=Item2) => #49
            #48, #49 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleY) => #52
            #47 -> MemberSelector(Selector=Item3) => #53
            #47 -> MemberSelector(Selector=Item4) => #54
            #54, #53 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleX) => #57
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #60
            SubscribeSubject Parameters => #61
            -> MemberSelector(Selector=transXL)
            -> PropertyMapping(TranslationX) => #63
            #41, #57, #52, #63 -> IncludeWorkflow => #64
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #40 -> Sink BindRight => #65
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #61 -> MemberSelector(Selector=transXR)
            -> PropertyMapping(TranslationX) => #67
            #65, #57, #52, #67 -> IncludeWorkflow => #68
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #64, #68 -> Zip => #69
            #69, #46 -> TakeUntil
            -> Last => #71
            -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #71 -> FloatProperty(Value=0) => #75
            #75, #60 -> Merge
            -> BehaviorSubject quadState

            SubscribeSubject Draw3DStim
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #79
            SubscribeSubject quadState
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #81
            #79, #81 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=20, ExtentY=20, LocationX=170, LocationY=70, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
        -> Unit
        -> WorkflowOutput
    -> Concat
    -> RepeatCount(Count=10)
    -> WorkflowOutput
Disable Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #45
#44, #45 -> Disable SubscribeWhen

WorkflowInput Source1
-> GroupWorkflow SizeDensity => #48
    SubscribeSubject Random => #0
    WorkflowInput Source1
    -> GroupWorkflow UnilateralFlow => #2
        WorkflowInput Source1
        -> SpeedDiscSpecification2
          Trials
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-100
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-90000
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=0
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-90000
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=100
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-90000
              transXRight=100
            SpeedDiscParameters2
              Duration=2
              Size=10
              Colour1=0
              Colour2=1
              numDots1=103
              numDots2=103
              dotLifeBool=0
              dotLifetime=20
              Contrast=1
              VelocityXLeft=-100
              VelocityYLeft=0
              CoherenceLeft=100
              VelocityXRight=-500
              VelocityYRight=0
              CoherenceRight=100
              transXLeft=-90000
              transXRight=100
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        -> GroupWorkflow EnsureSpeedDiscParameters
            WorkflowInput Source1
            -> ElementIndex => #1
            -> MemberSelector(Selector=Index) => #2
            #1 -> MemberSelector(Selector=Value.Duration) => #3
            ExternalizedMapping(Value(DisplayName=DotSize)) => #4
            ExternalizedMapping(Value(DisplayName=Colour1)) => #5
            ExternalizedMapping(Value(DisplayName=Colour2)) => #6
            ExternalizedMapping(Value(DisplayName=numDots1)) => #7
            ExternalizedMapping(Value(DisplayName=numDots2)) => #8
            ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
            ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
            ExternalizedMapping(Value(DisplayName=Contrast)) => #11
            ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
            ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
            ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
            ExternalizedMapping(Value(DisplayName=VelXright)) => #15
            ExternalizedMapping(Value(DisplayName=VelYright)) => #16
            ExternalizedMapping(Value(DisplayName=CohRight)) => #17
            ExternalizedMapping(Value(DisplayName=Duration)) => #18
            #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
            #1 -> MemberSelector(Selector=Value.Size) => #20
            #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
            #1 -> MemberSelector(Selector=Value.Colour1) => #22
            #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
            #1 -> MemberSelector(Selector=Value.Colour2) => #24
            #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
            #1 -> MemberSelector(Selector=Value.numDots1) => #26
            #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
            #1 -> MemberSelector(Selector=Value.numDots2) => #28
            #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
            #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
            #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
            #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
            #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
            #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
            #1 -> MemberSelector(Selector=Value.Contrast) => #35
            #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
            #32, #34, #36 -> Zip => #37
            #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
            #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
            #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
            #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
            #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
            #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
            #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
            #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
            #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
            #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
            #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
            #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
            #39, #41, #43, #45, #47, #49 -> Zip => #50
            #1 -> MemberSelector(Selector=Value.transXLeft) => #51
            ExternalizedMapping(Value(DisplayName=transXL)) => #52
            #51, #52 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #53
            #1 -> MemberSelector(Selector=Value.transXRight) => #54
            ExternalizedMapping(Value(DisplayName=transXR)) => #55
            #54, #55 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #56
            #53, #56 -> Zip => #57
            #30, #37, #50, #57 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1.Item1 as Id,
                Item1.Item2 as Duration,
                Item1.Item3 as Size,
                Item1.Item4 as Colour1,
                Item1.Item5 as Colour2,
                Item1.Item6 as numDots1,
                Item1.Item7 as numDots2,
                Item2.Item1 as dotLifeBool,
                Item2.Item2 as dotLifetime,
                Item2.Item3 as Contrast,
                Item3.Item1 as VelXLeft,
                Item3.Item2 as VelYLeft,
                Item3.Item3 as CohLeft,
                Item3.Item4 as VelXRight,
                Item3.Item5 as VelYRight,
                Item3.Item6 as CohRight,
                Item4.Item1 as transXL,
                Item4.Item2 as transXR)
            -> WorkflowOutput
        -> WorkflowOutput
    #2, #0 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #3
            SubscribeSubject DrawStimuli => #4
            #3, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Bonsai.Shaders.UpdateFrame
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #8
            SubscribeSubject Parameters => #9
            -> MemberSelector(Selector=VelXLeft) => #10
            #8, #10 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #13
            #9 -> MemberSelector(Selector=VelYLeft) => #14
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohLeft)
            -> PropertyMapping(Coherence) => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelXRight) => #19
            #19, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #22
            #14, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #25
            SubscribeSubject Parameters
            -> MemberSelector(Selector=CohRight)
            -> PropertyMapping(Coherence) => #28
            SubscribeSubject Parameters
            -> MemberSelector(Selector=VelYRight) => #30
            #30, #8 -> Zip
            -> Multiply
            -> PropertyMapping(VelY) => #33
            #5, #1, #13, #17, #25 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=407, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=407) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=5, Y=5, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=407, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=407) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #28, #26, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=407, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=407) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #23
                    FloatProperty(Value=0) => #24
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #26, #28, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=407, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=407) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #14, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #10, #9 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft
            #5, #1, #22, #28, #33 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=407, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=407) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Take(Count=1)
                    -> Delay(DueTime=PT0.5S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=5)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
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                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #13, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #9, #14 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
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                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
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                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
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                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight

            SubscribeSubject Draw3DStim => #40
            -> Sink BindLeft => #41
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            WorkflowInput Source1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #46
            SubscribeSubject Borders => #47
            -> MemberSelector(Selector=Item1) => #48
            #47 -> MemberSelector(Selector=Item2) => #49
            #48, #49 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleY) => #52
            #47 -> MemberSelector(Selector=Item3) => #53
            #47 -> MemberSelector(Selector=Item4) => #54
            #54, #53 -> Zip
            -> Subtract
            -> PropertyMapping(ScaleX) => #57
            SubscribeSubject Draw3DStim
            -> Take(Count=1)
            -> FloatProperty(Value=1) => #60
            SubscribeSubject Parameters => #61
            -> MemberSelector(Selector=transXL)
            -> PropertyMapping(TranslationX) => #63
            #41, #57, #52, #63 -> IncludeWorkflow => #64
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #40 -> Sink BindRight => #65
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            #61 -> MemberSelector(Selector=transXR)
            -> PropertyMapping(TranslationX) => #67
            #65, #57, #52, #67 -> IncludeWorkflow => #68
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #64, #68 -> Zip => #69
            #69, #46 -> TakeUntil
            -> Last => #71
            -> Bonsai.Shaders.Delay(DueTime=PT1S)
            -> Unit
            -> WorkflowOutput
            #71 -> FloatProperty(Value=0) => #75
            #75, #60 -> Merge
            -> BehaviorSubject quadState

            SubscribeSubject Draw3DStim
            -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #79
            SubscribeSubject quadState
            -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #81
            #79, #81 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=20, ExtentY=20, LocationX=170, LocationY=70, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
        -> Unit
        -> WorkflowOutput
    -> Concat
    -> RepeatCount(Count=10)
    -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #49
#48, #49 -> SubscribeWhen
