WorkflowBuilder(Version=2.4.0)
ExternalizedMapping("ISI lower bound"(Category="Time Options"), "ISI upper bound"(Category="Time Options")) => #0
ExternalizedMapping(Value(DisplayName=respDelay, Category="Time Options"))
-> FloatProperty(Value=1.1)
-> ReplaySubject respDelay(BufferSize=nil)
-> Bonsai.Scripting.ExpressionTransform => #4
  Expression: TimeSpan.FromSeconds(it)
ExternalizedMapping(Value(DisplayName=respWin, Category="Time Options"))
-> FloatProperty(Value=5)
-> ReplaySubject respWinSize(BufferSize=nil)
-> Bonsai.Scripting.ExpressionTransform => #8
  Expression: TimeSpan.FromSeconds(it)
#4, #8 -> CombineLatest
-> PropertyMapping(ResponseWindowDelay(Selector=Item1), ResponseWindowLength(Selector=Item2)) => #10
GroupWorkflow PassiveStart => #11
    SubscribeSubject lastKeyState
    -> Condition => #1
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #2
    #1, #2 -> Sample
    -> WorkflowOutput
#11, #0 -> CreateObservable PassiveTrials => #12
    SubscribeSubject Random => #0
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-1
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-1
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-3
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-3
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #2
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=6)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #30, #37, #50 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #2, #0 -> Bonsai.Numerics.Permutation => #3
    ExternalizedMapping("ISI lower bound", "ISI upper bound") => #4
    #3, #4 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #3
            SubscribeSubject Parameters => #0
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            Bonsai.Shaders.RenderFrame => #2
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
            #2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Disable Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false) => #6
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #8
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #10
            #5, #1, #8 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10) => #16
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #17 -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #16 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #30
                    ExternalizedMapping(LocationX) => #31
                    ExternalizedMapping(LocationY) => #32
                    ExternalizedMapping(Z) => #33
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #36
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #39
                    #4, #31, #32, #39 -> GroupWorkflow Transform => #40
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #40, #1, #2, #33, #36 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #42
                    #13, #42 -> CombineLatest => #43
                    #43, #42 -> Sample
                    -> MemberSelector(Selector=Item1) => #45
                    ExternalizedMapping(Coherence) => #46
                    #45, #23, #30, #46, #6, #9, #14 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #24
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #26, #24, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #13
            #5, #10, #1 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-3, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-3, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-3, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #23
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #25, #23, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-3, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #16
            #13, #16 -> Zip
            -> IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0)) => #18
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #18 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #22
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #20, #22 -> Zip
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #24
            -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0.9599, Z=0), Translation(X=-13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #28
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #32
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-0.9599, Z=0), Translation(X=13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #36
            #28, #32, #36 -> Zip => #37
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT5S) => #42
            #37, #42 -> TakeUntil
            -> Last => #44
            Source1=#0, Source3=#44 -> Zip => #45
            #0 -> Bonsai.Shaders.Delay(DueTime=PT2S)
            -> SelectMany PassiveReward => #47
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=VelXRight) => #1
                #0 -> MemberSelector(Selector=VelXLeft) => #2
                #2, #1 -> Zip
                -> Bonsai.Scripting.PythonTransform ComputeResult => #4
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);

                      if VelXR > VelXL: # stim is right
                          output = 2; #CORRECT RIGHT

                      elif VelXR < VelXL: # stim is up/left
                          output = 1; #correct left

                      return output
                -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #7
                #4 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #7, #10 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                SubscribeSubject Parameters => #14
                SubscribeSubject TrialType => #15
                FloatProperty(Value=9) => #16
                #14, #4, #16, #15 -> Zip
                -> GroupWorkflow LogTrialParams
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item4) => #1
                    #0 -> MemberSelector(Selector=Item3) => #2
                    #0 -> MemberSelector(Selector=Item2) => #3
                    #1, #2, #3 -> Zip => #4
                    #0 -> MemberSelector(Selector=Item1.Contrast) => #5
                    #0 -> MemberSelector(Selector=Item1.VelXLeft) => #6
                    #0 -> MemberSelector(Selector=Item1.VelXRight) => #7
                    #0 -> MemberSelector(Selector=Item1.CohLeft) => #8
                    #0 -> MemberSelector(Selector=Item1.CohRight) => #9
                    #5, #6, #7, #8, #9 -> Zip => #10
                    #4, #10 -> Zip
                    -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    -> WorkflowOutput
                #4 -> MulticastSubject TrialResults
            #45, #47 -> Zip => #48
            #48, #6 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> Disable Sink OffState => #4
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #9
        #9, #4 -> Delay(DueTime=PT2.679S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput
        #3 -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #2
            WorkflowInput Source1 => #0
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #2
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=1)
                -> Accumulate => #2
                #0 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #4
                #0 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #6
                #4, #6 -> Merge
                -> Accumulate => #8
                #8, #2 -> Zip
                -> Divide => #10
                #10, #2 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #6
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=1)
                -> Accumulate => #2
                #0 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #4
                #0 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #6
                #4, #6 -> Merge
                -> Accumulate => #8
                #8, #2 -> Zip
                -> Divide => #10
                #10, #2 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #7
            #7, #3 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #6 -> MemberSelector(Selector=Item2) => #10
            #10, #4 -> CombineLatest => #11
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #12
            #9, #12 -> CombineLatest => #13
            #8, #11 -> Zip => #14
            #13, #14 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #3
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #3 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #2 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            -> MemberSelector(Selector=Item1) => #2
            ExternalizedMapping(Value(DisplayName=nTrialsRequired)) => #3
            #2, #3 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #4
            #1 -> MemberSelector(Selector=Item2) => #5
            #5, #3 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #4, #6 -> Zip
            -> LogicalAnd => #8
            #0 -> MemberSelector(Selector=Item1) => #9
            -> MemberSelector(Selector=Item1) => #10
            ExternalizedMapping(Value(DisplayName="pCorrect Required")) => #11
            #10, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #9 -> MemberSelector(Selector=Item2) => #13
            #13, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #14
            #12, #14 -> Zip
            -> LogicalAnd => #16
            #8, #16 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #19
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #20
            ExternalizedMapping(DueTime(DisplayName=InterStimInterval)) => #21
            #20, #21 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput
            #0 -> FloatProperty(Value=1) => #25
            #25, #19 -> TakeUntil
            -> MulticastSubject "Difficulty Level"

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
#11 -> StringProperty(Value=passive) => #13
GroupWorkflow ActiveAnyStart => #14
    SubscribeSubject lastKeyState
    -> Condition => #1
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=2))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #2
    #1, #2 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=activeany) => #15
GroupWorkflow ActiveNoAbortStart => #16
    SubscribeSubject lastKeyState
    -> Condition => #1
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=3))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #2
    #1, #2 -> Sample
    -> WorkflowOutput
#14, #10, #0 -> CreateObservable Active-AnyLick => #17
    SubscribeSubject Random => #0
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #1
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-1.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-6
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-6
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-1.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-2.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-2.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #3
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #30, #37, #50 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #3, #0 -> Bonsai.Numerics.Permutation => #4
    ExternalizedMapping(timeoutTime) => #5
    #4, #5, #1 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #3
            SubscribeSubject Parameters => #0
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            Bonsai.Shaders.RenderFrame => #2
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
            #2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Disable Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false) => #6
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #8
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #10
            #5, #1, #8 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6) => #16
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #17 -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #16 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #30
                    ExternalizedMapping(LocationX) => #31
                    ExternalizedMapping(LocationY) => #32
                    ExternalizedMapping(Z) => #33
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #36
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #39
                    #4, #31, #32, #39 -> GroupWorkflow Transform => #40
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #40, #1, #2, #33, #36 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #42
                    #13, #42 -> CombineLatest => #43
                    #43, #42 -> Sample
                    -> MemberSelector(Selector=Item1) => #45
                    ExternalizedMapping(Coherence) => #46
                    #45, #23, #30, #46, #6, #9, #14 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #24
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #26, #24, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #13
            #5, #10, #1 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #23
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #25, #23, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #16
            #13, #16 -> Zip
            -> IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0)) => #18
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #18 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #22
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #20, #22 -> Zip
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #24
            -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0.9599, Z=0), Translation(X=-13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #28
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #32
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-0.9599, Z=0), Translation(X=13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #36
            #28, #32, #36 -> Zip => #37
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #42
            #37, #42 -> TakeUntil
            -> Last => #44
            Source1=#0, Source3=#44 -> Zip => #45
            #45, #6 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        #3 -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #7
        #0, #7 -> Delay(DueTime=PT1.1S) => #8
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #9
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #14
        ExternalizedMapping(timeoutTime) => #15
        #15, #8, #9 -> SelectMany Response => #16
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #2
            #0 -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #4
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #8
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #12
            ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #15
            #8, #12, #15 -> Amb => #16
            #4, #2, #16 -> Zip
            -> Disable MulticastSubject ptrack => #18
            #16 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            ExternalizedMapping(timeoutTime) => #21
            #18, #21 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                WorkflowInput Source1 => #0
                -> Bonsai.Scripting.PythonTransform ComputeResult-AnyLick => #1
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse != 0:
                          output = 2; #CORRECT RIGHT

                      elif VelXR < VelXL: # stim is up/left
                        if trialResponse != 0:
                          output = 1; #correct left

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #4
                #1 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #7
                #1 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #1 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #13
                #4, #7, #10, #13 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #1 -> MulticastSubject TrialResults
                #0 -> MemberSelector(Selector=Item3) => #18
                SubscribeSubject Parameters => #19
                SubscribeSubject TrialType => #20
                #19, #1, #18, #20 -> Zip
                -> GroupWorkflow LogTrialParams
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item4) => #1
                    #0 -> MemberSelector(Selector=Item3) => #2
                    #0 -> MemberSelector(Selector=Item2) => #3
                    #1, #2, #3 -> Zip => #4
                    #0 -> MemberSelector(Selector=Item1.Contrast) => #5
                    #0 -> MemberSelector(Selector=Item1.VelXLeft) => #6
                    #0 -> MemberSelector(Selector=Item1.VelXRight) => #7
                    #0 -> MemberSelector(Selector=Item1.CohLeft) => #8
                    #0 -> MemberSelector(Selector=Item1.CohRight) => #9
                    #5, #6, #7, #8, #9 -> Zip => #10
                    #4, #10 -> Zip
                    -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    -> WorkflowOutput

                ExternalizedMapping(DueTime(DisplayName=timeoutTime))
            -> WorkflowOutput
            #0 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #16, #3 -> Zip => #17
        #17, #14 -> Delay(DueTime=PT2.1S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #2
            WorkflowInput Source1 => #0
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #2
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=1)
                -> Accumulate => #2
                #0 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #4
                #0 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #6
                #4, #6 -> Merge
                -> Accumulate => #8
                #8, #2 -> Zip
                -> Divide => #10
                #10, #2 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #6
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=1)
                -> Accumulate => #2
                #0 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #4
                #0 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #6
                #4, #6 -> Merge
                -> Accumulate => #8
                #8, #2 -> Zip
                -> Divide => #10
                #10, #2 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #7
            #7, #3 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #6 -> MemberSelector(Selector=Item2) => #10
            #10, #4 -> CombineLatest => #11
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #12
            #9, #12 -> CombineLatest => #13
            #8, #11 -> Zip => #14
            #13, #14 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #3
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #3 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #2 -> MemberSelector(Selector=Item2) => #8
        ExternalizedMapping(InterStimInterval) => #9
        #8, #9 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            -> MemberSelector(Selector=Item1) => #2
            ExternalizedMapping(Value(DisplayName=nTrialsRequired)) => #3
            #2, #3 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #4
            #1 -> MemberSelector(Selector=Item2) => #5
            #5, #3 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #4, #6 -> Zip
            -> LogicalAnd => #8
            #0 -> MemberSelector(Selector=Item1) => #9
            -> MemberSelector(Selector=Item1) => #10
            ExternalizedMapping(Value(DisplayName="pCorrect Required")) => #11
            #10, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #9 -> MemberSelector(Selector=Item2) => #13
            #13, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #14
            #12, #14 -> Zip
            -> LogicalAnd => #16
            #8, #16 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #19
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #20
            ExternalizedMapping(DueTime(DisplayName=InterStimInterval)) => #21
            #20, #21 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput
            #0 -> FloatProperty(Value=1) => #25
            #25, #19 -> TakeUntil
            -> MulticastSubject "Difficulty Level"

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
#16, #10, #0 -> CreateObservable Active-NoAbort => #18
    SubscribeSubject Random => #0
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #1
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-2.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-2.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-6
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-1.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-1.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-6
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #3
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #30, #37, #50 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #3, #0 -> Bonsai.Numerics.Permutation => #4
    ExternalizedMapping(timeoutTime) => #5
    #4, #5, #1 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #3
            SubscribeSubject Parameters => #0
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            Bonsai.Shaders.RenderFrame => #2
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
            #2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Disable Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false) => #6
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #8
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #10
            #5, #1, #8 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10) => #16
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #17 -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #16 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #30
                    ExternalizedMapping(LocationX) => #31
                    ExternalizedMapping(LocationY) => #32
                    ExternalizedMapping(Z) => #33
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #36
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #39
                    #4, #31, #32, #39 -> GroupWorkflow Transform => #40
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #40, #1, #2, #33, #36 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #42
                    #13, #42 -> CombineLatest => #43
                    #43, #42 -> Sample
                    -> MemberSelector(Selector=Item1) => #45
                    ExternalizedMapping(Coherence) => #46
                    #45, #23, #30, #46, #6, #9, #14 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #48
                    #48, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #24
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #26, #24, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #13
            #5, #10, #1 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2.5)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-2.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2.5)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-2.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2.5)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=-2.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2.5)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #23
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #25, #23, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=-2.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #16
            #13, #16 -> Zip
            -> IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0)) => #18
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #18 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #22
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #20, #22 -> Zip
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #24
            -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0.9599, Z=0), Translation(X=-13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #28
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #32
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-0.9599, Z=0), Translation(X=13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #36
            #28, #32, #36 -> Zip => #37
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #42
            #37, #42 -> TakeUntil
            -> Last => #44
            Source1=#0, Source3=#44 -> Zip => #45
            #45, #6 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        #3 -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #7
        #0, #7 -> Delay(DueTime=PT1.1S) => #8
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #9
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #14
        ExternalizedMapping(timeoutTime) => #15
        #15, #8, #9 -> SelectMany Response => #16
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #2
            #0 -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #4
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> Condition
                WorkflowInput Source1

                SubscribeSubject lvel => #1
                SubscribeSubject rvel => #2
                #1, #2 -> Zip
                -> LessThan
                -> WorkflowOutput
            -> First
            -> FloatProperty(Value=-1) => #9
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> Condition
                WorkflowInput Source1

                SubscribeSubject lvel => #1
                SubscribeSubject rvel => #2
                #2, #1 -> Zip
                -> LessThan
                -> WorkflowOutput
            -> First
            -> FloatProperty(Value=1) => #14
            ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #17
            #9, #14, #17 -> Amb => #18
            #4, #2, #18 -> Zip => #19
            #18 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            ExternalizedMapping(timeoutTime) => #22
            #19, #22 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                WorkflowInput Source1 => #0
                -> Bonsai.Scripting.PythonTransform ComputeResult => #1
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #4
                #1 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #7
                #1 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #1 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #13
                #4, #7, #10, #13 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #1 -> MulticastSubject TrialResults
                #0 -> MemberSelector(Selector=Item3) => #18
                SubscribeSubject Parameters => #19
                SubscribeSubject TrialType => #20
                #19, #1, #18, #20 -> Zip
                -> GroupWorkflow LogTrialParams
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item4) => #1
                    #0 -> MemberSelector(Selector=Item3) => #2
                    #0 -> MemberSelector(Selector=Item2) => #3
                    #1, #2, #3 -> Zip => #4
                    #0 -> MemberSelector(Selector=Item1.Contrast) => #5
                    #0 -> MemberSelector(Selector=Item1.VelXLeft) => #6
                    #0 -> MemberSelector(Selector=Item1.VelXRight) => #7
                    #0 -> MemberSelector(Selector=Item1.CohLeft) => #8
                    #0 -> MemberSelector(Selector=Item1.CohRight) => #9
                    #5, #6, #7, #8, #9 -> Zip => #10
                    #4, #10 -> Zip
                    -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    -> WorkflowOutput

                ExternalizedMapping(DueTime(DisplayName=timeoutTime))
            -> WorkflowOutput
            #0 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #16, #3 -> Zip => #17
        #17, #14 -> Delay(DueTime=PT2.429S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #2
            WorkflowInput Source1 => #0
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #2
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=1)
                -> Accumulate => #2
                #0 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #4
                #0 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #6
                #4, #6 -> Merge
                -> Accumulate => #8
                #8, #2 -> Zip
                -> Divide => #10
                #10, #2 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #6
                WorkflowInput Source1 => #0
                -> FloatProperty(Value=1)
                -> Accumulate => #2
                #0 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #4
                #0 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #6
                #4, #6 -> Merge
                -> Accumulate => #8
                #8, #2 -> Zip
                -> Divide => #10
                #10, #2 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #7
            #7, #3 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #6 -> MemberSelector(Selector=Item2) => #10
            #10, #4 -> CombineLatest => #11
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #12
            #9, #12 -> CombineLatest => #13
            #8, #11 -> Zip => #14
            #13, #14 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #3
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #3 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #2 -> MemberSelector(Selector=Item2) => #8
        ExternalizedMapping(InterStimInterval) => #9
        #8, #9 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            -> MemberSelector(Selector=Item1) => #2
            ExternalizedMapping(Value(DisplayName=nTrialsRequired)) => #3
            #2, #3 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #4
            #1 -> MemberSelector(Selector=Item2) => #5
            #5, #3 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #4, #6 -> Zip
            -> LogicalAnd => #8
            #0 -> MemberSelector(Selector=Item1) => #9
            -> MemberSelector(Selector=Item1) => #10
            ExternalizedMapping(Value(DisplayName="pCorrect Required")) => #11
            #10, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #9 -> MemberSelector(Selector=Item2) => #13
            #13, #11 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #14
            #12, #14 -> Zip
            -> LogicalAnd => #16
            #8, #16 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #19
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #20
            ExternalizedMapping(DueTime(DisplayName=InterStimInterval)) => #21
            #20, #21 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput
            #0 -> FloatProperty(Value=1) => #25
            #25, #19 -> TakeUntil
            -> MulticastSubject "Difficulty Level"

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
#16 -> StringProperty(Value=activenoabort) => #19
GroupWorkflow v2start => #20
    SubscribeSubject lastKeyState
    -> Condition => #1
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=4))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #2
    #1, #2 -> Sample
    -> WorkflowOutput
GroupWorkflow PasActStart => #21
    SubscribeSubject lastKeyState
    -> Condition => #1
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #2
    #1, #2 -> Sample
    -> WorkflowOutput
-> CreateObservable PasActTrials => #22
    SubscribeSubject Random => #0
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=10
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-6
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-1.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=10
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-1.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-6
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=10
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-2.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=10
          Size=6
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-2.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #2
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #30, #37, #50 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #2, #0 -> Bonsai.Numerics.Permutation => #3
    ExternalizedMapping("ISI lower bound", "ISI upper bound") => #4
    ExternalizedMapping(timeoutTime) => #5
    #3, #5, #4 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #3
            SubscribeSubject Parameters => #0
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            Bonsai.Shaders.RenderFrame => #2
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
            #2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false) => #6
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #8
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #10
            #5, #1, #8 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1 => #3
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5) => #16
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #16 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #13, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    #3 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #42
                    #17, #42 -> Merge
                    -> PropertyMapping(VelocityX) => #44
                    #25, #42 -> Merge
                    -> PropertyMapping(VelocityY) => #46
                    ExternalizedMapping(Coherence) => #47
                    #40, #44, #46, #47, #6, #9, #14 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #49
                    #49, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1 => #4
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    ExternalizedMapping(LocationX) => #22
                    ExternalizedMapping(LocationY) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #5, #22, #23, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #3, #26 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    #15, #32 -> CombineLatest => #33
                    #33, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #35
                    #4 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #37
                    #21, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #39
                    #18, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #41
                    ExternalizedMapping(Coherence) => #42
                    #35, #41, #39, #42, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #44
                    #44, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1 => #4
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    ExternalizedMapping(LocationX) => #22
                    ExternalizedMapping(LocationY) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #5, #22, #23, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #3, #26 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    #15, #32 -> CombineLatest => #33
                    #33, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #35
                    #4 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #37
                    #18, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #21, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(Coherence) => #42
                    #35, #39, #41, #42, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #44
                    #44, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1 => #3
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    ExternalizedMapping(LocationX) => #21
                    ExternalizedMapping(LocationY) => #22
                    ExternalizedMapping(Z) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    #14, #32 -> CombineLatest => #33
                    #33, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #35
                    #3 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #37
                    #17, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #20, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(Coherence) => #42
                    #35, #39, #41, #42, #6, #10, #9 -> moveDots_2dLife(VelocityX=-1.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #44
                    #44, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #13
            #5, #10, #1 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1 => #3
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    ExternalizedMapping(LocationX) => #21
                    ExternalizedMapping(LocationY) => #22
                    ExternalizedMapping(Z) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    #14, #32 -> CombineLatest => #33
                    #33, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #35
                    #3 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #37
                    #17, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #20, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(Coherence) => #42
                    #35, #39, #41, #42, #6, #10, #9 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #44
                    #44, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1 => #4
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    ExternalizedMapping(LocationX) => #22
                    ExternalizedMapping(LocationY) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #5, #22, #23, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #3, #26 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    #15, #32 -> CombineLatest => #33
                    #33, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #35
                    #4 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #37
                    #18, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #21, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(Coherence) => #42
                    #35, #39, #41, #42, #7, #10, #11 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #44
                    #44, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1 => #4
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    ExternalizedMapping(LocationX) => #22
                    ExternalizedMapping(LocationY) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #5, #22, #23, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #3, #26 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    #15, #32 -> CombineLatest => #33
                    #33, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #35
                    #4 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #37
                    #18, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #39
                    #21, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #41
                    ExternalizedMapping(Coherence) => #42
                    #35, #39, #41, #42, #7, #10, #11 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #44
                    #44, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1 => #3
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-6)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    ExternalizedMapping(LocationX) => #21
                    ExternalizedMapping(LocationY) => #22
                    ExternalizedMapping(Z) => #23
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #26
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=6)
                    -> PropertyMapping(ExtentX, ExtentY) => #29
                    #4, #21, #22, #29 -> GroupWorkflow Transform => #30
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=6, Y=6, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #30, #1, #2, #23, #26 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #32
                    #14, #32 -> CombineLatest => #33
                    #33, #32 -> Sample
                    -> MemberSelector(Selector=Item1) => #35
                    #3 -> Take(Count=1)
                    -> FloatProperty(Value=0) => #37
                    #20, #37 -> Merge
                    -> PropertyMapping(VelocityY) => #39
                    #17, #37 -> Merge
                    -> PropertyMapping(VelocityX) => #41
                    ExternalizedMapping(Coherence) => #42
                    #35, #41, #39, #42, #6, #10, #9 -> moveDots_2dLife(VelocityX=-6, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #44
                    #44, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #16
            #13, #16 -> Zip
            -> IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0)) => #18
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #20
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #18 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #22
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #20, #22 -> Zip
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #24
            -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0.9599, Z=0), Translation(X=-13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #28
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #32
            #24 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-0.9599, Z=0), Translation(X=13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=C:\Users\edward.horrocks\Documents\MATLAB\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=1, Height=1))) => #36
            #28, #32, #36 -> Zip => #37
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT10S) => #42
            #37, #42 -> TakeUntil
            -> Last => #44
            WorkflowInput Source1
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT1.5S) => #47
            Source2=#47 -> SelectMany ActiveResponse => #48
                SubscribeSubject leftLicks
                -> Skip(Count=1)
                -> First
                -> FloatProperty(Value=-1) => #3
                SubscribeSubject rightLicks
                -> Skip(Count=1)
                -> First
                -> FloatProperty(Value=1) => #7
                Timer(DueTime=PT7.5S, Period=PT0S)
                -> FloatProperty(Value=0) => #9
                #3, #7, #9 -> Amb => #10
                WorkflowInput Source1 => #11
                -> MemberSelector(Selector=VelXLeft) => #12
                #11 -> MemberSelector(Selector=VelXRight) => #13
                #12, #13, #10 -> Zip
                -> Bonsai.Scripting.PythonTransform ComputeResult => #15
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #18
                #15 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #21
                #15 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #24
                #15 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #27
                #18, #21, #24, #27 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #15 -> MulticastSubject TrialResults
                SubscribeSubject Parameters => #32
                SubscribeSubject TrialType => #33
                #32, #15, #10, #33 -> Zip
                -> GroupWorkflow LogTrialParams
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item4) => #1
                    #0 -> MemberSelector(Selector=Item3) => #2
                    #0 -> MemberSelector(Selector=Item2) => #3
                    #1, #2, #3 -> Zip => #4
                    #0 -> MemberSelector(Selector=Item1.Contrast) => #5
                    #0 -> MemberSelector(Selector=Item1.VelXLeft) => #6
                    #0 -> MemberSelector(Selector=Item1.VelXRight) => #7
                    #0 -> MemberSelector(Selector=Item1.CohLeft) => #8
                    #0 -> MemberSelector(Selector=Item1.CohRight) => #9
                    #5, #6, #7, #8, #9 -> Zip => #10
                    #4, #10 -> Zip
                    -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    -> WorkflowOutput
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            #47 -> SelectMany PassiveReward => #49
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=VelXLeft) => #1
                #0 -> MemberSelector(Selector=VelXRight) => #2
                #1, #2 -> Zip => #3
                Source2=#3 -> GroupWorkflow ComputeResultWorkflow
                  Description:
                    This grouped workflow computes the result of the trial
                    (0, 1, 2 or 3) and activates arduino digital outputs
                    accordingly
                  Workflow
                    WorkflowInput Source1
                    -> Bonsai.Scripting.PythonTransform CompPasRew => #1
                      Script:
                        @returns(int)
                        def process(value):

                          VelXL = abs(value.Item1);
                          VelXR = abs(value.Item2);

                          if VelXR > VelXL: # stim is right
                              output = 2; #CORRECT RIGHT

                          elif VelXR < VelXL: # stim is up/left
                              output = 1; #correct left

                          return output
                    -> Equal(Operand=IntProperty(Value=1))
                    -> Condition LeftCorrect
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> MulticastSubject LeftCorrect => #4
                    #1 -> Equal(Operand=IntProperty(Value=2))
                    -> Condition RightCorrect
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> MulticastSubject RightCorrect => #7
                    Source2=#4, Source3=#7 -> Merge
                    -> Take(Count=2)
                    -> WorkflowOutput
                -> WorkflowOutput
            #44, #49, #48 -> Zip => #50
            Source1=#0, Source3=#50 -> Zip => #51
            #51, #6 -> SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #10
        #3, #10 -> Delay(DueTime=PT2.798S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        ExternalizedMapping(timeoutTime)

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
#21 -> StringProperty(Value=pasact) => #23
ExternalizedMapping(autoBias(Category=Bias), pRightManual(Category=Bias), biasScaling(Category=Bias), meanSpeedProbs, minPRight(Category=Bias)) => #24
#20, #0, #10, #24 -> CreateObservable v2 => #25
    SubscribeSubject Random => #0
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound", autoBias, pRightManual, biasScaling, meanSpeedProbs, minPRight) => #1
    ExternalizedMapping(timeoutTime) => #2
    WorkflowInput Source1
    -> SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=8
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=nil
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=nil
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #5
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #30, #37, #50 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #5, #0 -> Bonsai.Numerics.Permutation => #6
    #6, #2, #1 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #7
        ExternalizedMapping(autoBias, pRightManual, biasScaling, ResponseWindowDelay, meanSpeedProbs, minPRight) => #8
        #0, #8 -> SelectMany DrawStimulus => #9
            SubscribeSubject Parameters
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            Bonsai.Shaders.RenderFrame => #2
            Disable SubscribeSubject Borders
            -> Disable PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
            #2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-150, Right=150, Bottom=-100, Top=100) => #5
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #10
            SubscribeSubject lickometer
            -> Condition => #12
                WorkflowInput Source1
                -> Equal(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            WorkflowInput Source1
            -> Unit => #14
            ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #15
            SubscribeSubject meanSpeedsList
            -> PropertyMapping(meanSpeedList) => #17
            SubscribeSubject RatiosList
            -> PropertyMapping(RatiosList) => #19
            SubscribeSubject RatioProbsList
            -> PropertyMapping(RatioProbsList) => #21
            SubscribeSubject PerfTrackList
            -> PropertyMapping(pTrackList) => #23
            ExternalizedMapping(autoBias, biasScaling, pRightManual, meanSpeedProbs, minPRight) => #24
            #14, #17, #19, #21, #23, #24 -> SD_TrialManager => #25
              meanSpeedList(float=240, float=120)
              RatiosList(ArrayOfFloat(float=4, float=3, float=2, float=1.5), ArrayOfFloat(float=4, float=3, float=2, float=1.5))
              RatioProbsList(ArrayOfFloat(float=75, float=25, float=0, float=0), ArrayOfFloat(float=75, float=25, float=0, float=0))
              pTrackList
                ArrayOfArrayOfInt
                  ArrayOfInt(int=0, int=0, int=0, int=0)
                  ArrayOfInt(int=0, int=0, int=0, int=0)
                  ArrayOfInt(int=0, int=0, int=0, int=0)
                  ArrayOfInt(int=0, int=0, int=0, int=0)
                ArrayOfArrayOfInt
                  ArrayOfInt(int=0, int=0, int=0, int=0)
                  ArrayOfInt(int=0, int=0, int=0, int=0)
                  ArrayOfInt(int=0, int=0, int=0, int=0)
                  ArrayOfInt(int=0, int=0, int=0, int=0)
              meanSpeedProbs(float=50, float=50)
              autoBias=true
              biasScaling=0.4
              pRightManual=0.5
              minPRight=0.1
            -> MemberSelector(Selector=Item1) => #26
            -> MemberSelector(Selector=Item1) => #27
            Bonsai.Shaders.UpdateFrame => #28
            -> MemberSelector(Selector=TimeStep.ElapsedTime)
            -> Take(Count=1) => #30
            #27, #30 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #33
            #26 -> MemberSelector(Selector=Item2) => #34
            #34, #30 -> Zip
            -> Multiply
            -> PropertyMapping(VelX) => #37
            #5, #1, #33 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=75) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Skip(Count=1) => #17
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #18 -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #17 -> StringProperty(Value=stimON)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #33
                    ExternalizedMapping(LocationX) => #34
                    ExternalizedMapping(LocationY) => #35
                    ExternalizedMapping(Z) => #36
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #39
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #42
                    #4, #34, #35, #42 -> GroupWorkflow Transform => #43
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #43, #1, #2, #36, #39 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #45
                    #13, #45 -> CombineLatest => #46
                    #46, #45 -> Sample
                    -> MemberSelector(Selector=Item1) => #48
                    ExternalizedMapping(Coherence) => #49
                    #48, #25, #33, #49, #6, #9, #14 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #51
                    #51, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Skip(Count=1)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #23
                    FloatProperty(Value=0) => #24
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #28, #26, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Skip(Count=1)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #23
                    FloatProperty(Value=0) => #24
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #26, #28, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Skip(Count=1)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #14, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #10, #9 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #40
            #5, #37, #1 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-4)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #22
                    FloatProperty(Value=0) => #23
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #14, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #25, #27, #43, #6, #10, #9 -> moveDots_2dLife(VelocityX=-4, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-4)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #23
                    FloatProperty(Value=0) => #24
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #26, #28, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-4, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=75, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=75) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-4)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #19
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #23
                    FloatProperty(Value=0) => #24
                    #19, #24 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    #23, #24 -> Merge
                    -> PropertyMapping(VelocityY) => #28
                    ExternalizedMapping(LocationX) => #29
                    ExternalizedMapping(LocationY) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #5, #29, #30, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #3, #33 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #15, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #26, #28, #43, #7, #10, #11 -> moveDots_2dLife(VelocityX=-4, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=75, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=75) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-4)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Skip(Count=1)
                    -> Delay(DueTime=PT1S) => #22
                    FloatProperty(Value=0) => #23
                    #22, #23 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    #18, #23 -> Merge
                    -> PropertyMapping(VelocityX) => #27
                    ExternalizedMapping(LocationX) => #28
                    ExternalizedMapping(LocationY) => #29
                    ExternalizedMapping(Z) => #30
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #33
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=8)
                    -> PropertyMapping(ExtentX, ExtentY) => #36
                    #4, #28, #29, #36 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=8, Y=8, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #1, #2, #30, #33 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #39
                    #14, #39 -> CombineLatest => #40
                    #40, #39 -> Sample
                    -> MemberSelector(Selector=Item1) => #42
                    ExternalizedMapping(Coherence) => #43
                    #42, #27, #25, #43, #6, #10, #9 -> moveDots_2dLife(VelocityX=-4, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #45
                    #45, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #43
            #40, #43 -> Zip
            -> IncludeWorkflow(Path=BonVision:Environment.CubemapViewport.bonsai, Eye(X=0, Y=0, Z=0), NearClip=0.1, FarClip=1000, Light(X=0, Y=0, Z=0)) => #45
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #47
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #45 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #49
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=100
              TranslationY=0
              TranslationZ=-200
              ScaleX=360
              ScaleY=180
              ScaleZ=1
              MeshName=Plane
              Ambient(X=1, Y=1, Z=1)
              Diffuse(X=0, Y=0, Z=0)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=90
              RotationX=0
            #47, #49 -> Zip
            -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=Gray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #51
            -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0.9599, Z=0), Translation(X=-13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0, Y=0, Width=0.333, Height=1))) => #55
            #51 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-18.5))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.333, Y=0, Width=0.333, Height=1))) => #59
            #51 -> IncludeWorkflow(Path=BonVision:Environment.ViewingWindow.bonsai, Width=15, Height=19.5, Rotation(X=0, Y=-0.9599, Z=0), Translation(X=13.5, Y=0, Z=-11))
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=Extensions\mrig_norm_LUT.bmp)
            -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.667, Y=0, Width=0.333, Height=1)
            -> Disable Bonsai.Shaders.UpdateRenderState(RenderState(StateConfiguration=Bonsai.Shaders.ViewportState(X=0.667, Y=0, Width=0.333, Height=1))) => #63
            #55, #59, #63 -> Zip => #64
            #64, #10 -> TakeUntil
            -> Last => #66
            Source2=#15, Source2=#25 -> Delay(DueTime=PT1.1S) => #67
            -> GroupWorkflow Response => #68
                SubscribeSubject leftLicks
                -> Skip(Count=1)
                -> First
                -> FloatProperty(Value=-1) => #3
                SubscribeSubject rightLicks
                -> Skip(Count=1)
                -> First
                -> FloatProperty(Value=1) => #7
                ExternalizedMapping(DueTime(DisplayName=ResponseWindowLength))
                -> Timer(DueTime=PT5S, Period=PT0S)
                -> FloatProperty(Value=0) => #10
                #3, #7, #10 -> Amb => #11
                -> StringProperty(Value=respCLOSED)
                -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                WorkflowInput Source1 => #14
                -> MemberSelector(Selector=Item1) => #15
                #14 -> MemberSelector(Selector=Item2) => #16
                #15, #16, #11 -> Zip => #17
                SubscribeSubject PerfTrackList
                -> PropertyMapping(pTrack) => #19
                #17, #19 -> ComputeResult_SDv2 => #20
                  pTrack
                    ArrayOfArrayOfInt
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                    ArrayOfArrayOfInt
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                      ArrayOfInt(int=0, int=0, int=0, int=0)
                -> MemberSelector(Selector=Item1)
                -> MulticastSubject PerfTrackList
                -> IntProperty(Value=0) => #23
                #20 -> MemberSelector(Selector=Item2) => #24
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #27
                #24 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #30
                #24 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #33
                #24 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #36
                #27, #30, #33, #36 -> Merge
                -> Take(Count=2) => #38
                #23, #38 -> Zip
                -> WorkflowOutput
                #24 -> MulticastSubject TrialResults
                SubscribeSubject Parameters => #42
                SubscribeSubject TrialType => #43
                #42, #15, #11, #24, #43 -> Zip
                -> GroupWorkflow LogTrialParams
                    WorkflowInput Source1 => #0
                    -> MemberSelector(Selector=Item1) => #1
                    -> MemberSelector(Selector=CohLeft) => #2
                    #1 -> MemberSelector(Selector=CohRight) => #3
                    #1 -> MemberSelector(Selector=Contrast) => #4
                    #0 -> MemberSelector(Selector=Item2) => #5
                    -> MemberSelector(Selector=Item1) => #6
                    #5 -> MemberSelector(Selector=Item2) => #7
                    #4, #6, #7, #2, #3 -> Zip => #8
                    #0 -> MemberSelector(Selector=Item3) => #9
                    #0 -> MemberSelector(Selector=Item4) => #10
                    #0 -> MemberSelector(Selector=Item5) => #11
                    #11, #9, #10 -> Zip => #12
                    #12, #8 -> Zip
                    -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
                    -> WorkflowOutput
            #68, #66 -> Zip => #69
            #69, #12 -> SubscribeWhen
            -> WorkflowOutput
            #66 -> StringProperty(Value=stimOFF)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            #67 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            #28 -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
        -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        #9, #7 -> Delay(DueTime=PT2.273S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        ExternalizedMapping(ResponseWindowLength(Category=Timings))
        ExternalizedMapping(timeoutTime)

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
#20 -> StringProperty(Value=activev2) => #26
GroupWorkflow PauseStart
    SubscribeSubject lastKeyState
    -> Condition => #1
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=99))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #2
    #1, #2 -> Sample
    -> WorkflowOutput
-> CreateObservable Pause => #28
    SubscribeSubject Random => #0
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=1
          Size=3
          Colour1=0
          Colour2=1
          numDots1=0
          numDots2=0
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #2
        WorkflowInput Source1
        -> ElementIndex => #1
        -> MemberSelector(Selector=Index) => #2
        #1 -> MemberSelector(Selector=Value.Duration) => #3
        ExternalizedMapping(Value(DisplayName=DotSize)) => #4
        ExternalizedMapping(Value(DisplayName=Colour1)) => #5
        ExternalizedMapping(Value(DisplayName=Colour2)) => #6
        ExternalizedMapping(Value(DisplayName=numDots1)) => #7
        ExternalizedMapping(Value(DisplayName=numDots2)) => #8
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #9
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #10
        ExternalizedMapping(Value(DisplayName=Contrast)) => #11
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #12
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #13
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #14
        ExternalizedMapping(Value(DisplayName=VelXright)) => #15
        ExternalizedMapping(Value(DisplayName=VelYright)) => #16
        ExternalizedMapping(Value(DisplayName=CohRight)) => #17
        ExternalizedMapping(Value(DisplayName=Duration)) => #18
        #3, #18 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        #1 -> MemberSelector(Selector=Value.Size) => #20
        #20, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        #1 -> MemberSelector(Selector=Value.Colour1) => #22
        #22, #5 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        #1 -> MemberSelector(Selector=Value.Colour2) => #24
        #24, #6 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #25
        #1 -> MemberSelector(Selector=Value.numDots1) => #26
        #26, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #27
        #1 -> MemberSelector(Selector=Value.numDots2) => #28
        #28, #8 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #29
        #2, #19, #21, #23, #25, #27, #29 -> Zip => #30
        #1 -> MemberSelector(Selector=Value.dotLifeBool) => #31
        #31, #9 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #32
        #1 -> MemberSelector(Selector=Value.dotLifetime) => #33
        #33, #10 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #34
        #1 -> MemberSelector(Selector=Value.Contrast) => #35
        #35, #11 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #36
        #32, #34, #36 -> Zip => #37
        #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #38
        #38, #12 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #39
        #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #40
        #40, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #41
        #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #42
        #42, #14 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
        #1 -> MemberSelector(Selector=Value.VelocityXRight) => #44
        #44, #15 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #45
        #1 -> MemberSelector(Selector=Value.VelocityYRight) => #46
        #46, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #47
        #1 -> MemberSelector(Selector=Value.CoherenceRight) => #48
        #48, #17 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
        #39, #41, #43, #45, #47, #49 -> Zip => #50
        #30, #37, #50 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #2, #0 -> Bonsai.Numerics.Permutation
    -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters => #0
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
            Bonsai.Shaders.RenderFrame => #2
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
            #2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-90, Top=90) => #5
            Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false) => #6
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #8
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #10
            #5, #10 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField(numDots=0, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=0) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=0, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=0) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=0, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=0) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=0, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=0) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #23
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #25, #23, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #13
            #5, #1, #8 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #5
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #9
                ExternalizedMapping(VelX, VelY) => #10
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(numDots) => #10
                    #8, #10 -> GenerateDotField(numDots=0, left=-180, right=180, top=90, bottom=-90) => #11
                    #9, #10 -> GenerateDotLives(dotLifetime=20, numDots=0) => #12
                    #11, #12 -> Zip => #13
                    ExternalizedMapping(dotLifetimeBool) => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #13, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #9, #14 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField2(numDots=0, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=0) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #24
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #26, #24, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    FloatProperty(Value=1) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    #0 -> PropertyMapping(Z) => #3
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #5
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #7
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #9
                    ExternalizedMapping(dotLifetime) => #10
                    ExternalizedMapping(dotLifetimeBool) => #11
                    ExternalizedMapping(numDots) => #12
                    #9, #12 -> GenerateDotField3(numDots=0, left=-180, right=180, top=90, bottom=-90) => #13
                    #10, #12 -> GenerateDotLives(dotLifetime=20, numDots=0) => #14
                    #13, #14 -> Zip => #15
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #21
                    FloatProperty(Value=0) => #22
                    #18, #22 -> Merge
                    -> PropertyMapping(VelocityX) => #24
                    #21, #22 -> Merge
                    -> PropertyMapping(VelocityY) => #26
                    ExternalizedMapping(LocationX) => #27
                    ExternalizedMapping(LocationY) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #5, #27, #28, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #3, #31 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #15, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #24, #26, #41, #7, #10, #11 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #7 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    FloatProperty(Value=0) => #0
                    -> PropertyMapping(X) => #1
                    #0 -> PropertyMapping(Y) => #2
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #4
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #6
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #8
                    ExternalizedMapping(dotLifetime) => #9
                    ExternalizedMapping(dotLifetimeBool) => #10
                    ExternalizedMapping(numDots) => #11
                    #8, #11 -> GenerateDotField4(numDots=0, left=-180, right=180, top=90, bottom=-90) => #12
                    #9, #11 -> GenerateDotLives(dotLifetime=20, numDots=0) => #13
                    #12, #13 -> Zip => #14
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #17
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #20
                    FloatProperty(Value=0) => #21
                    #17, #21 -> Merge
                    -> PropertyMapping(VelocityX) => #23
                    #20, #21 -> Merge
                    -> PropertyMapping(VelocityY) => #25
                    ExternalizedMapping(LocationX) => #26
                    ExternalizedMapping(LocationY) => #27
                    ExternalizedMapping(Z) => #28
                    ExternalizedMapping(Value(DisplayName=ColorA))
                    -> FloatProperty(Value=1)
                    -> PropertyMapping(W) => #31
                    ExternalizedMapping(Value(DisplayName=Diameter))
                    -> PropertySource<Bonsai.Shaders.CreateScale,System.Single>(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #34
                    #4, #26, #27, #34 -> GroupWorkflow Transform => #35
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Angle) => #1
                        ExternalizedMapping(X(DisplayName=ExtentX)) => #2
                        ExternalizedMapping(Y(DisplayName=ExtentY)) => #3
                        ExternalizedMapping(X(DisplayName=LocationX)) => #4
                        ExternalizedMapping(Y(DisplayName=LocationY)) => #5
                        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #35, #1, #2, #28, #31 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #37
                    #14, #37 -> CombineLatest => #38
                    #38, #37 -> Sample
                    -> MemberSelector(Selector=Item1) => #40
                    ExternalizedMapping(Coherence) => #41
                    #40, #23, #25, #41, #6, #10, #9 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=90, bottom=-90)
                    -> MemberSelector(Selector=Item1) => #43
                    #43, #6 -> wrapAroundDots(Left=-180, Right=180, Top=90, Bottom=-90)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #11, #12, #13, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #16
            #16, #13 -> Zip
            -> IncludeWorkflow => #18
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=1.57
              RotationX=0
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #21
            #18 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #5
                #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #23
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
              RotationZ=0
              RotationY=1.57
              RotationX=0
            #21, #23 -> Zip => #24
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #29
            #24, #29 -> TakeUntil
            -> Last => #31
            Source1=#0, Source3=#31 -> Zip => #32
            #32, #6 -> SubscribeWhen
            -> WorkflowOutput
        -> Disable Sink OffState => #3
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedMapping(timeoutTime) => #4
        #3, #4 -> Disable SelectMany Response
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.VelXLeft) => #1
            #0 -> MemberSelector(Selector=Item1.VelXRight) => #2
            #1, #2 -> Zip
            -> Disable MulticastSubject ptrack => #4
            ExternalizedMapping(outputOnTime) => #5
            ExternalizedMapping(timeoutTime) => #6
            #4, #5, #6 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #1
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);

                      if VelXR > VelXL: # stim is right
                          output = 2; #CORRECT RIGHT

                      elif VelXR < VelXL: # stim is up/left
                          output = 1; #correct left

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #4
                #1 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #7
                #1 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #1 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #13
                #4, #7, #10, #13 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                SubscribeSubject Parameters => #17
                #17, #1 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")

                ExternalizedMapping(DueTime(DisplayName=outputOnTime))
                ExternalizedMapping(DueTime(DisplayName=timeoutTime))
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
#12, #22, #17, #18, #25, #28 -> Merge
-> Switch
-> WorkflowOutput
#28 -> StringProperty(Value=pause) => #32
#13, #23, #15, #19, #26, #32 -> Merge
-> DistinctUntilChanged
-> BehaviorSubject TrialType
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format="", Selector=nil)

GroupWorkflow SelectTrialBlock
    SubscribeSubject delayKeyState
    -> First
    -> Unit
    -> BehaviorSubject TrialOver

    Bonsai.Windows.Input.KeyDown(Filter=Z, SuppressRepetitions=false)
    -> FloatProperty(Value=0) => #5
    Bonsai.Windows.Input.KeyDown(Filter=X, SuppressRepetitions=false)
    -> FloatProperty(Value=1) => #7
    Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
    -> FloatProperty(Value=2) => #9
    Bonsai.Windows.Input.KeyDown(Filter=V, SuppressRepetitions=false)
    -> FloatProperty(Value=3) => #11
    Bonsai.Windows.Input.KeyDown(Filter=B, SuppressRepetitions=false)
    -> FloatProperty(Value=4) => #13
    Bonsai.Windows.Input.KeyDown(Filter=P, SuppressRepetitions=false)
    -> FloatProperty(Value=99) => #15
    #5, #7, #9, #11, #13, #15 -> Merge
    -> BehaviorSubject lastKeyState
    -> BehaviorSubject delayKeyState

ExternalizedMapping("Right Valve Open Time"(Category=Bias), "Left Valve Open Time"(Category=Bias)) => #38
ExternalizedMapping(PortName) => #39
#39, #38 -> GroupWorkflow ArduinoComAndLogging
    Disable Bonsai.IO.CreateSerialPort
      Name=ArduinoInput
      PortName=COM3
      BaudRate=250000
      Encoding=utf-8
      Parity=None
      ParityReplace=63
      DataBits=8
      StopBits=One
      Handshake=None
      DiscardNull=false
      DtrEnable=true
      RtsEnable=false
      ReadBufferSize=4096
      WriteBufferSize=2048
      ReceivedBytesThreshold=1

    SubscribeSubject serialToSend => #1
    ExternalizedMapping(PortName) => #2
    #1, #2 -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoInput, NewLine=\r)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> IntProperty(Value=1) => #5
    #2 -> Disable Bonsai.IO.SerialStringRead(PortName=ArduinoInput, NewLine=\n)
    -> Disable Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 4:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Disable Parse(Pattern=%i\t%i\t%i\t%i) => #8
    -> Disable MemberSelector(Selector=Item2)
    -> Disable DistinctUntilChanged
    -> Disable MulticastSubject leftLicks
    #8 -> Disable MemberSelector(Selector=Item3)
    #8 -> Disable MemberSelector(Selector=Item1)
    -> Disable MulticastSubject WheelInput
    #8 -> Disable MemberSelector(Selector=Item4)
    -> Disable DistinctUntilChanged
    -> Disable MulticastSubject rightLicks
    Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #18
    Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=false) => #19
    Disable Bonsai.Windows.Input.KeyDown(Filter=C, SuppressRepetitions=false)
    -> Disable StringProperty(Value=c1) => #21
    Disable Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=false)
    -> Disable StringProperty(Value=c0) => #23
    SubscribeSubject LeftOpenTime
    -> PropertyMapping(Value) => #25
    #19, #25 -> StringProperty(Value=l100)
    -> Skip(Count=1) => #27
    SubscribeSubject RightOpenTime
    -> PropertyMapping(Value) => #29
    #18, #29 -> StringProperty(Value=r100)
    -> Skip(Count=1) => #31
    #31, #27, #21, #23 -> Merge
    -> Disable Bonsai.IO.SerialStringWrite(PortName=ArduinoInput, NewLine=\r) => #33
    StringProperty(Value=m) => #34
    #34, #33 -> CombineLatest
    -> cat2strings
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    #33 -> IntProperty(Value=1) => #38
    #5, #38 -> Merge
    -> Accumulate

    StringProperty(Value=r) => #41
    ExternalizedMapping(Value(DisplayName="Right Valve Open Time", Category=Valves))
    -> FloatProperty(Value=100) => #43
    #41, #43 -> CombineLatest
    -> genRewardString
    -> MulticastSubject RightOpenTime

    StringProperty(Value=l) => #47
    ExternalizedMapping(Value(DisplayName="Left Valve Open Time", Category=Valves))
    -> FloatProperty(Value=100) => #49
    #47, #49 -> CombineLatest
    -> genRewardString
    -> MulticastSubject LeftOpenTime

    SubscribeSubject LeftCorrect
    -> Skip(Count=1) => #54
    SubscribeSubject LeftOpenTime
    -> PropertyMapping(Value) => #56
    #54, #56 -> StringProperty(Value=l100)
    -> MulticastSubject LeftOpenTime
    -> MulticastSubject serialToSend

    SubscribeSubject RightCorrect
    -> Skip(Count=1) => #61
    SubscribeSubject RightOpenTime
    -> PropertyMapping(Value) => #63
    #61, #63 -> StringProperty(Value=r100)
    -> MulticastSubject RightOpenTime
    -> MulticastSubject serialToSend

    SubscribeSubject leftLicks => #67
    SubscribeSubject rightLicks => #68
    #67, #68 -> CombineLatest
    -> Skip(Count=1)
    -> IncludeWorkflow Licks(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject WheelInput
    -> Skip(Count=1)
    -> Bonsai.Shaders.SampleOnRenderFrame
    -> GroupWorkflow LogEvent(Description="Logs a value into the specified common event stream.")
        WorkflowInput Source1 => #0
        ExternalizedMapping(Format) => #1
        ExternalizedMapping(Selector) => #2
        ExternalizedMapping(Name) => #3
        #0, #1, #2, #3 -> Sink FormatLog
            WorkflowInput Source1 => #0
            ExternalizedMapping(Format) => #1
            ExternalizedMapping(Selector) => #2
            #0, #1, #2 -> Format => #3
            ExternalizedMapping(Name) => #4
            #3, #4 -> MulticastSubject Wheel
            -> WorkflowOutput
        -> WorkflowOutput

    Disable SubscribeSubject IncorrectResponse => #76
    Disable ExternalizedProperty "Incorrect Response pin"(MemberName=Pin) => #77
    #76, #77 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=0)

    SubscribeSubject TrialResults
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject TrialCount

    Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject leftLicks

    Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false)
    -> IntProperty(Value=1)
    -> Accumulate
    -> MulticastSubject rightLicks

ExternalizedMapping(TopBorder(Category=Display)) => #41
ExternalizedMapping(BottomBorder(Category=Display)) => #42
ExternalizedMapping(LeftBorder(Category=Display)) => #43
ExternalizedMapping(RightBorder(Category=Display)) => #44
#41, #42, #43, #44 -> GroupWorkflow "Display and Resources"
    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Maximized
      DisplayDevice=Second
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=TopBorder))
    -> FloatProperty(Value=90)
    -> ReplaySubject Top(BufferSize=nil) => #9
    ExternalizedMapping(Value(DisplayName=BottomBorder))
    -> FloatProperty(Value=-90)
    -> ReplaySubject Bottom(BufferSize=nil) => #12
    ExternalizedMapping(Value(DisplayName=LeftBorder))
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #15
    ExternalizedMapping(Value(DisplayName=RightBorder))
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #18
    #9, #12, #15, #18 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

    Disable Bonsai.Shaders.RenderFrame
    -> Disable PublishSubject Draw

GroupWorkflow "Initialise subjects and logging"
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow LicksLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #2
        WorkflowInput Source1 => #0
        SubscribeSubject Licks => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #3
        #1, #3 -> Zip => #4
        ExternalizedMapping(Name) => #5
        #0, #5 -> BehaviorSubject Licks
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedMapping(Value(DisplayName=Name))
            -> StringProperty(Value=Licks)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Overwrite) => #9
        ExternalizedMapping(Suffix) => #10
        #8, #9, #10, #4 -> Bonsai.IO.CsvWriter(FileName=Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #5
        WorkflowInput Source1 => #0
        SubscribeSubject TrialParams => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #3
        #1, #3 -> Zip => #4
        ExternalizedMapping(Name) => #5
        #0, #5 -> BehaviorSubject TrialParams
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedMapping(Value(DisplayName=Name))
            -> StringProperty(Value=TrialParams)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Overwrite) => #9
        ExternalizedMapping(Suffix) => #10
        #8, #9, #10, #4 -> Bonsai.IO.CsvWriter(FileName=TrialParams.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #8
        WorkflowInput Source1 => #0
        SubscribeSubject Wheel => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #3
        #1, #3 -> Zip => #4
        ExternalizedMapping(Name) => #5
        #0, #5 -> BehaviorSubject Wheel
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedMapping(Value(DisplayName=Name))
            -> StringProperty(Value=Wheel)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Overwrite) => #9
        ExternalizedMapping(Suffix) => #10
        #8, #9, #10, #4 -> Bonsai.IO.CsvWriter(FileName=Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow EventsLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #11
        WorkflowInput Source1 => #0
        SubscribeSubject Events => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #3
        #1, #3 -> Zip => #4
        ExternalizedMapping(Name) => #5
        #0, #5 -> BehaviorSubject Events
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedMapping(Value(DisplayName=Name))
            -> StringProperty(Value=Events)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #8
        ExternalizedMapping(Overwrite) => #9
        ExternalizedMapping(Suffix) => #10
        #8, #9, #10, #4 -> Bonsai.IO.CsvWriter(FileName=Events.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false) => #12
    #2, #12 -> SubscribeWhen
    #5, #12 -> SubscribeWhen
    #8, #12 -> SubscribeWhen
    #11, #12 -> SubscribeWhen
    SubscribeSubject respDelay => #17
    SubscribeSubject respWinSize => #18
    StringProperty(Value=respDelay) => #19
    #19, #17 -> CombineLatest
    -> genRewardString => #21
    #21, #12 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    StringProperty(Value=respSize) => #24
    #24, #18 -> CombineLatest
    -> genRewardString => #26
    #26, #12 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    StringProperty
    -> BehaviorSubject RightOpenTime

    StringProperty
    -> BehaviorSubject LeftOpenTime

    BooleanProperty(Value=false)
    -> BehaviorSubject IncorrectResponse

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject RightCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject NoResponse

    StringProperty(Value=c0)
    -> Skip(Count=1)
    -> BehaviorSubject serialToSend

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject leftLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject rightLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject WheelInput

    FloatProperty(Value=1)
    -> BehaviorSubject "Difficulty Level"

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> AsyncSubject Random

    FloatProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject TrialResults

Disable GroupWorkflow QuadState
    SubscribeSubject DrawStimuli => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #2
    #0, #2 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=29, LocationY=-29, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

ExternalizedMapping(Period(DisplayName=noLickTime, Category="Time Options"))
-> GroupWorkflow lickometer
    SubscribeSubject leftLicks => #0
    ExternalizedMapping(Period)
    -> Timer(DueTime=PT0S, Period=PT1.1S)
    -> IntProperty(Value=0) => #3
    SubscribeSubject rightLicks => #4
    #0, #4 -> Merge => #5
    #3, #5 -> CombineLatest
    -> Add
    -> TimeInterval
    -> MemberSelector(Selector=Interval.TotalSeconds)
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> BehaviorSubject lickometer
    -> WorkflowOutput

GroupWorkflow PerformanceTracking
    ExternalizedMapping(Ratios(DisplayName=Ratios1), RatioProbs(DisplayName=RatioProbs1), meanSpeed(DisplayName=meanSpeed1))
    -> initialisePerfTrack_SDv2(meanSpeed=120, Ratios(float=4, float=3, float=2, float=1.5), RatioProbs(float=75, float=25, float=0, float=0)) => #1
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Ratios1 => #3
    ExternalizedMapping(meanSpeed(DisplayName=meanSpeed2), Ratios(DisplayName=Ratios2), RatioProbs(DisplayName=RatioProbs2))
    -> initialisePerfTrack_SDv2(meanSpeed=240, Ratios(float=4, float=3, float=2, float=1.5), RatioProbs(float=75, float=25, float=0, float=0)) => #5
    -> MemberSelector(Selector=Item1)
    -> BehaviorSubject Ratios2 => #7
    #3, #7 -> Merge
    -> ToList
    -> BehaviorSubject RatiosList
    #1 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject RatioProbs1 => #12
    #5 -> MemberSelector(Selector=Item2)
    -> BehaviorSubject RatioProbs2 => #14
    #12, #14 -> Merge
    -> ToList
    -> BehaviorSubject RatioProbsList
    #1 -> MemberSelector(Selector=Item3)
    -> BehaviorSubject perfTrack1 => #19
    #5 -> MemberSelector(Selector=Item3)
    -> BehaviorSubject perfTrack2 => #21
    #19, #21 -> Merge
    -> ToList
    -> BehaviorSubject PerfTrackList
    #1 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject meanSpeed1 => #26
    #5 -> MemberSelector(Selector=Item4)
    -> BehaviorSubject meanSpeed2 => #28
    #26, #28 -> Merge
    -> ToList
    -> BehaviorSubject meanSpeedsList

    SubscribeSubject TrialResults => #32
    ExternalizedMapping(Value(DisplayName=EngThresh)) => #33
    SubscribeSubject EmptyEngList
    -> PropertyMapping(trialResponses) => #35
    #32, #35 -> TrackEngagementTest(trialResponses(int=3, int=3, int=3, int=3, int=3, int=3, int=3, int=3), maxListLength=20) => #36
    #36, #33 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.2))
        -> WorkflowOutput
    -> BehaviorSubject TriggerEngage

    IntProperty(Value=0)
    -> BehaviorSubject PassiveOrTimeout

    InitialiseEmptyIntList
    -> BehaviorSubject EmptyEngList

    Unit
    -> GroupWorkflow AttemptToEngage => #44
        SubscribeSubject delayKeyState
        -> Take(Count=1)
        -> BehaviorSubject engKeyState => #2
        SubscribeSubject PassiveOrTimeout => #3
        -> Condition GivePassive
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> GroupWorkflow Engage_Passive => #5
            WorkflowInput Source1 => #0
            -> Disable IntProperty(Value=1)
            -> Disable MulticastSubject PassiveOrTimeout => #2
            SubscribeSubject TrialCount
            -> Take(Count=1) => #4
            SubscribeSubject TrialCount => #5
            #5, #4 -> CombineLatest
            -> Subtract
            -> Condition => #8
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            SubscribeSubject engKeyState => #9
            #9, #8 -> SubscribeWhen
            -> MulticastSubject lastKeyState
            #2, #8 -> SubscribeWhen
            -> WorkflowOutput
            #0 -> IntProperty(Value=0)
            -> MulticastSubject lastKeyState
        #3 -> Condition GiveTimeout
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> GroupWorkflow Engage_Timeout => #7
            WorkflowInput Source1 => #0
            -> WorkflowOutput
            #0 -> IntProperty(Value=0)
            -> MulticastSubject PassiveOrTimeout
        #5, #7 -> Merge => #8
        InitialiseEmptyIntList
        -> MulticastSubject EmptyEngList => #10
        #2, #10, #8 -> Zip => #11
        WorkflowInput Source1 => #12
        #11, #12 -> Sample
        -> WorkflowOutput
    SubscribeSubject TriggerEngage => #45
    #44, #45 -> Sample => #46
    #46, #45 -> SubscribeWhen
    -> WorkflowOutput
