WorkflowBuilder(Version=2.4.0-preview)
ExternalizedMapping("ISI lower bound"(Category="Time Options"), "ISI upper bound"(Category="Time Options")) => #3
ExternalizedMapping(Value(DisplayName=respDelay, Category="Time Options"))
-> FloatProperty(Value=2)
-> ReplaySubject respDelay(BufferSize=nil)
-> Bonsai.Scripting.ExpressionTransform => #36
  Expression: TimeSpan.FromSeconds(it)
ExternalizedMapping(Value(DisplayName=respWin, Category="Time Options"))
-> FloatProperty(Value=5)
-> ReplaySubject respWinSize(BufferSize=nil)
-> Bonsai.Scripting.ExpressionTransform => #38
  Expression: TimeSpan.FromSeconds(it)
#36, #38 -> CombineLatest
-> PropertyMapping(ResponseWindowDelay(Selector=Item1), ResponseWindowLength(Selector=Item2)) => #34
GroupWorkflow PassiveStart => #56
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=passive) => #4
#56, #3 -> CreateObservable PassiveTrials => #52
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #10
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #10, #3 -> Bonsai.Numerics.Permutation => #2
    ExternalizedMapping("ISI lower bound", "ISI upper bound") => #7
    #2, #5, #7 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #15
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            Bonsai.Windows.Input.KeyDown(Filter=C) => #22
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #49
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #49, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5) => #37
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #37 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #23
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #23, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            #4, #22 -> SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #15 -> Disable Sink OffState => #17
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #2
        #17, #2 -> SelectMany Response => #16
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #1
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #2
            WorkflowInput Source1 => #3
            -> MemberSelector(Selector=Item1.VelXLeft) => #5
            #3 -> MemberSelector(Selector=Item1.VelXRight) => #6
            #5, #6 -> Zip
            -> Disable MulticastSubject ptrack => #4
            #4, #1, #2 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response")
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);

                      if VelXR > VelXL: # stim is right
                          output = 2; #CORRECT RIGHT

                      elif VelXR < VelXL: # stim is up/left
                          output = 1; #correct left

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                SubscribeSubject Parameters => #15
                #15, #0 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #16, #8 -> Delay(DueTime=PT2.696S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #7
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #7 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
GroupWorkflow ActiveAnyStart => #57
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=activeany) => #5
#57, #34, #3 -> CreateObservable Active-AnyLick => #53
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #6
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #10
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #10, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #19
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            Disable Bonsai.Windows.Input.KeyDown(Filter=C) => #22
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #49
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #49, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5) => #37
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #37 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #23
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #23, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            #4, #22 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #19 -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime, Category=Timings) => #2
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #14
        #0, #14 -> Delay(DueTime=PT2S) => #11
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #15
        #2, #11, #15 -> SelectMany Response => #20
            ExternalizedProperty ResponseWindowLength(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #6
            WorkflowInput Source1 => #7
            -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #15
            #7 -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #16
            #7 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #8
            #15, #16, #8 -> Zip
            -> Disable MulticastSubject ptrack => #11
            #11, #6 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1 => #3
                -> Bonsai.Scripting.PythonTransform ComputeResult-AnyLick => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse != 0:
                          output = 2; #CORRECT RIGHT

                      elif VelXR < VelXL: # stim is up/left
                        if trialResponse != 0:
                          output = 1; #correct left

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #8
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #9
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #11
                #8, #9, #10, #11 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #0 -> MulticastSubject TrialResults
                #3 -> MemberSelector(Selector=Item3) => #17
                SubscribeSubject Parameters => #14
                #14, #0, #17 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
            #8 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #20, #19 -> Zip => #17
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #17, #8 -> Delay(DueTime=PT2.971S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
GroupWorkflow ActiveNoAbortStart => #58
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=2))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=activenoabort) => #8
#58, #34, #3 -> CreateObservable Active-NoAbort => #54
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #6
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #10
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #10, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #19
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            Disable Bonsai.Windows.Input.KeyDown(Filter=C) => #22
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #49
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #49, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5) => #37
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #37 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #23
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #23, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            #4, #22 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #19 -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime, Category=Timings) => #2
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #14
        #0, #14 -> Delay(DueTime=PT2S) => #11
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #15
        #2, #11, #15 -> SelectMany Response => #20
            ExternalizedProperty ResponseWindowLength(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #6
            WorkflowInput Source1 => #7
            -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #15
            #7 -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #16
            #7 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> Condition
                WorkflowInput Source1

                SubscribeSubject lvel => #2
                SubscribeSubject rvel => #3
                #2, #3 -> Zip
                -> LessThan
                -> WorkflowOutput
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> Condition
                WorkflowInput Source1

                SubscribeSubject lvel => #2
                SubscribeSubject rvel => #3
                #3, #2 -> Zip
                -> LessThan
                -> WorkflowOutput
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #8
            #15, #16, #8 -> Zip
            -> Disable MulticastSubject ptrack => #11
            #11, #6 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1 => #3
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #8
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #9
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #11
                #8, #9, #10, #11 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #0 -> MulticastSubject TrialResults
                #3 -> MemberSelector(Selector=Item3) => #17
                SubscribeSubject Parameters => #14
                #14, #0, #17 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
            #8 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #20, #19 -> Zip => #17
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #17, #8 -> Delay(DueTime=PT2.205S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
GroupWorkflow ActiveStart => #59
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=3))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=active) => #9
#59, #3, #34 -> CreateObservable Active => #55
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #6
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #10
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #10, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #19
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #49
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #49, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10) => #37
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #37 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-10, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #22
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #22, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            Disable SubscribeSubject lickometer
            -> Disable Condition => #35
                WorkflowInput Source1
                -> Equal(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            #4, #35 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #19 -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime, Category=Timings) => #2
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #14
        #0, #14 -> Delay(DueTime=PT2S) => #11
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #15
        #2, #11, #15 -> SelectMany Response => #20
            ExternalizedProperty ResponseWindowLength(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #6
            WorkflowInput Source1 => #7
            -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #15
            #7 -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #16
            #7 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #8
            #15, #16, #8 -> Zip
            -> Disable MulticastSubject ptrack => #11
            #11, #6 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1 => #3
                -> Bonsai.Scripting.PythonTransform ComputeResult-firstlick => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #8
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #9
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #11
                #8, #9, #10, #11 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #0 -> MulticastSubject TrialResults
                #3 -> MemberSelector(Selector=Item3) => #17
                SubscribeSubject Parameters => #14
                #14, #0, #17 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
            #8 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #20, #19 -> Zip => #17
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #17, #8 -> Delay(DueTime=PT2.996S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
GroupWorkflow PauseStart
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=4))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> CreateObservable Pause => #66
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=1
          Size=3
          Colour1=0
          Colour2=1
          numDots1=0
          numDots2=0
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #9
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #9, #3 -> Bonsai.Numerics.Permutation => #2
    ExternalizedMapping("ISI lower bound", "ISI upper bound") => #7
    #2, #5, #7 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            Bonsai.Windows.Input.KeyDown(Filter=C) => #22
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=0, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=0) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=0) => #29
                    #27, #36 -> GenerateDotField4(numDots=0, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=0) => #29
                    #27, #36 -> GenerateDotField2(numDots=0, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=0) => #29
                    #27, #36 -> GenerateDotField3(numDots=0, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-10)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=0, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=0) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=0) => #29
                    #27, #36 -> GenerateDotField4(numDots=0, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=0) => #29
                    #27, #36 -> GenerateDotField2(numDots=0, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=0) => #29
                    #27, #36 -> GenerateDotField3(numDots=0, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-0.5)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #23
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #23, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            #4, #22 -> SubscribeWhen
            -> WorkflowOutput
        -> Disable Sink OffState => #15
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #2
        #15, #2 -> Disable SelectMany Response => #14
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #1
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #2
            WorkflowInput Source1 => #3
            -> MemberSelector(Selector=Item1.VelXLeft) => #5
            #3 -> MemberSelector(Selector=Item1.VelXRight) => #6
            #5, #6 -> Zip
            -> Disable MulticastSubject ptrack => #4
            #4, #1, #2 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response")
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);

                      if VelXR > VelXL: # stim is right
                          output = 2; #CORRECT RIGHT

                      elif VelXR < VelXL: # stim is up/left
                          output = 1; #correct left

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                SubscribeSubject Parameters => #15
                #15, #0 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #14, #8 -> Delay(DueTime=PT2.396S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
GroupWorkflow ActiveVaryStart => #68
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=5))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=activevary) => #45
#68, #34 -> CreateObservable ActiveVary => #67
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #6
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-9
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-1
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-8
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-2
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-1
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-9
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-2
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-8
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-7
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-3
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-3
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-7
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #10
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #10, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #19
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #49
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #49, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9) => #37
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #37 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #22
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #22, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            Disable SubscribeSubject lickometer
            -> Disable Condition => #35
                WorkflowInput Source1
                -> Equal(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            #4, #35 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #19 -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime, Category=Timings) => #2
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #14
        #0, #14 -> Delay(DueTime=PT2S) => #11
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #15
        #2, #11, #15 -> SelectMany Response => #20
            ExternalizedProperty ResponseWindowLength(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #6
            WorkflowInput Source1 => #7
            -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #15
            #7 -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #16
            #7 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #8
            #15, #16, #8 -> Zip
            -> Disable MulticastSubject ptrack => #11
            #11, #6 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1 => #3
                -> Bonsai.Scripting.PythonTransform ComputeResult-firstlick => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #8
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #9
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #11
                #8, #9, #10, #11 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #0 -> MulticastSubject TrialResults
                #3 -> MemberSelector(Selector=Item3) => #17
                SubscribeSubject Parameters => #14
                #14, #0, #17 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
            #8 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #20, #19 -> Zip => #17
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #17, #8 -> Delay(DueTime=PT2.571S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
GroupWorkflow ActiveVaryLStart => #69
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=6))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=activevaryL) => #48
#69, #3, #34 -> CreateObservable ActiveVaryL => #70
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #6
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-9
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-1
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-8
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-2
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-2
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-8
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #10
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #10, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #19
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #49
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #49, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8) => #37
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #37 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-2, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-2, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-2, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-2)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-2, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #22
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #22, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            Disable SubscribeSubject lickometer
            -> Disable Condition => #35
                WorkflowInput Source1
                -> Equal(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            #4, #35 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #19 -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime, Category=Timings) => #2
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #14
        #0, #14 -> Delay(DueTime=PT2S) => #11
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #15
        #2, #11, #15 -> SelectMany Response => #20
            ExternalizedProperty ResponseWindowLength(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #6
            WorkflowInput Source1 => #7
            -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #15
            #7 -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #16
            #7 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #8
            #15, #16, #8 -> Zip
            -> Disable MulticastSubject ptrack => #11
            #11, #6 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1 => #3
                -> Bonsai.Scripting.PythonTransform ComputeResult-firstlick => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #8
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #9
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #11
                #8, #9, #10, #11 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #0 -> MulticastSubject TrialResults
                #3 -> MemberSelector(Selector=Item3) => #17
                SubscribeSubject Parameters => #14
                #14, #0, #17 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
            #8 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #20, #19 -> Zip => #17
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #17, #8 -> Delay(DueTime=PT2.419S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
GroupWorkflow ActiveHarderStart => #71
    SubscribeSubject lastKeyState
    -> Condition => #4
        WorkflowInput Source1
        -> Equal(Operand=FloatProperty(Value=7))
        -> WorkflowOutput
    SubscribeSubject TrialOver => #1
    #4, #1 -> Sample
    -> WorkflowOutput
-> StringProperty(Value=activehard) => #51
#4, #5, #8, #9, #45, #48, #51 -> Merge
-> DistinctUntilChanged
-> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
#71, #3, #34 -> CreateObservable ActiveHarder => #72
    SubscribeSubject Random => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #5
    ExternalizedMapping(ResponseWindowDelay, ResponseWindowLength, "ISI lower bound", "ISI upper bound") => #6
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-8
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-2
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-2
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-8
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-7
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-3
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-3
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-7
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-10
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-10
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-0.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-0.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=5.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=4.5
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=3.5
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=4.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=5.5
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #10
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #10, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus => #19
            SubscribeSubject Parameters => #1
            -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #32
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #32, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #49
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #49, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9) => #37
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    -> StringProperty(Value=dotsMOVE)
                    -> Take(Count=1)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    #37 -> StringProperty(Value=stimON)
                    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-9)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-9, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            SubscribeSubject Parameters
            -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            #32, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-1)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-1, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #31
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #22
            #31 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #28
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #22, #28 -> Zip => #17
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT3.5S) => #5
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            Disable SubscribeSubject lickometer
            -> Disable Condition => #35
                WorkflowInput Source1
                -> Equal(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            #4, #35 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> StringProperty(Value=stimOFF)
        -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #19 -> Disable Sink OffState
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty timeoutTime(MemberName=timeoutTime, Category=Timings) => #2
        ExternalizedMapping(DueTime(DisplayName=ResponseWindowDelay, Description="time after stim onset response window starts", Category=Timings)) => #14
        #0, #14 -> Delay(DueTime=PT2S) => #11
        ExternalizedMapping(ResponseWindowLength(Category=Timings)) => #15
        #2, #11, #15 -> SelectMany Response => #20
            ExternalizedProperty ResponseWindowLength(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT5S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #6
            WorkflowInput Source1 => #7
            -> MemberSelector(Selector=VelXLeft)
            -> BehaviorSubject lvel => #15
            #7 -> MemberSelector(Selector=VelXRight)
            -> BehaviorSubject rvel => #16
            #7 -> StringProperty(Value=respOPEN)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #8
            #15, #16, #8 -> Zip
            -> Disable MulticastSubject ptrack => #11
            #11, #6 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1 => #3
                -> Bonsai.Scripting.PythonTransform ComputeResult-firstlick => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #8
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #9
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #11
                #8, #9, #10, #11 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                #0 -> MulticastSubject TrialResults
                #3 -> MemberSelector(Selector=Item3) => #17
                SubscribeSubject Parameters => #14
                #14, #0, #17 -> Zip
                -> IncludeWorkflow TrialParams(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
            #8 -> StringProperty(Value=respCLOSED)
            -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #20, #19 -> Zip => #17
        ExternalizedMapping(Lower(DisplayName="ISI lower bound"), Upper(DisplayName="ISI upper bound"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=3)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #8
        #17, #8 -> Delay(DueTime=PT2.571S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput

    Disable GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT2S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
#52, #53, #54, #55, #66, #67, #70, #72 -> Merge
-> Switch
-> WorkflowOutput

SubscribeSubject delayKeyState
-> First
-> Unit
-> BehaviorSubject TrialOver

Bonsai.Windows.Input.KeyDown(Filter=G)
-> FloatProperty(Value=0) => #18
Bonsai.Windows.Input.KeyDown(Filter=H)
-> FloatProperty(Value=1) => #19
Bonsai.Windows.Input.KeyDown(Filter=J)
-> FloatProperty(Value=2) => #28
Bonsai.Windows.Input.KeyDown(Filter=K)
-> FloatProperty(Value=3) => #30
Bonsai.Windows.Input.KeyDown(Filter=P)
-> FloatProperty(Value=4) => #42
Bonsai.Windows.Input.KeyDown(Filter=M)
-> FloatProperty(Value=5) => #44
Bonsai.Windows.Input.KeyDown(Filter=N)
-> FloatProperty(Value=6) => #47
Bonsai.Windows.Input.KeyDown(Filter=U)
-> FloatProperty(Value=7) => #50
#18, #19, #28, #30, #42, #44, #47, #50 -> Merge
-> BehaviorSubject lastKeyState
-> BehaviorSubject delayKeyState

ExternalizedProperty PortName(MemberName=PortName, Category=Arduino) => #21
ExternalizedMapping("Right Valve Open Time", "Left Valve Open Time") => #26
#21, #26 -> GroupWorkflow ArduinoComAndLogging
    SubscribeSubject serialToSend => #7
    ExternalizedMapping(PortName) => #10
    -> Bonsai.IO.SerialStringRead(PortName=COM3, NewLine=\n)
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 4:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i\t%i) => #2
    -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> MulticastSubject leftLicks
    #2 -> MemberSelector(Selector=Item3)
    #2 -> MemberSelector(Selector=Item1)
    -> MulticastSubject WheelInput
    #2 -> MemberSelector(Selector=Item4)
    -> DistinctUntilChanged
    -> MulticastSubject rightLicks
    #7, #10 -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> IntProperty(Value=1) => #11
    Bonsai.Windows.Input.KeyDown(Filter=A) => #15
    Bonsai.Windows.Input.KeyDown(Filter=B) => #16
    Disable Bonsai.Windows.Input.KeyDown(Filter=C)
    -> Disable StringProperty(Value=c1) => #21
    Disable Bonsai.Windows.Input.KeyDown(Filter=D)
    -> Disable StringProperty(Value=c0) => #22
    SubscribeSubject LeftOpenTime
    -> PropertyMapping(Value) => #66
    #16, #66 -> StringProperty(Value=l150)
    -> Skip(Count=1) => #26
    SubscribeSubject RightOpenTime
    -> PropertyMapping(Value) => #65
    #15, #65 -> StringProperty(Value=r100)
    -> Skip(Count=1) => #25
    #25, #26, #21, #22 -> Merge
    -> Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r) => #68
    -> IntProperty(Value=1) => #72
    #11, #72 -> Merge
    -> Accumulate
    StringProperty(Value=m) => #69
    #69, #68 -> CombineLatest
    -> cat2strings
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    StringProperty(Value=r) => #27
    ExternalizedMapping(Value(DisplayName="Right Valve Open Time", Category=Valves))
    -> FloatProperty(Value=100) => #28
    #27, #28 -> CombineLatest
    -> genRewardString
    -> MulticastSubject RightOpenTime

    StringProperty(Value=l) => #32
    ExternalizedMapping(Value(DisplayName="Left Valve Open Time", Category=Valves))
    -> FloatProperty(Value=100) => #33
    #32, #33 -> CombineLatest
    -> genRewardString
    -> MulticastSubject LeftOpenTime

    SubscribeSubject LeftCorrect
    -> Skip(Count=1) => #40
    SubscribeSubject LeftOpenTime
    -> PropertyMapping(Value) => #50
    #40, #50 -> StringProperty(Value=l150)
    -> MulticastSubject LeftOpenTime
    -> MulticastSubject serialToSend

    SubscribeSubject RightCorrect
    -> Skip(Count=1) => #45
    SubscribeSubject RightOpenTime
    -> PropertyMapping(Value) => #52
    #45, #52 -> StringProperty(Value=r100)
    -> MulticastSubject RightOpenTime
    -> MulticastSubject serialToSend

    SubscribeSubject leftLicks => #53
    SubscribeSubject rightLicks => #54
    #53, #54 -> CombineLatest
    -> Skip(Count=1)
    -> IncludeWorkflow Licks(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject WheelInput
    -> Skip(Count=1)
    -> Bonsai.Shaders.SampleOnRenderFrame
    -> GroupWorkflow LogEvent(Description="Logs a value into the specified common event stream.")
        WorkflowInput Source1 => #0
        ExternalizedProperty Format(MemberName=Format) => #2
        ExternalizedProperty Selector(MemberName=Selector) => #3
        ExternalizedProperty Name(MemberName=Name, Category="") => #4
        #0, #2, #3, #4 -> Sink FormatLog
            WorkflowInput Source1 => #2
            ExternalizedProperty Format(MemberName=Format) => #4
            ExternalizedProperty Selector(MemberName=Selector) => #5
            #2, #4, #5 -> Format => #1
            ExternalizedProperty Name(MemberName=Name) => #6
            #1, #6 -> MulticastSubject Wheel
            -> WorkflowOutput
        -> WorkflowOutput

    Disable SubscribeSubject IncorrectResponse => #59
    Disable ExternalizedProperty "Incorrect Response pin"(MemberName=Pin) => #61
    #59, #61 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=0)

    SubscribeSubject TrialResults
    -> IntProperty(Value=1)
    -> Accumulate
    -> BehaviorSubject TrialCount

ExternalizedProperty TopBorder(MemberName=TopBorder) => #22
ExternalizedProperty BottomBorder(MemberName=BottomBorder) => #23
ExternalizedProperty LeftBorder(MemberName=LeftBorder) => #24
ExternalizedProperty RightBorder(MemberName=RightBorder) => #25
#22, #23, #24, #25 -> GroupWorkflow "Display and Resources"
    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Maximized
      DisplayDevice=Second
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.LoadResources

    ExternalizedProperty TopBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #6
    ExternalizedProperty BottomBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #8
    ExternalizedProperty LeftBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #10
    ExternalizedProperty RightBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #12
    #6, #8, #10, #12 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

GroupWorkflow "Initialise subjects and logging"
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow LicksLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #54
        SubscribeSubject Licks => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject Licks
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=Licks)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #55
        SubscribeSubject TrialParams => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject TrialParams
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=TrialParams)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=TrialParams.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #56
        SubscribeSubject Wheel => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject Wheel
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=Wheel)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow EventsLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #57
        SubscribeSubject Events => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject Events
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=Events)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=Events.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter=L) => #12
    #54, #12 -> SubscribeWhen
    #55, #12 -> SubscribeWhen
    #56, #12 -> SubscribeWhen
    #57, #12 -> SubscribeWhen
    SubscribeSubject respDelay => #44
    SubscribeSubject respWinSize => #45
    StringProperty(Value=respDelay) => #46
    #46, #44 -> CombineLatest
    -> genRewardString => #50
    #50, #12 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    StringProperty(Value=respSize) => #47
    #47, #45 -> CombineLatest
    -> genRewardString => #51
    #51, #12 -> SubscribeWhen
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    StringProperty
    -> BehaviorSubject RightOpenTime

    StringProperty
    -> BehaviorSubject LeftOpenTime

    BooleanProperty(Value=false)
    -> BehaviorSubject IncorrectResponse

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject RightCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject NoResponse

    StringProperty(Value=c0)
    -> Skip(Count=1)
    -> BehaviorSubject serialToSend

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject leftLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject rightLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject WheelInput

    FloatProperty(Value=1)
    -> BehaviorSubject "Difficulty Level"

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> AsyncSubject Random

    FloatProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject TrialResults

Disable GroupWorkflow QuadState
    SubscribeSubject DrawStimuli => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #1
    #0, #1 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=29, LocationY=-29, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

GroupWorkflow lickometer
    SubscribeSubject leftLicks => #0
    ExternalizedMapping(Period)
    -> Timer(DueTime=PT0S, Period=PT1.1S)
    -> IntProperty(Value=0) => #1
    SubscribeSubject rightLicks => #9
    #0, #9 -> Merge => #10
    #1, #10 -> CombineLatest
    -> Add
    -> TimeInterval
    -> MemberSelector(Selector=Interval.TotalSeconds)
    -> Condition
        WorkflowInput Source1
        -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> BehaviorSubject nolicks
    -> WorkflowOutput
