WorkflowBuilder(Version=2.4.0-preview)
StringProperty(Value=StartSession)
-> Take(Count=1)
-> GroupWorkflow EventLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to log events.")
    WorkflowInput Source1 => #3
    ExternalizedProperty Name(MemberName=Name) => #5
    #3, #5 -> BehaviorSubject LogEvents
    #5 -> SubscribeSubject LogEvents => #1
    #5 -> GroupWorkflow GenerateFileName
        ExternalizedProperty Name(MemberName=Value)
        -> StringProperty(Value=LogEvents)
        -> Take(Count=1)
        -> Format(Format={0}.csv)
        -> WorkflowOutput
    -> ExternalizedProperty(MemberName=FileName) => #4
    ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
    ExternalizedProperty Suffix(MemberName=Suffix) => #7
    #1, #4, #6, #7 -> Bonsai.IO.CsvWriter(FileName=LogEvents.csv, Delimiter=",", Append=false, Overwrite=true, Suffix=None, IncludeHeader=false, Selector="")

Bonsai.Numerics.CreateRandom(Seed=42)
-> AsyncSubject Random

SubscribeSubject Random => #7
ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime, Description="Max time to wait for a response from subject", Category="Time Options") => #8
ExternalizedProperty outputOnTime(MemberName=outputOnTime, Description="Duration of time to activate arduino for a correct response", Category="Time Options") => #9
ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #10
ExternalizedProperty InterStimInterval(MemberName=InterStimInterval, Description="delay time between end of arduino activation and next stimulus presentation", Category="Time Options") => #11
BonVision.Collections.GratingsSpecification
  Trials
    GratingParameters(Duration=3, Diameter=120, X=0, Y=0, Contrast=1, SpatialFrequency=0.05, TemporalFrequency=0, Orientation=-10)
    GratingParameters(Duration=3, Diameter=90, X=0, Y=0, Contrast=1, SpatialFrequency=0.05, TemporalFrequency=0, Orientation=10)
-> IncludeWorkflow => #23
  Path=BonVision:Collections.EnsureGratingParameters.bonsai
  Duration=1
  Diameter=90
  X=0
  Y=0
  Contrast=1
  SpatialFrequency=10
  TemporalFrequency=0
  Orientation=0
#23, #7 -> Bonsai.Numerics.Permutation => #6
#6, #8, #9, #10, #11 -> CreateObservable CreateTrial
    WorkflowInput Source1 => #0
    -> ReplaySubject Parameters(BufferSize=nil)
    #0 -> SelectMany DrawStimulus => #8
        SubscribeSubject DrawStimuli => #0
        SubscribeSubject Parameters => #4
        -> PropertyMapping(LocationX(Selector=X), LocationY(Selector=Y), Contrast(Selector=Contrast), Angle(Selector=Orientation)) => #1
        #0, #1 -> IncludeWorkflow => #14
          Path=BonVision:Primitives.DrawGratings.bonsai
          ExtentX=1
          ExtentY=1
          LocationX=0
          LocationY=0
          Angle=-10
          SpatialFrequency=10
          TemporalFrequency=0
          SquareWave=false
          Contrast=1
          Radius=1
          Edge=0.2
          Opacity=1
        #4 -> MemberSelector(Selector=X) => #11
        #4 -> MemberSelector(Selector=Contrast) => #13
        SubscribeSubject Parameters
        -> MemberSelector(Selector=Duration)
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> ExternalizedProperty DueTime(MemberName=DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT3S) => #3
        #14, #3 -> TakeUntil
        -> Last => #9
        #9, #11, #13 -> CombineLatest
        -> WorkflowOutput
    ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #2
    ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #3
    ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #4
    #8, #2, #3, #4 -> SelectMany Response => #9
        Bonsai.Windows.Input.KeyDown(Filter=Right)
        -> First
        -> FloatProperty(Value=1) => #4
        Bonsai.Windows.Input.KeyDown(Filter=Left)
        -> First
        -> FloatProperty(Value=-1) => #3
        ExternalizedProperty waitForResponseTime(MemberName=DueTime, Description="time to wait for a response")
        -> Timer(DueTime=PT3S, Period=PT0S)
        -> FloatProperty(Value=0) => #6
        #3, #4, #6 -> Amb => #12
        ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #9
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #10
        WorkflowInput Source1 => #11
        -> MemberSelector(Selector=Item2) => #0
        #11 -> MemberSelector(Selector=Item3) => #16
        #0, #12, #16 -> Zip
        -> MulticastSubject ptrack => #17
        #17, #9, #10 -> GroupWorkflow ComputeResultWorkflow
          Description:
            This grouped workflow computes the result of the trial
            (0, 1, 2 or 3) and activates arduino digital outputs
            accordingly
          Workflow
            ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response") => #1
            ExternalizedProperty timeoutTime(MemberName=DueTime) => #2
            WorkflowInput Source1
            -> Bonsai.Scripting.PythonTransform ComputeResult => #0
              Script:
                @returns(int)
                def process(value):

                  trialParam = value.Item1;
                  trialResponse = value.Item2;

                  if trialResponse == 0:
                    output = 3; # no response

                  elif trialParam > 0: # stim is right
                    if trialResponse > 0:
                      output = 2; #CORRECT RIGHT
                    elif trialResponse < 0:
                      output = 0; #wrong

                  elif trialParam < 0: # stim is right
                    if trialResponse < 0:
                      output = 1; #correct left
                    elif trialResponse > 0:
                      output = 0; #wrong

                  return output
            -> Equal(Operand=IntProperty(Value=0))
            -> Condition IncorrectResponse => #19
                WorkflowInput Source1
                -> WorkflowOutput
            #19, #1 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #4
                ExternalizedProperty DueTime(MemberName=DueTime) => #6
                #4, #6 -> Delay(DueTime=PT1S)
                -> BooleanProperty(Value=false) => #1
                #4, #1 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject IncorrectResponse => #9
            #0 -> Equal(Operand=IntProperty(Value=1))
            -> Condition LeftCorrect => #20
                WorkflowInput Source1
                -> WorkflowOutput
            #20, #1 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #4
                ExternalizedProperty DueTime(MemberName=DueTime) => #6
                #4, #6 -> Delay(DueTime=PT1S)
                -> BooleanProperty(Value=false) => #1
                #4, #1 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject LeftCorrect => #10
            #0 -> Equal(Operand=IntProperty(Value=2))
            -> Condition RightCorrect => #21
                WorkflowInput Source1
                -> WorkflowOutput
            Source2=#1, Source2=#21 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #4
                ExternalizedProperty DueTime(MemberName=DueTime) => #6
                #4, #6 -> Delay(DueTime=PT1S)
                -> BooleanProperty(Value=false) => #1
                #4, #1 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject RightCorrect => #11
            #0 -> Equal(Operand=IntProperty(Value=3))
            -> Condition NoResponse => #22
                WorkflowInput Source1
                -> WorkflowOutput
            Source2=#2, Source2=#22 -> GroupWorkflow "Delayed Boolean"
              Description:
                This grouped workflow propogates the first boolean
                (true/false, dependent on the trial result), and sends
                a second false boolean after a specified time.

                This is used to control how long the digital output
                of the arduino is set to HIGH for.
              Workflow
                WorkflowInput Source1 => #4
                ExternalizedProperty DueTime(MemberName=DueTime) => #6
                #4, #6 -> Delay(DueTime=PT5S)
                -> BooleanProperty(Value=false) => #1
                #4, #1 -> Merge
                -> DistinctUntilChanged
                -> WorkflowOutput
            -> MulticastSubject NoResponse => #12
            #9, #10, #11, #12 -> Merge
            -> Take(Count=2)
            -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedProperty InterStimInterval(MemberName=DueTime, Description="delay time after response") => #6
    #9, #6 -> Delay(DueTime=PT1S)
    -> WorkflowOutput
-> Concat
-> Repeat

ExternalizedProperty PortName(MemberName=PortName, Category=Arduino) => #12
ExternalizedProperty "No Response pin"(MemberName="No Response pin", Category=Arduino) => #13
ExternalizedProperty "Incorrect Response pin"(MemberName="Incorrect Response pin", Category=Arduino) => #14
ExternalizedProperty "Left Correct pin"(MemberName="Left Correct pin", Category=Arduino) => #15
ExternalizedProperty "Right Correct pin"(MemberName="Right Correct pin", Category=Arduino) => #16
#12, #13, #14, #15, #16 -> GroupWorkflow ArduinoPinMapping
    BooleanProperty(Value=false)
    -> BehaviorSubject IncorrectResponse

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject RightCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject NoResponse

    SubscribeSubject IncorrectResponse => #8
    SubscribeSubject LeftCorrect => #10
    SubscribeSubject RightCorrect => #12
    SubscribeSubject NoResponse => #14
    ExternalizedProperty "No Response pin"(MemberName=Pin) => #16
    ExternalizedProperty "Incorrect Response pin"(MemberName=Pin) => #17
    ExternalizedProperty "Left Correct pin"(MemberName=Pin) => #18
    ExternalizedProperty "Right Correct pin"(MemberName=Pin) => #19
    ExternalizedProperty PortName(MemberName=PortName) => #20
    #8, #17, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=0)
    #10, #18, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=7)
    #12, #19, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=12)
    #14, #16, #20 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM3, Pin=2)

GroupWorkflow "Display and Resources"
    Bonsai.Shaders.RenderFrame => #0
    SubscribeSubject Borders
    -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #23
    #0, #23 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-10, Right=10, Bottom=-10, Top=10)
    -> PublishSubject DrawStimuli
    -> WorkflowOutput

    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.LoadResources

    ExternalizedProperty TopBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=10)
    -> ReplaySubject Top(BufferSize=nil) => #9
    ExternalizedProperty BottomBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-10)
    -> ReplaySubject Bottom(BufferSize=nil) => #11
    ExternalizedProperty LeftBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-10)
    -> ReplaySubject Left(BufferSize=nil) => #13
    ExternalizedProperty RightBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=10)
    -> ReplaySubject Right(BufferSize=nil) => #15
    #9, #11, #13, #15 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

GroupWorkflow "Performance Tracking"
    SubscribeSubject ptrack
    -> Skip(Count=1) => #1
    ExternalizedProperty contrastVal1(MemberName=contrastVal1) => #4
    ExternalizedProperty contrastVal2(MemberName=contrastVal2) => #5
    ExternalizedProperty contrastVal3(MemberName=contrastVal3) => #6
    #1, #4, #5, #6 -> GroupWorkflow "Psychometric Function"
        ExternalizedProperty contrastVal1(MemberName=Value) => #1
        ExternalizedProperty contrastVal2(MemberName=Value) => #2
        ExternalizedProperty contrastVal3(MemberName=Value) => #3
        FloatProperty(Value=1) => #5
        WorkflowInput Source1 => #12
        -> Condition LeftTrial => #14
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> LessThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        #14, #3 -> Condition "0.25 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=0.25))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #22
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        #5, #22 -> CombineLatest
        -> Subtract => #9
        #14, #2 -> Condition "0.50 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=0.5))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #23
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        #5, #23 -> CombineLatest
        -> Subtract => #10
        #14, #1 -> Condition "1 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=1))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #24
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        #5, #24 -> CombineLatest
        -> Subtract => #11
        #12 -> Condition RightTrial => #15
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        #15, #3 -> Condition "0.25 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=0.25))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #25
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        #15, #2 -> Condition "0.50 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=0.5))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #26
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        #15, #1 -> Condition "1 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=1))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #27
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        #11, #10, #9, #25, #26, #27 -> CombineLatest
        -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
        -> WorkflowOutput
    -> Bonsai.Dsp.Transpose
    #1, #4, #5, #6 -> GroupWorkflow "Prop Correct"
        WorkflowInput Source1 => #2
        ExternalizedProperty contrastVal3(MemberName=Value) => #4
        #2, #4 -> Condition "0.25 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=0.25))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #9
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        ExternalizedProperty contrastVal2(MemberName=Value) => #5
        #2, #5 -> Condition "0.50 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=0.5))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #8
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        ExternalizedProperty contrastVal1(MemberName=Value) => #6
        #2, #6 -> Condition "1 C"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item3) => #0
            ExternalizedProperty Value(MemberName=Value) => #4
            #0, #4 -> Equal(Operand=FloatProperty(Value=1))
            -> WorkflowOutput
        -> GroupWorkflow "P Correct" => #7
            FloatProperty(Value=0) => #0
            WorkflowInput Source1
            -> GroupWorkflow "Calc P Correct" => #4
                WorkflowInput Source1 => #6
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #6 -> Condition
                    WorkflowInput Source1 => #6
                    -> MemberSelector(Selector=Item1)
                    -> Bonsai.Numerics.Sign => #2
                    #6 -> MemberSelector(Selector=Item2)
                    -> Bonsai.Numerics.Sign => #3
                    #3, #2 -> Zip
                    -> Equal
                    -> WorkflowOutput
                -> FloatProperty(Value=1)
                -> Accumulate => #1
                #1, #0 -> CombineLatest
                -> Divide
                -> WorkflowOutput
            #0, #4 -> Merge
            -> WorkflowOutput
        #9, #8, #7 -> CombineLatest
        -> Bonsai.Dsp.Buffer(Count=1, Skip=nil)
        -> WorkflowOutput
    -> Bonsai.Dsp.Transpose

    GroupWorkflow "Initialise ptrack"
        FloatProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        #2, #1, #0 -> Zip
        -> BehaviorSubject ptrack
        -> WorkflowOutput
