WorkflowBuilder(Version=2.4.0-preview)
ExternalizedProperty PortName(MemberName=PortName, Category=Arduino) => #0
ExternalizedMapping("Right Valve Open Time", "Left Valve Open Time") => #5
#0, #5 -> GroupWorkflow ArduinoComAndLogging
    SubscribeSubject serialToSend => #7
    ExternalizedMapping(PortName) => #10
    -> Bonsai.IO.SerialStringRead(PortName=COM3, NewLine=\n)
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 4:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i\t%i) => #2
    -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> MulticastSubject leftLicks
    #2 -> MemberSelector(Selector=Item3)
    #2 -> MemberSelector(Selector=Item1)
    -> MulticastSubject WheelInput
    #2 -> MemberSelector(Selector=Item4)
    -> DistinctUntilChanged
    -> MulticastSubject rightLicks
    #7, #10 -> Disable Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r)
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    -> IntProperty(Value=1)
    -> Accumulate

    Bonsai.Windows.Input.KeyDown(Filter=A) => #15
    Bonsai.Windows.Input.KeyDown(Filter=B) => #16
    Disable Bonsai.Windows.Input.KeyDown(Filter=C)
    -> Disable StringProperty(Value=c1) => #21
    Disable Bonsai.Windows.Input.KeyDown(Filter=D)
    -> Disable StringProperty(Value=c0) => #22
    SubscribeSubject LeftOpenTime
    -> PropertyMapping(Value) => #66
    #16, #66 -> StringProperty(Value=l40)
    -> Skip(Count=1) => #26
    SubscribeSubject RightOpenTime
    -> PropertyMapping(Value) => #65
    #15, #65 -> StringProperty(Value=r30)
    -> Skip(Count=1) => #25
    #25, #26, #21, #22 -> Merge
    -> Disable Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r) => #68
    StringProperty(Value=m) => #69
    #69, #68 -> CombineLatest
    -> cat2strings
    -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    StringProperty(Value=r) => #27
    ExternalizedMapping(Value(DisplayName="Right Valve Open Time", Category=Valves))
    -> FloatProperty(Value=30) => #28
    #27, #28 -> CombineLatest
    -> genRewardString
    -> MulticastSubject RightOpenTime

    StringProperty(Value=l) => #32
    ExternalizedMapping(Value(DisplayName="Left Valve Open Time", Category=Valves))
    -> FloatProperty(Value=40) => #33
    #32, #33 -> CombineLatest
    -> genRewardString
    -> MulticastSubject LeftOpenTime

    SubscribeSubject LeftCorrect
    -> Skip(Count=1) => #40
    SubscribeSubject LeftOpenTime
    -> PropertyMapping(Value) => #50
    #40, #50 -> StringProperty(Value=l40)
    -> MulticastSubject LeftOpenTime
    -> MulticastSubject serialToSend

    SubscribeSubject RightCorrect
    -> Skip(Count=1) => #45
    SubscribeSubject RightOpenTime
    -> PropertyMapping(Value) => #52
    #45, #52 -> StringProperty(Value=r30)
    -> MulticastSubject RightOpenTime
    -> MulticastSubject serialToSend

    SubscribeSubject leftLicks => #53
    SubscribeSubject rightLicks => #54
    #53, #54 -> CombineLatest
    -> Skip(Count=1)
    -> IncludeWorkflow Licks(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)

    SubscribeSubject WheelInput
    -> Skip(Count=1)
    -> Bonsai.Shaders.SampleOnRenderFrame
    -> GroupWorkflow LogEvent(Description="Logs a value into the specified common event stream.")
        WorkflowInput Source1 => #0
        ExternalizedProperty Format(MemberName=Format) => #2
        ExternalizedProperty Selector(MemberName=Selector) => #3
        ExternalizedProperty Name(MemberName=Name, Category="") => #4
        #0, #2, #3, #4 -> Sink FormatLog
            WorkflowInput Source1 => #2
            ExternalizedProperty Format(MemberName=Format) => #4
            ExternalizedProperty Selector(MemberName=Selector) => #5
            #2, #4, #5 -> Format => #1
            ExternalizedProperty Name(MemberName=Name) => #6
            #1, #6 -> MulticastSubject Wheel
            -> WorkflowOutput
        -> WorkflowOutput

    Disable SubscribeSubject IncorrectResponse => #59
    Disable ExternalizedProperty "Incorrect Response pin"(MemberName=Pin) => #61
    #59, #61 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=0)

    SubscribeSubject TrialResults

ExternalizedProperty TopBorder(MemberName=TopBorder) => #1
ExternalizedProperty BottomBorder(MemberName=BottomBorder) => #2
ExternalizedProperty LeftBorder(MemberName=LeftBorder) => #3
ExternalizedProperty RightBorder(MemberName=RightBorder) => #4
#1, #2, #3, #4 -> GroupWorkflow "Display and Resources"
    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Maximized
      DisplayDevice=Second
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.LoadResources

    ExternalizedProperty TopBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #6
    ExternalizedProperty BottomBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #8
    ExternalizedProperty LeftBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #10
    ExternalizedProperty RightBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #12
    #6, #8, #10, #12 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

Bonsai.Shaders.RenderFrame => #19
SubscribeSubject Borders
-> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #23
#19, #23 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #43
SubscribeSubject WheelInput
-> Bonsai.Shaders.SampleOnRenderFrame => #30
-> Skip(Count=1) => #7
#7, #30 -> Zip
-> Subtract => #8
ExternalizedMapping(Value(DisplayName=WindowSize))
-> FloatProperty(Value=10) => #12
-> PropertyMapping(Count) => #13
#8, #13 -> Disable Buffer(Count=10, Skip=1)
-> Disable Add => #10
#12 -> PropertyMapping(Value) => #14
#10, #14 -> Disable Divide(Operand=FloatProperty(Value=10))
-> Multiply(Operand=FloatProperty(Value=-1))
-> PropertyMapping(VelX) => #26
#43, #26 -> GroupWorkflow MovingDots_SpeedDiscrim
    WorkflowInput Source1 => #0
    ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
    ExternalizedMapping(VelX, VelY) => #4
    #0, #3, #4 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #5
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        ExternalizedProperty(MemberName=Z) => #6
        FloatProperty(Value=0) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
        ExternalizedMapping(dotLifetime) => #31
        ExternalizedMapping(numDots) => #35
        #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
        #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
        #26, #30 -> Zip => #32
        #32, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(dotLifetimeBool) => #36
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
        FloatProperty(Value=0) => #43
        #41, #43 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #42, #43 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #33
        #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #0, #3, #4 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #6
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        ExternalizedProperty(MemberName=Z) => #6
        FloatProperty(Value=0) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
        ExternalizedMapping(dotLifetime) => #30
        ExternalizedMapping(dotLifetimeBool) => #34
        ExternalizedMapping(numDots) => #36
        #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
        #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
        #35, #29 -> Zip => #31
        #31, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
        FloatProperty(Value=0) => #43
        #41, #43 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #42, #43 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #32
        #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #0, #3, #4 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #7
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        FloatProperty(Value=1) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        #9 -> ExternalizedProperty(MemberName=Z) => #6
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
        ExternalizedMapping(dotLifetime) => #30
        ExternalizedMapping(dotLifetimeBool) => #34
        ExternalizedMapping(numDots) => #36
        #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
        #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
        #35, #29 -> Zip => #31
        #31, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
        FloatProperty(Value=0) => #45
        #41, #45 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #42, #45 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #32
        #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #0, #3, #4 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #8
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        FloatProperty(Value=1) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        #9 -> ExternalizedProperty(MemberName=Z) => #6
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
        ExternalizedMapping(dotLifetime) => #30
        ExternalizedMapping(dotLifetimeBool) => #34
        ExternalizedMapping(numDots) => #36
        #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
        #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
        #35, #29 -> Zip => #31
        #31, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
        FloatProperty(Value=0) => #43
        #41, #43 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #42, #43 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #32
        #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #5, #7, #8, #6 -> Zip
    -> WorkflowOutput
-> Bonsai.Shaders.RenderTexture
  RenderState=""
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  Width=nil
  Height=nil
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
-> BehaviorSubject TextureLeft => #18
#43, #26 -> GroupWorkflow MovingDots_SpeedDiscrim
    WorkflowInput Source1 => #0
    ExternalizedMapping(VelX, VelY) => #3
    #0, #3 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #4
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        ExternalizedProperty(MemberName=Z) => #6
        FloatProperty(Value=0) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
        ExternalizedMapping(dotLifetime) => #31
        ExternalizedMapping(dotLifetimeBool) => #35
        ExternalizedMapping(numDots) => #36
        #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
        #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
        #26, #30 -> Zip => #32
        #32, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Delay(DueTime=PT1S) => #44
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Delay(DueTime=PT1S) => #45
        FloatProperty(Value=0) => #41
        #44, #41 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #45, #41 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #33
        #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #0, #3 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #5
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        ExternalizedProperty(MemberName=Z) => #6
        FloatProperty(Value=0) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
        ExternalizedMapping(dotLifetime) => #30
        ExternalizedMapping(dotLifetimeBool) => #34
        ExternalizedMapping(numDots) => #36
        #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
        #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
        #35, #29 -> Zip => #31
        #31, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Delay(DueTime=PT1S) => #44
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Delay(DueTime=PT1S) => #45
        FloatProperty(Value=0) => #43
        #44, #43 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #45, #43 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #32
        #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #0, #3 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #6
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        FloatProperty(Value=1) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        #9 -> ExternalizedProperty(MemberName=Z) => #6
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
        ExternalizedMapping(dotLifetime) => #30
        ExternalizedMapping(dotLifetimeBool) => #34
        ExternalizedMapping(numDots) => #36
        #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
        #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
        #35, #29 -> Zip => #31
        #31, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Delay(DueTime=PT1S) => #44
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Delay(DueTime=PT1S) => #45
        FloatProperty(Value=0) => #43
        #44, #43 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #45, #43 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #32
        #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #0, #3 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #7
        ExternalizedProperty LocationX(MemberName=LocationX) => #1
        ExternalizedProperty LocationY(MemberName=LocationY) => #2
        FloatProperty(Value=1) => #9
        -> ExternalizedProperty(MemberName=X) => #4
        #9 -> ExternalizedProperty(MemberName=Y) => #5
        #9 -> ExternalizedProperty(MemberName=Z) => #6
        ExternalizedProperty ColorA(MemberName=Value)
        -> FloatProperty(Value=1)
        -> ExternalizedProperty(MemberName=W) => #7
        ExternalizedProperty Diameter(MemberName=Value)
        -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
        -> PropertyMapping(ExtentX, ExtentY) => #12
        WorkflowInput Source1
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
        #16, #1, #2, #12 -> GroupWorkflow Transform => #46
            WorkflowInput Source1 => #0
            ExternalizedProperty Angle(MemberName=Angle) => #2
            ExternalizedProperty ExtentX(MemberName=X) => #4
            ExternalizedProperty ExtentY(MemberName=Y) => #5
            ExternalizedProperty LocationX(MemberName=X) => #6
            ExternalizedProperty LocationY(MemberName=Y) => #7
            #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
            #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
            #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
            -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
            -> WorkflowOutput
        #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
        ExternalizedProperty Coherence(MemberName=Coherence) => #23
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
        SubscribeSubject Borders
        -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
        ExternalizedMapping(dotLifetime) => #30
        ExternalizedMapping(dotLifetimeBool) => #34
        ExternalizedMapping(numDots) => #36
        #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
        #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
        #35, #29 -> Zip => #31
        #31, #8 -> CombineLatest => #19
        #19, #8 -> Sample
        -> MemberSelector(Selector=Item1) => #18
        ExternalizedMapping(Value(DisplayName=VelX))
        -> FloatProperty(Value=-0)
        -> Delay(DueTime=PT1S) => #44
        ExternalizedMapping(Value(DisplayName=VelY))
        -> FloatProperty(Value=0)
        -> Delay(DueTime=PT1S) => #45
        FloatProperty(Value=0) => #43
        #44, #43 -> Merge
        -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
        #45, #43 -> Merge
        -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
        #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
        -> MemberSelector(Selector=Item1) => #32
        #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
        -> Bonsai.Shaders.DrawMeshInstanced
          ShaderName=CircleArray
          MeshName=Quad
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #4, #6, #7, #5 -> Zip
    -> WorkflowOutput
-> Bonsai.Shaders.RenderTexture
  RenderState=""
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  Width=nil
  Height=nil
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
-> BehaviorSubject TextureRight => #21
#18, #21 -> Zip
-> IncludeWorkflow => #40
  Path=BonVision:Environment.PerspectiveViewport.bonsai
  Eye(X=0, Y=0, Z=0)
  Target(X=0, Y=0, Z=-100)
  Up(X=0, Y=1, Z=0)
  Light(X=0, Y=100000, Z=0)
  FieldOfView=75
-> Sink BindRight
    WorkflowInput Source1 => #0
    ExternalizedMapping(Name)
    -> SubscribeSubject TextureRight => #2
    #0, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #4
    ExternalizedMapping(ShaderName) => #7
    #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
    -> WorkflowOutput
-> IncludeWorkflow => #36
  Path=BonVision:Primitives.DrawTexturedModel.bonsai
  TranslationX=1
  TranslationY=0
  TranslationZ=-3.5
  RotationZ=0
  RotationY=1.57
  RotationX=0
  ScaleX=6
  ScaleY=2
  ScaleZ=1
  MeshName=Plane
  Ambient(X=0, Y=0, Z=0)
  Diffuse(X=1, Y=1, Z=1)
  Specular(X=0, Y=0, Z=0)
  SpecularExponent=100
#40 -> Sink BindLeft
    WorkflowInput Source1 => #0
    ExternalizedMapping(Name)
    -> SubscribeSubject TextureLeft => #2
    #0, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #4
    ExternalizedMapping(ShaderName) => #7
    #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
    -> WorkflowOutput
-> IncludeWorkflow
  Path=BonVision:Primitives.DrawTexturedModel.bonsai
  TranslationX=-1
  TranslationY=0
  TranslationZ=-3.5
  RotationZ=0
  RotationY=1.57
  RotationX=0
  ScaleX=6
  ScaleY=2
  ScaleZ=1
  MeshName=Plane
  Ambient(X=0, Y=0, Z=0)
  Diffuse(X=1, Y=1, Z=1)
  Specular(X=0, Y=0, Z=0)
  SpecularExponent=100
-> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #25
#25, #36 -> Zip
-> WorkflowOutput

GroupWorkflow "Initialise subjects and logging"
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow LicksLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #44
        SubscribeSubject Licks => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject Licks
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=Licks)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=Licks.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow TrialLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #45
        SubscribeSubject TrialParams => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject TrialParams
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=TrialParams)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=TrialParams.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow WheelLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #46
        SubscribeSubject Wheel => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject Wheel
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=Wheel)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=Wheel.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    StringProperty(Value=StartSession)
    -> Take(Count=1)
    -> GroupWorkflow EventsLogger(Description="Creates and initializes a CSV file, and matching behavior subject, on which to timestamp and log events.") => #47
        SubscribeSubject Events => #1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime.TimeOfDay) => #9
        #1, #9 -> Zip => #10
        WorkflowInput Source1 => #3
        ExternalizedProperty Name(MemberName=Name) => #5
        #3, #5 -> BehaviorSubject Events
        #5 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=Events)
            -> Take(Count=1)
            -> Format(Format={0}.csv)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #4
        ExternalizedProperty Overwrite(MemberName=Overwrite) => #6
        ExternalizedProperty Suffix(MemberName=Suffix) => #7
        #4, #6, #7, #10 -> Bonsai.IO.CsvWriter(FileName=Events.csv, Delimiter=",", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, Selector="")
    Bonsai.Windows.Input.KeyDown(Filter=L) => #12
    #44, #12 -> SubscribeWhen
    #45, #12 -> SubscribeWhen
    #46, #12 -> SubscribeWhen
    #47, #12 -> SubscribeWhen

    StringProperty
    -> BehaviorSubject RightOpenTime

    StringProperty
    -> BehaviorSubject LeftOpenTime

    BooleanProperty(Value=false)
    -> BehaviorSubject IncorrectResponse

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject RightCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject NoResponse

    StringProperty(Value=c0)
    -> Skip(Count=1)
    -> BehaviorSubject serialToSend

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject leftLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject rightLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject WheelInput

    FloatProperty(Value=1)
    -> BehaviorSubject "Difficulty Level"

    Bonsai.Numerics.CreateRandom(Seed=42)
    -> AsyncSubject Random

    FloatProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject TrialResults

Disable GroupWorkflow QuadState
    SubscribeSubject DrawStimuli => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #1
    #0, #1 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=29, LocationY=-29, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

Disable GroupWorkflow QuadState
    SubscribeSubject DrawStimuli => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #1
    #0, #1 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=29, LocationY=-29, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState
