<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q7="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting" xmlns:q4="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:q6="clr-namespace:;assembly=Extensions" xmlns:q1="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>DotMotion</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateRandom">
          <q1:Seed>10</q1:Seed>
        </Combinator>
      </Expression>
      <Expression xsi:type="AsyncSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Take">
          <Count>1</Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>TopBorder</MemberName>
        <Name>TopBorder</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>BottomBorder</MemberName>
        <Name>BottomBorder</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>LeftBorder</MemberName>
        <Name>LeftBorder</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>RightBorder</MemberName>
        <Name>RightBorder</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>InterStimInterval</MemberName>
        <Name>InterStimInterval</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Parse">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>WheelDisplacement</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>LickStatus</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>WheelDisplacement</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BehaviorSubject">
          <Name>LickStatus</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DelaySubscription">
          <DueTime>PT10S</DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q4:DrawFramebuffer">
          <q4:RenderState />
          <q4:FramebufferAttachments />
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Trial Block 1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Concat" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Permutation" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>InterStimInterval</MemberName>
              <Name>InterStimInterval</Name>
              <Description>delay time between end of arduino activation and next stimulus presentation</Description>
              <Category>Time Options</Category>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="RepeatCount">
                <Count>10</Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>CreateTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Delay">
                      <DueTime>PT1S</DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="InterStimInterval" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ReplaySubject">
                    <Name>Parameters</Name>
                    <BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="Sink">
                    <Name>OffState</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>QuadState</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="0" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>OnState</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>QuadState</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="First" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DrawStimulus</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="TakeUntil" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Parameters</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="Last" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q4:Timer">
                            <q4:DueTime>PT3S</q4:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedProperty">
                          <MemberName>DueTime</MemberName>
                          <Name>DueTime</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Duration</Selector>
                        </Expression>
                        <Expression xsi:type="q5:ExpressionTransform">
                          <q5:Expression>TimeSpan.FromSeconds(it)</q5:Expression>
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>VelocityX</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>VelocityY</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="q4:UpdateFrame" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TimeStep.ElapsedTime</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="CombineLatest" />
                        </Expression>
                        <Expression xsi:type="Multiply" />
                        <Expression xsi:type="Multiply" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="CombineLatest" />
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="VelocityX" Selector="Item1" />
                            <Property Name="VelocityY" Selector="Item2" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Coherence" Selector="Coherence" />
                            <Property Name="dotLifetime" Selector="dotLifetime" />
                            <Property Name="ColorRw" Selector="Colour1" />
                            <Property Name="ColorGw" Selector="Colour1" />
                            <Property Name="ColorBw" Selector="Colour1" />
                            <Property Name="ColorRb" Selector="Colour2" />
                            <Property Name="ColorGb" Selector="Colour2" />
                            <Property Name="ColorBb" Selector="Colour2" />
                            <Property Name="numDotsBlack" Selector="numDots2" />
                            <Property Name="numDotsWhite" Selector="numDots1" />
                            <Property Name="Diameter" Selector="size" />
                            <Property Name="dotLifetimeBool" Selector="dotLifetimeBool" />
                            <Property Name="ColorA" Selector="Contrast" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                          <Format xsi:nil="true" />
                          <Selector xsi:nil="true" />
                          <Name>Events</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>MotionCoherence BandW_attemptToFixdotnumbers</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>numDots</MemberName>
                                <Name>numDotsWhite</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotLives">
                                  <q6:dotLifetime>20</q6:dotLifetime>
                                  <q6:numDots>125</q6:numDots>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="Zip" />
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>dotLifetime</MemberName>
                                <Name>dotLifetime</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>ColorR</MemberName>
                                <Name>ColorRw</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>ColorG</MemberName>
                                <Name>ColorGw</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>ColorB</MemberName>
                                <Name>ColorBw</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Borders</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="top" Selector="Item1" />
                                  <Property Name="bottom" Selector="Item2" />
                                  <Property Name="left" Selector="Item3" />
                                  <Property Name="right" Selector="Item4" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotField2">
                                  <q6:numDots>125</q6:numDots>
                                  <q6:left>-90</q6:left>
                                  <q6:right>90</q6:right>
                                  <q6:top>45</q6:top>
                                  <q6:bottom>-40</q6:bottom>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotField">
                                  <q6:numDots>0</q6:numDots>
                                  <q6:left>-90</q6:left>
                                  <q6:right>90</q6:right>
                                  <q6:top>45</q6:top>
                                  <q6:bottom>-40</q6:bottom>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>numDots</MemberName>
                                <Name>numDotsBlack</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotLives">
                                  <q6:dotLifetime>20</q6:dotLifetime>
                                  <q6:numDots>0</q6:numDots>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="Zip" />
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>ColorR</MemberName>
                                <Name>ColorRb</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>ColorG</MemberName>
                                <Name>ColorGb</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>ColorB</MemberName>
                                <Name>ColorBb</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotField3">
                                  <q6:numDots>125</q6:numDots>
                                  <q6:left>-90</q6:left>
                                  <q6:right>90</q6:right>
                                  <q6:top>45</q6:top>
                                  <q6:bottom>-40</q6:bottom>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotField4">
                                  <q6:numDots>0</q6:numDots>
                                  <q6:left>-90</q6:left>
                                  <q6:right>90</q6:right>
                                  <q6:top>45</q6:top>
                                  <q6:bottom>-40</q6:bottom>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotLives">
                                  <q6:dotLifetime>20</q6:dotLifetime>
                                  <q6:numDots>125</q6:numDots>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="Zip" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="Zip" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="q6:GenerateDotLives">
                                  <q6:dotLifetime>20</q6:dotLifetime>
                                  <q6:numDots>0</q6:numDots>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>Coherence</MemberName>
                                <Name>Coherence</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>VelocityX</MemberName>
                                <Name>VelocityX</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>VelocityY</MemberName>
                                <Name>VelocityY</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>Diameter</MemberName>
                                <Name>Diameter</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>dotLifetimeBool</MemberName>
                                <Name>dotLifetimeBool</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedProperty">
                                <MemberName>ColorA</MemberName>
                                <Name>ColorA</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="GroupWorkflow">
                                <Name>DrawMovingCircleArray-2d</Name>
                                <Description>Draws multiple colored circles using the input array as position data.</Description>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowOutput" />
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>LocationX</MemberName>
                                      <Name>LocationX</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>LocationY</MemberName>
                                      <Name>LocationY</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="q4:CreateVector4">
                                        <q4:X>0</q4:X>
                                        <q4:Y>0</q4:Y>
                                        <q4:Z>0</q4:Z>
                                        <q4:W>1</q4:W>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>X</MemberName>
                                      <Name />
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Y</MemberName>
                                      <Name />
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Z</MemberName>
                                      <Name />
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>W</MemberName>
                                      <Name />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="q4:UpdateUniform">
                                        <q4:UniformName>color</q4:UniformName>
                                        <q4:ShaderName>CircleArray</q4:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>0</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>0</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>0</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="FloatProperty">
                                        <Value>1</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Value</MemberName>
                                      <Name>ColorR</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Value</MemberName>
                                      <Name>ColorG</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Value</MemberName>
                                      <Name>ColorB</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Value</MemberName>
                                      <Name>ColorA</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="ExtentX" />
                                        <Property Name="ExtentY" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Value</MemberName>
                                      <Name>Diameter</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertySourceOfCreateScaleSingle">
                                      <MemberName>X</MemberName>
                                      <Value>2</Value>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="q4:DrawMeshInstanced">
                                        <q4:ShaderName>CircleArray</q4:ShaderName>
                                        <q4:MeshName>Quad</q4:MeshName>
                                        <q4:Usage>DynamicDraw</q4:Usage>
                                        <q4:InstanceAttributes>
                                          <q4:InstanceAttributeMapping>
                                            <q4:Size>2</q4:Size>
                                            <q4:Normalized>false</q4:Normalized>
                                            <q4:Type>Float</q4:Type>
                                            <q4:Divisor>1</q4:Divisor>
                                          </q4:InstanceAttributeMapping>
                                        </q4:InstanceAttributes>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="q4:UpdateUniform">
                                        <q4:UniformName>projection</q4:UniformName>
                                        <q4:ShaderName>CircleArray</q4:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item1</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>DrawStimuli</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="CombineLatest" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="Sample" />
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>VelocityX</MemberName>
                                      <Name>VelocityX</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>VelocityY</MemberName>
                                      <Name>VelocityY</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>Coherence</MemberName>
                                      <Name>Coherence</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Borders</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="top" Selector="Item1" />
                                        <Property Name="bottom" Selector="Item2" />
                                        <Property Name="left" Selector="Item3" />
                                        <Property Name="right" Selector="Item4" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>dotLifetime</MemberName>
                                      <Name>dotLifetime</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedProperty">
                                      <MemberName>dotLifetimeBool</MemberName>
                                      <Name>dotLifetimeBool</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="q6:wrapAroundDots">
                                        <q6:Left>-90</q6:Left>
                                        <q6:Right>90</q6:Right>
                                        <q6:Top>45</q6:Top>
                                        <q6:Bottom>-40</q6:Bottom>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item1</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="q6:moveDots_2dLife2">
                                        <q6:VelocityX>0.589166641</q6:VelocityX>
                                        <q6:VelocityY>0.589166641</q6:VelocityY>
                                        <q6:Coherence>100</q6:Coherence>
                                        <q6:dotLifetimeBool>0</q6:dotLifetimeBool>
                                        <q6:dotLifetime>20</q6:dotLifetime>
                                        <q6:left>-90</q6:left>
                                        <q6:right>90</q6:right>
                                        <q6:top>45</q6:top>
                                        <q6:bottom>-40</q6:bottom>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="GroupWorkflow">
                                      <Name>Transform</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                          <Expression xsi:type="ExternalizedProperty">
                                            <MemberName>Angle</MemberName>
                                            <Name>Angle</Name>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="q4:UpdateUniform">
                                              <q4:UniformName>transform</q4:UniformName>
                                              <q4:ShaderName>CircleArray</q4:ShaderName>
                                            </Combinator>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedProperty">
                                            <MemberName>X</MemberName>
                                            <Name>ExtentX</Name>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedProperty">
                                            <MemberName>Y</MemberName>
                                            <Name>ExtentY</Name>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedProperty">
                                            <MemberName>X</MemberName>
                                            <Name>LocationX</Name>
                                          </Expression>
                                          <Expression xsi:type="ExternalizedProperty">
                                            <MemberName>Y</MemberName>
                                            <Name>LocationY</Name>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="q4:RotateZ">
                                              <q4:Order>Prepend</q4:Order>
                                              <q4:Angle>0</q4:Angle>
                                            </Combinator>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="q4:Scale">
                                              <q4:Order>Prepend</q4:Order>
                                              <q4:X>2</q4:X>
                                              <q4:Y>2</q4:Y>
                                              <q4:Z>1</q4:Z>
                                            </Combinator>
                                          </Expression>
                                          <Expression xsi:type="Combinator">
                                            <Combinator xsi:type="q4:CreateTranslation">
                                              <q4:X>0</q4:X>
                                              <q4:Y>0</q4:Y>
                                              <q4:Z>0</q4:Z>
                                            </Combinator>
                                          </Expression>
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="10" Label="Source1" />
                                          <Edge From="2" To="8" Label="Source2" />
                                          <Edge From="3" To="1" Label="Source1" />
                                          <Edge From="4" To="9" Label="Source2" />
                                          <Edge From="5" To="9" Label="Source3" />
                                          <Edge From="6" To="10" Label="Source2" />
                                          <Edge From="7" To="10" Label="Source3" />
                                          <Edge From="8" To="3" Label="Source1" />
                                          <Edge From="9" To="8" Label="Source1" />
                                          <Edge From="10" To="9" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="1" To="37" Label="Source2" />
                                    <Edge From="2" To="37" Label="Source3" />
                                    <Edge From="3" To="8" Label="Source1" />
                                    <Edge From="4" To="3" Label="Source2" />
                                    <Edge From="5" To="3" Label="Source3" />
                                    <Edge From="6" To="3" Label="Source4" />
                                    <Edge From="7" To="3" Label="Source5" />
                                    <Edge From="8" To="25" Label="Source2" />
                                    <Edge From="8" To="26" Label="Source2" />
                                    <Edge From="9" To="4" Label="Source1" />
                                    <Edge From="10" To="5" Label="Source1" />
                                    <Edge From="11" To="6" Label="Source1" />
                                    <Edge From="12" To="7" Label="Source1" />
                                    <Edge From="13" To="9" Label="Source1" />
                                    <Edge From="14" To="10" Label="Source1" />
                                    <Edge From="15" To="11" Label="Source1" />
                                    <Edge From="16" To="12" Label="Source1" />
                                    <Edge From="17" To="37" Label="Source4" />
                                    <Edge From="18" To="19" Label="Source1" />
                                    <Edge From="19" To="17" Label="Source1" />
                                    <Edge From="20" To="0" Label="Source1" />
                                    <Edge From="21" To="37" Label="Source1" />
                                    <Edge From="22" To="25" Label="Source1" />
                                    <Edge From="23" To="36" Label="Source1" />
                                    <Edge From="24" To="21" Label="Source1" />
                                    <Edge From="25" To="26" Label="Source1" />
                                    <Edge From="26" To="23" Label="Source1" />
                                    <Edge From="27" To="36" Label="Source2" />
                                    <Edge From="28" To="36" Label="Source3" />
                                    <Edge From="29" To="36" Label="Source4" />
                                    <Edge From="30" To="31" Label="Source1" />
                                    <Edge From="31" To="36" Label="Source5" />
                                    <Edge From="31" To="34" Label="Source2" />
                                    <Edge From="32" To="36" Label="Source6" />
                                    <Edge From="33" To="36" Label="Source7" />
                                    <Edge From="34" To="20" Label="Source1" />
                                    <Edge From="35" To="34" Label="Source1" />
                                    <Edge From="36" To="35" Label="Source1" />
                                    <Edge From="37" To="3" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawMovingCircleArray-2d.bonsai">
                                <LocationX>0</LocationX>
                                <LocationY>0</LocationY>
                                <ColorR>0</ColorR>
                                <ColorG>0</ColorG>
                                <ColorB>0</ColorB>
                                <ColorA>1</ColorA>
                                <Diameter>2</Diameter>
                                <VelocityX>0.589166641</VelocityX>
                                <VelocityY>0.589166641</VelocityY>
                                <Coherence>100</Coherence>
                                <dotLifetime>20</dotLifetime>
                                <dotLifetimeBool>0</dotLifetimeBool>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawMovingCircleArray-2d.bonsai">
                                <LocationX>0</LocationX>
                                <LocationY>0</LocationY>
                                <ColorR>0</ColorR>
                                <ColorG>0</ColorG>
                                <ColorB>0</ColorB>
                                <ColorA>1</ColorA>
                                <Diameter>2</Diameter>
                                <VelocityX>0.589166641</VelocityX>
                                <VelocityY>0.589166641</VelocityY>
                                <Coherence>100</Coherence>
                                <dotLifetime>20</dotLifetime>
                                <dotLifetimeBool>0</dotLifetimeBool>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawMovingCircleArray-2d.bonsai">
                                <LocationX>0</LocationX>
                                <LocationY>0</LocationY>
                                <ColorR>0</ColorR>
                                <ColorG>0</ColorG>
                                <ColorB>0</ColorB>
                                <ColorA>1</ColorA>
                                <Diameter>2</Diameter>
                                <VelocityX>0.589166641</VelocityX>
                                <VelocityY>0.589166641</VelocityY>
                                <Coherence>100</Coherence>
                                <dotLifetime>20</dotLifetime>
                                <dotLifetimeBool>0</dotLifetimeBool>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="1" To="18" Label="Source2" />
                              <Edge From="1" To="20" Label="Source1" />
                              <Edge From="1" To="10" Label="Source2" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="31" Label="Source1" />
                              <Edge From="4" To="31" Label="Source2" />
                              <Edge From="4" To="2" Label="Source1" />
                              <Edge From="4" To="13" Label="Source2" />
                              <Edge From="4" To="20" Label="Source2" />
                              <Edge From="4" To="23" Label="Source1" />
                              <Edge From="5" To="31" Label="Source9" />
                              <Edge From="5" To="33" Label="Source8" />
                              <Edge From="6" To="31" Label="Source10" />
                              <Edge From="6" To="33" Label="Source9" />
                              <Edge From="7" To="31" Label="Source11" />
                              <Edge From="7" To="33" Label="Source10" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="9" To="11" Label="Source2" />
                              <Edge From="9" To="18" Label="Source1" />
                              <Edge From="9" To="19" Label="Source1" />
                              <Edge From="10" To="3" Label="Source1" />
                              <Edge From="11" To="14" Label="Source1" />
                              <Edge From="12" To="11" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="12" To="19" Label="Source2" />
                              <Edge From="12" To="23" Label="Source2" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="32" Label="Source1" />
                              <Edge From="15" To="34" Label="Source10" />
                              <Edge From="15" To="32" Label="Source10" />
                              <Edge From="16" To="34" Label="Source9" />
                              <Edge From="16" To="32" Label="Source9" />
                              <Edge From="17" To="34" Label="Source8" />
                              <Edge From="17" To="32" Label="Source8" />
                              <Edge From="18" To="21" Label="Source1" />
                              <Edge From="19" To="22" Label="Source1" />
                              <Edge From="20" To="21" Label="Source2" />
                              <Edge From="21" To="33" Label="Source2" />
                              <Edge From="22" To="34" Label="Source2" />
                              <Edge From="23" To="22" Label="Source2" />
                              <Edge From="24" To="31" Label="Source3" />
                              <Edge From="24" To="32" Label="Source2" />
                              <Edge From="24" To="33" Label="Source2" />
                              <Edge From="24" To="34" Label="Source2" />
                              <Edge From="25" To="31" Label="Source4" />
                              <Edge From="25" To="32" Label="Source3" />
                              <Edge From="25" To="33" Label="Source3" />
                              <Edge From="25" To="34" Label="Source3" />
                              <Edge From="26" To="31" Label="Source5" />
                              <Edge From="26" To="32" Label="Source4" />
                              <Edge From="26" To="33" Label="Source4" />
                              <Edge From="26" To="34" Label="Source4" />
                              <Edge From="27" To="31" Label="Source6" />
                              <Edge From="27" To="32" Label="Source5" />
                              <Edge From="27" To="33" Label="Source5" />
                              <Edge From="27" To="34" Label="Source5" />
                              <Edge From="28" To="31" Label="Source7" />
                              <Edge From="28" To="32" Label="Source6" />
                              <Edge From="28" To="33" Label="Source6" />
                              <Edge From="28" To="34" Label="Source6" />
                              <Edge From="29" To="31" Label="Source8" />
                              <Edge From="29" To="32" Label="Source7" />
                              <Edge From="29" To="33" Label="Source7" />
                              <Edge From="29" To="34" Label="Source7" />
                              <Edge From="32" To="30" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source2" />
                        <Edge From="1" To="6" Label="Source1" />
                        <Edge From="1" To="9" Label="Source1" />
                        <Edge From="1" To="10" Label="Source1" />
                        <Edge From="1" To="21" Label="Source1" />
                        <Edge From="1" To="22" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="20" Label="Source1" />
                        <Edge From="4" To="0" Label="Source2" />
                        <Edge From="5" To="4" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="5" Label="Source1" />
                        <Edge From="8" To="23" Label="Source1" />
                        <Edge From="9" To="13" Label="Source1" />
                        <Edge From="10" To="14" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="12" To="14" Label="Source2" />
                        <Edge From="13" To="15" Label="Source1" />
                        <Edge From="14" To="16" Label="Source1" />
                        <Edge From="15" To="17" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="23" Label="Source2" />
                        <Edge From="20" To="19" Label="Source1" />
                        <Edge From="21" To="23" Label="Source3" />
                        <Edge From="23" To="0" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="1" Label="Source2" />
                  <Edge From="5" To="1" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>EnsureDotParameters</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Duration</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Size</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Colour1</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Contrast</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.VelocityX</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.VelocityY</Selector>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Zip" />
                  </Expression>
                  <Expression xsi:type="q5:ExpressionTransform">
                    <q5:Expression>new(
Item1.Item1 as Id,
Item1.Item2 as Duration,
Item1.Item3 as Colour1,
Item1.Item4 as Colour2,
Item1.Item5 as Contrast,
Item1.Item6 as numDots1,
Item1.Item7 as numDots2,
Item2.Item1 as VelocityX,
Item2.Item2 as VelocityY,
Item2.Item3 as Coherence,
Item2.Item4 as dotLifetime,
Item2.Item5 as dotLifetimeBool,
Item2.Item6 as size)</q5:Expression>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Duration</Name>
                    <Description>The duration of the trial.</Description>
                    <Category>Default</Category>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Size</Name>
                    <Category>Default</Category>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Colour1</Name>
                    <Category>Default</Category>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Contrast</Name>
                    <Category>Default</Category>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>VelX</Name>
                    <Category>Default</Category>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>VelY</Name>
                    <Category>Default</Category>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Coherence</Selector>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Coherence</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.numDots1</Selector>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>numDots1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.dotLifetime</Selector>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>dotLifetime</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>dotLifeBool</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.dotLifeBool</Selector>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.numDots2</Selector>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>numDots2</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Colour2</Selector>
                  </Expression>
                  <Expression xsi:type="GetValueOrDefault">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Value</MemberName>
                    <Name>Colour2</Name>
                    <Category>Default</Category>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="25" Label="Source1" />
                  <Edge From="2" To="15" Label="Source1" />
                  <Edge From="3" To="9" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="5" To="11" Label="Source1" />
                  <Edge From="6" To="12" Label="Source1" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="15" Label="Source2" />
                  <Edge From="10" To="16" Label="Source6" />
                  <Edge From="11" To="15" Label="Source3" />
                  <Edge From="12" To="15" Label="Source5" />
                  <Edge From="13" To="16" Label="Source1" />
                  <Edge From="14" To="16" Label="Source2" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="1" Label="Source1" />
                  <Edge From="19" To="9" Label="Source2" />
                  <Edge From="20" To="10" Label="Source2" />
                  <Edge From="21" To="11" Label="Source2" />
                  <Edge From="22" To="12" Label="Source2" />
                  <Edge From="23" To="13" Label="Source2" />
                  <Edge From="24" To="14" Label="Source2" />
                  <Edge From="25" To="2" Label="Source1" />
                  <Edge From="25" To="3" Label="Source1" />
                  <Edge From="25" To="4" Label="Source1" />
                  <Edge From="25" To="5" Label="Source1" />
                  <Edge From="25" To="6" Label="Source1" />
                  <Edge From="25" To="7" Label="Source1" />
                  <Edge From="25" To="8" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="25" To="29" Label="Source1" />
                  <Edge From="25" To="32" Label="Source1" />
                  <Edge From="25" To="36" Label="Source1" />
                  <Edge From="25" To="38" Label="Source1" />
                  <Edge From="25" To="41" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="16" Label="Source3" />
                  <Edge From="28" To="27" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="15" Label="Source6" />
                  <Edge From="31" To="30" Label="Source2" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="16" Label="Source4" />
                  <Edge From="34" To="33" Label="Source2" />
                  <Edge From="35" To="37" Label="Source2" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="16" Label="Source5" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="15" Label="Source7" />
                  <Edge From="40" To="39" Label="Source2" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="15" Label="Source4" />
                  <Edge From="43" To="42" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="2" Label="Source2" />
            <Edge From="4" To="7" Label="Source2" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="0" Label="Source1" />
            <Edge From="8" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>QuadState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" Selector="it" />
                <Property Name="ColorG" Selector="it" />
                <Property Name="ColorB" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>QuadState</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>88</LocationX>
              <LocationY>-43</LocationY>
              <ColorR>1</ColorR>
              <ColorG>1</ColorG>
              <ColorB>1</ColorB>
              <ColorA>1</ColorA>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="5" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Display and Resources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:RenderFrame" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:CreateWindow">
                <q4:Width>1280</q4:Width>
                <q4:Height>960</q4:Height>
                <q4:VSync>On</q4:VSync>
                <q4:SwapSync>false</q4:SwapSync>
                <q4:ClearColor>Gray</q4:ClearColor>
                <q4:ClearMask>DepthBufferBit ColorBufferBit</q4:ClearMask>
                <q4:CursorVisible>true</q4:CursorVisible>
                <q4:Location xsi:nil="true" />
                <q4:WindowBorder>Resizable</q4:WindowBorder>
                <q4:WindowState>Normal</q4:WindowState>
                <q4:DisplayDevice>Primary</q4:DisplayDevice>
                <q4:TargetRenderFrequency>0</q4:TargetRenderFrequency>
                <q4:RenderState />
                <q4:GraphicsMode>
                  <q4:ColorFormat>
                    <q4:Red>8</q4:Red>
                    <q4:Green>8</q4:Green>
                    <q4:Blue>8</q4:Blue>
                    <q4:Alpha>8</q4:Alpha>
                  </q4:ColorFormat>
                  <q4:Depth>16</q4:Depth>
                  <q4:Stencil>0</q4:Stencil>
                  <q4:Samples>0</q4:Samples>
                  <q4:AccumulatorFormat>
                    <q4:Red>0</q4:Red>
                    <q4:Green>0</q4:Green>
                    <q4:Blue>0</q4:Blue>
                    <q4:Alpha>0</q4:Alpha>
                  </q4:AccumulatorFormat>
                  <q4:Buffers>2</q4:Buffers>
                  <q4:Stereo>false</q4:Stereo>
                </q4:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:ShaderResources">
                <q4:Shaders />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:MeshResources">
                <q4:Meshes />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:TextureResources">
                <q4:Textures />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q4:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>45</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Top</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-45</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Bottom</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Left</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>90</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Right</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Borders</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>TopBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BottomBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>LeftBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>RightBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ScreenBorders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Top" Selector="Item1" />
                <Property Name="Bottom" Selector="Item2" />
                <Property Name="Left" Selector="Item3" />
                <Property Name="Right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q6:AlterBorders">
                <q6:TopAdjust>0</q6:TopAdjust>
                <q6:BottomAdjust>5</q6:BottomAdjust>
                <q6:LeftAdjust>0</q6:LeftAdjust>
                <q6:RightAdjust>0</q6:RightAdjust>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>ScreenBorders</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
              <Left>-90</Left>
              <Right>90</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="27" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="26" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="16" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source3" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source4" />
            <Edge From="16" To="25" Label="Source1" />
            <Edge From="18" To="8" Label="Source1" />
            <Edge From="19" To="10" Label="Source1" />
            <Edge From="20" To="12" Label="Source1" />
            <Edge From="21" To="14" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="27" Label="Source2" />
            <Edge From="24" To="17" Label="Source1" />
            <Edge From="25" To="24" Label="Source1" />
            <Edge From="26" To="4" Label="Source1" />
            <Edge From="27" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.TimestampedEventLogger.bonsai">
        <Name>Events</Name>
        <Overwrite>false</Overwrite>
        <Suffix>Timestamp</Suffix>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>EphysOff</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EphysOn</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\8dirs_blackAndWhite.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="29" Label="Source1" />
      <Edge From="4" To="28" Label="Source1" />
      <Edge From="5" To="28" Label="Source2" />
      <Edge From="6" To="28" Label="Source3" />
      <Edge From="7" To="28" Label="Source4" />
      <Edge From="8" To="26" Label="Source1" />
      <Edge From="9" To="31" Label="Source1" />
      <Edge From="10" To="30" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="18" Label="Source2" />
      <Edge From="18" To="17" Label="Source1" />
      <Edge From="19" To="17" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="24" Label="Source1" />
      <Edge From="32" To="26" Label="Source2" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.StringProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Numerics.CreateRandom, Bonsai.Numerics, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.AsyncSubjectBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
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  </ExtensionTypes>
</WorkflowBuilder>