WorkflowBuilder(Version=2.4.0-preview)
SubscribeSubject Random => #0
SpeedDiscSpecification
  Trials
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=-2
      VelocityYLeft=0
      CoherenceLeft=100
      VelocityXRight=-2
      VelocityYRight=0
      CoherenceRight=100
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=-2
      VelocityYLeft=0
      CoherenceLeft=80
      VelocityXRight=-2
      VelocityYRight=0
      CoherenceRight=80
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=-2
      VelocityYLeft=0
      CoherenceLeft=60
      VelocityXRight=-2
      VelocityYRight=0
      CoherenceRight=60
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=-2
      VelocityYLeft=0
      CoherenceLeft=30
      VelocityXRight=-2
      VelocityYRight=0
      CoherenceRight=30
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=-2
      VelocityYLeft=0
      CoherenceLeft=0
      VelocityXRight=-2
      VelocityYRight=0
      CoherenceRight=0
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=2
      VelocityYLeft=0
      CoherenceLeft=0
      VelocityXRight=2
      VelocityYRight=0
      CoherenceRight=0
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=2
      VelocityYLeft=0
      CoherenceLeft=30
      VelocityXRight=2
      VelocityYRight=0
      CoherenceRight=30
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=2
      VelocityYLeft=0
      CoherenceLeft=60
      VelocityXRight=2
      VelocityYRight=0
      CoherenceRight=60
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=2
      VelocityYLeft=0
      CoherenceLeft=80
      VelocityXRight=2
      VelocityYRight=0
      CoherenceRight=80
    SpeedDiscParameters
      Duration=3
      Size=3
      Colour1=0
      Colour2=1
      numDots1=150
      numDots2=150
      dotLifeBool=0
      dotLifetime=20
      Contrast=1
      VelocityXLeft=2
      VelocityYLeft=0
      CoherenceLeft=100
      VelocityXRight=2
      VelocityYRight=0
      CoherenceRight=100
-> GroupWorkflow EnsureSpeedDiscParameters => #2
    WorkflowInput Source1
    -> ElementIndex => #1
    -> MemberSelector(Selector=Index) => #2
    #1 -> MemberSelector(Selector=Value.Duration) => #3
    ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #4
    #3, #4 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #5
    #1 -> MemberSelector(Selector=Value.Size) => #6
    ExternalizedMapping(Value(DisplayName=DotSize)) => #7
    #6, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #8
    #1 -> MemberSelector(Selector=Value.Colour1) => #9
    ExternalizedMapping(Value(DisplayName=Colour1)) => #10
    #9, #10 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
    #1 -> MemberSelector(Selector=Value.Colour2) => #12
    ExternalizedMapping(Value(DisplayName=Colour2)) => #13
    #12, #13 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #14
    #1 -> MemberSelector(Selector=Value.numDots1) => #15
    ExternalizedMapping(Value(DisplayName=numDots1)) => #16
    #15, #16 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
    #1 -> MemberSelector(Selector=Value.numDots2) => #18
    ExternalizedMapping(Value(DisplayName=numDots2)) => #19
    #18, #19 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
    #2, #5, #8, #11, #14, #17, #20 -> Zip => #21
    #1 -> MemberSelector(Selector=Value.dotLifeBool) => #22
    ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #23
    #22, #23 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #24
    #1 -> MemberSelector(Selector=Value.dotLifetime) => #25
    ExternalizedMapping(Value(DisplayName=dotLifetime)) => #26
    #25, #26 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #27
    #1 -> MemberSelector(Selector=Value.Contrast) => #28
    ExternalizedMapping(Value(DisplayName=Contrast)) => #29
    #28, #29 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #30
    #24, #27, #30 -> Zip => #31
    #1 -> MemberSelector(Selector=Value.VelocityXLeft) => #32
    ExternalizedMapping(Value(DisplayName=VelXleft)) => #33
    #32, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #34
    #1 -> MemberSelector(Selector=Value.VelocityYLeft) => #35
    ExternalizedMapping(Value(DisplayName=VelYleft)) => #36
    #35, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #37
    #1 -> MemberSelector(Selector=Value.CoherenceLeft) => #38
    ExternalizedMapping(Value(DisplayName=CohLeft)) => #39
    #38, #39 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #40
    #1 -> MemberSelector(Selector=Value.VelocityXRight) => #41
    ExternalizedMapping(Value(DisplayName=VelXright)) => #42
    #41, #42 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #43
    #1 -> MemberSelector(Selector=Value.VelocityYRight) => #44
    ExternalizedMapping(Value(DisplayName=VelYright)) => #45
    #44, #45 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #46
    #1 -> MemberSelector(Selector=Value.CoherenceRight) => #47
    ExternalizedMapping(Value(DisplayName=CohRight)) => #48
    #47, #48 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #49
    #34, #37, #40, #43, #46, #49 -> Zip => #50
    #21, #31, #50 -> Zip
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.Item1 as Id,
        Item1.Item2 as Duration,
        Item1.Item3 as Size,
        Item1.Item4 as Colour1,
        Item1.Item5 as Colour2,
        Item1.Item6 as numDots1,
        Item1.Item7 as numDots2,
        Item2.Item1 as dotLifeBool,
        Item2.Item2 as dotLifetime,
        Item2.Item3 as Contrast,
        Item3.Item1 as VelXLeft,
        Item3.Item2 as VelYLeft,
        Item3.Item3 as CohLeft,
        Item3.Item4 as VelXRight,
        Item3.Item5 as VelYRight,
        Item3.Item6 as CohRight)
    -> WorkflowOutput
#2, #0 -> Bonsai.Numerics.Permutation => #3
ExternalizedMapping(ISI) => #4
#3, #4 -> CreateObservable CreateTrial
    WorkflowInput Source1 => #0
    -> ReplaySubject Parameters(BufferSize=nil)
    -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
    #0 -> SelectMany DrawStimulus
        SubscribeSubject Parameters => #0
        -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #1
        Bonsai.Shaders.RenderFrame => #2
        SubscribeSubject Borders
        -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #4
        #2, #4 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #5
        SubscribeSubject Parameters
        -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #7
        SubscribeSubject Parameters
        -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #9
        #5, #9 -> GroupWorkflow MovingDots_SpeedDiscrim
            WorkflowInput Source1 => #0
            ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #5
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #9
            ExternalizedMapping(VelX, VelY) => #10
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #23, #22 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #39
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #41
                #30, #41, #39, #17, #19, #23, #22 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #11, #12, #13, #14 -> Zip
            -> WorkflowOutput
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> BehaviorSubject TextureRight => #12
        #5, #1, #7 -> GroupWorkflow MovingDots_SpeedDiscrim
            WorkflowInput Source1 => #0
            ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #5
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #9
            ExternalizedMapping(VelX, VelY) => #10
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(numDots) => #23
                #21, #23 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #24
                #22, #23 -> GenerateDotLives(dotLifetime=20, numDots=75) => #25
                #24, #25 -> Zip => #26
                #26, #16 -> CombineLatest => #27
                #27, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #29
                ExternalizedMapping(dotLifetimeBool) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #29, #39, #41, #17, #19, #22, #30 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #39
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #41
                #30, #41, #39, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Bonsai.Shaders.Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #23, #22 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #11, #12, #13, #14 -> Zip
            -> WorkflowOutput
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> BehaviorSubject TextureLeft => #15
        #5, #7, #1 -> GroupWorkflow MovingDots_SpeedDiscrim
            WorkflowInput Source1 => #0
            ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #5
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #9
            ExternalizedMapping(VelX, VelY) => #10
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #23, #22 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #39
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #41
                #30, #41, #39, #17, #19, #23, #22 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #11, #12, #13, #14 -> Zip
            -> WorkflowOutput
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> BehaviorSubject TextureTop => #18
        #5, #9, #1 -> GroupWorkflow MovingDots_SpeedDiscrim
            WorkflowInput Source1 => #0
            ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #5
            SubscribeSubject Parameters
            -> MemberSelector(Selector=numDots1)
            -> Divide(Operand=FloatProperty(Value=2))
            -> PropertyMapping(numDots) => #9
            ExternalizedMapping(VelX, VelY) => #10
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #11
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #23, #22 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #9, #10 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                FloatProperty(Value=1) => #2
                -> ExternalizedProperty(MemberName=X) => #3
                #2 -> ExternalizedProperty(MemberName=Y) => #4
                #2 -> ExternalizedProperty(MemberName=Z) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #3, #4, #5, #8 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #39
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #41
                #30, #39, #41, #17, #19, #22, #23 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #0, #1, #5, #10 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                ExternalizedProperty LocationX(MemberName=LocationX) => #0
                ExternalizedProperty LocationY(MemberName=LocationY) => #1
                ExternalizedProperty(MemberName=Z) => #2
                FloatProperty(Value=0) => #3
                -> ExternalizedProperty(MemberName=X) => #4
                #3 -> ExternalizedProperty(MemberName=Y) => #5
                ExternalizedProperty ColorA(MemberName=Value)
                -> FloatProperty(Value=1)
                -> ExternalizedProperty(MemberName=W) => #8
                ExternalizedProperty Diameter(MemberName=Value)
                -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                -> PropertyMapping(ExtentX, ExtentY) => #11
                WorkflowInput Source1
                -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #13
                #13, #0, #1, #11 -> GroupWorkflow Transform => #14
                    WorkflowInput Source1 => #0
                    ExternalizedProperty Angle(MemberName=Angle) => #1
                    ExternalizedProperty ExtentX(MemberName=X) => #2
                    ExternalizedProperty ExtentY(MemberName=Y) => #3
                    ExternalizedProperty LocationX(MemberName=X) => #4
                    ExternalizedProperty LocationY(MemberName=Y) => #5
                    #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
                    #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #7
                    #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                    -> WorkflowOutput
                #14, #4, #5, #2, #8 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #16
                ExternalizedProperty Coherence(MemberName=Coherence) => #17
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #19
                SubscribeSubject Borders
                -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #21
                ExternalizedMapping(dotLifetime) => #22
                ExternalizedMapping(dotLifetimeBool) => #23
                ExternalizedMapping(numDots) => #24
                #21, #24 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #25
                #22, #24 -> GenerateDotLives(dotLifetime=20, numDots=75) => #26
                #25, #26 -> Zip => #27
                #27, #16 -> CombineLatest => #28
                #28, #16 -> Sample
                -> MemberSelector(Selector=Item1) => #30
                ExternalizedMapping(Value(DisplayName=VelX))
                -> FloatProperty(Value=2)
                -> Delay(DueTime=PT1S) => #33
                ExternalizedMapping(Value(DisplayName=VelY))
                -> FloatProperty(Value=0)
                -> Delay(DueTime=PT1S) => #36
                FloatProperty(Value=0) => #37
                #36, #37 -> Merge
                -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #39
                #33, #37 -> Merge
                -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #41
                #30, #41, #39, #17, #19, #23, #22 -> moveDots_2dLife(VelocityX=2, VelocityY=0, Coherence=30, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                -> MemberSelector(Selector=Item1) => #43
                #43, #19 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                -> Bonsai.Shaders.DrawMeshInstanced
                  ShaderName=CircleArray
                  MeshName=Quad
                  Usage=DynamicDraw
                  InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                -> WorkflowOutput
            #11, #12, #13, #14 -> Zip
            -> WorkflowOutput
        -> Bonsai.Shaders.RenderTexture
          RenderState=""
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
        -> BehaviorSubject TextureBottom => #21
        #15, #12, #18, #21 -> Zip
        -> IncludeWorkflow => #23
          Path=BonVision:Environment.PerspectiveViewport.bonsai
          Light(X=0, Y=100000, Z=0)
          FieldOfView=75
          Eye(X=0, Y=0, Z=0)
          Target(X=0, Y=0, Z=-100)
          Up(X=0, Y=1, Z=0)
          NearClip=0.1
          FarClip=1000
        -> Sink BindLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name)
            -> SubscribeSubject TextureLeft => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            ExternalizedMapping(ShaderName) => #5
            #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> IncludeWorkflow
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=-1
          TranslationY=0
          TranslationZ=-3.5
          ScaleX=6
          ScaleY=2
          ScaleZ=1
          MeshName=Plane
          Ambient(X=0, Y=0, Z=0)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=100
          RotationZ=0
          RotationY=90
          RotationX=0
        -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #26
        #23 -> Sink BindRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name)
            -> SubscribeSubject TextureRight => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            ExternalizedMapping(ShaderName) => #5
            #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> IncludeWorkflow => #28
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=1
          TranslationY=0
          TranslationZ=-3.5
          ScaleX=6
          ScaleY=2
          ScaleZ=1
          MeshName=Plane
          Ambient(X=0, Y=0, Z=0)
          Diffuse(X=1, Y=1, Z=1)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=100
          RotationZ=0
          RotationY=90
          RotationX=0
        #23 -> Sink BindTop
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name)
            -> SubscribeSubject TextureTop => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            ExternalizedMapping(ShaderName) => #5
            #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> IncludeWorkflow => #30
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=1
          TranslationZ=-3.5
          ScaleX=6
          ScaleY=2
          ScaleZ=1
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=100
          RotationZ=-90
          RotationY=90
          RotationX=0
        #23 -> Sink BindBottom
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name)
            -> SubscribeSubject TextureBottom => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #4
            ExternalizedMapping(ShaderName) => #5
            #4, #5 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
            -> WorkflowOutput
        -> IncludeWorkflow => #32
          Path=BonVision:Primitives.DrawTexturedModel.bonsai
          TranslationX=0
          TranslationY=-1
          TranslationZ=-3.5
          ScaleX=6
          ScaleY=2
          ScaleZ=1
          MeshName=Plane
          Ambient(X=1, Y=1, Z=1)
          Diffuse(X=0, Y=0, Z=0)
          Specular(X=0, Y=0, Z=0)
          SpecularExponent=100
          RotationZ=0
          RotationY=90
          RotationX=90
        #26, #28, #30, #32 -> Zip => #33
        SubscribeSubject Parameters
        -> MemberSelector(Selector=Duration)
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> ExternalizedProperty DueTime(MemberName=DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT3S) => #38
        #33, #38 -> TakeUntil
        -> Last => #40
        Source1=#0, Source3=#40 -> Zip
        -> WorkflowOutput
    -> Disable Sink OffState => #4
        WorkflowInput Source1
        -> FloatProperty(Value=0)
        -> MulticastSubject QuadState
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=ISI))
    -> FloatProperty(Value=1)
    -> Bonsai.Scripting.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #8
    #8, #4 -> Bonsai.Shaders.Delay(DueTime=PT1S)
    -> Unit
    -> Disable MulticastSubject TrialOver
    -> WorkflowOutput

    ExternalizedProperty timeoutTime(MemberName=timeoutTime)

    Disable GroupWorkflow OnState
        FloatProperty(Value=1)
        -> First
        -> MulticastSubject QuadState
        -> WorkflowOutput
-> Concat
-> Repeat
-> WorkflowOutput

ExternalizedProperty TopBorder(MemberName=TopBorder) => #9
ExternalizedProperty BottomBorder(MemberName=BottomBorder) => #10
ExternalizedProperty LeftBorder(MemberName=LeftBorder) => #11
ExternalizedProperty RightBorder(MemberName=RightBorder) => #12
#9, #10, #11, #12 -> GroupWorkflow "Display and Resources"
    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Second
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.LoadResources

    ExternalizedProperty TopBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #8
    ExternalizedProperty BottomBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #11
    ExternalizedProperty LeftBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #14
    ExternalizedProperty RightBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #17
    #8, #11, #14, #17 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

Disable GroupWorkflow QuadState
    SubscribeSubject DrawStimuli => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #2
    #0, #2 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=29, LocationY=-29, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState

Bonsai.Numerics.CreateRandom(Seed=42)
-> AsyncSubject Random
