WorkflowBuilder(Version=2.4.0-preview)
Bonsai.Shaders.CreateWindow
  Width=640
  Height=480
  VSync=On
  SwapSync=false
  ClearColor=Gray
  ClearMask="DepthBufferBit ColorBufferBit"
  CursorVisible=true
  Location=nil
  WindowBorder=Resizable
  WindowState=Normal
  DisplayDevice=Primary
  TargetRenderFrequency=0
  RenderState=""
  GraphicsMode
    ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
    Depth=16
    Stencil=0
    Samples=0
    AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
    Buffers=2
    Stereo=false
-> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
-> Bonsai.Shaders.MeshResources
  Meshes
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=icoSphereHIgh, FileName=C:\Users\edward.horrocks\Documents\icoSphereHIgh.obj)
    MeshConfiguration=Bonsai.Shaders.TexturedModel(Name=Sphere, FileName=C:\Users\edward.horrocks\Documents\Sphere.obj)
-> Bonsai.Shaders.LoadResources

Bonsai.Shaders.RenderFrame
-> IncludeWorkflow(Path=BonVision:Environment.NormalizedViewport.bonsai)
-> PublishSubject DrawStimuli
-> Bonsai.Shaders.RenderTexture
  RenderState=""
  ClearColor=Black
  ClearMask="DepthBufferBit ColorBufferBit"
  Width=nil
  Height=nil
  InternalFormat=Rgba
  WrapS=Repeat
  WrapT=Repeat
  MinFilter=Linear
  MagFilter=Linear
-> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
-> IncludeWorkflow
  Path=BonVision:Environment.PerspectiveViewport.bonsai
  Light(X=0, Y=1, Z=1)
  FieldOfView=90
  Eye(X=0, Y=0, Z=-5)
  Target(X=-0, Y=-0, Z=-1)
  Up(X=0, Y=1, Z=0)
  NearClip=0.1
  FarClip=1000
-> PublishSubject DrawStimuli3D

genRandVector3Array(numDots=10) => #11
ExternalizedMapping(Velocity) => #12
#11, #12 -> GroupWorkflow
    SubscribeSubject DrawStimuli3D => #0
    WorkflowInput Source1 => #1
    SubscribeSubject DrawStimuli
    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray)
    -> GroupWorkflow Transform
        WorkflowInput Source1 => #0
        ExternalizedProperty Angle(MemberName=Angle) => #1
        ExternalizedProperty ExtentX(MemberName=X) => #2
        ExternalizedProperty ExtentY(MemberName=Y) => #3
        ExternalizedProperty LocationX(MemberName=X) => #4
        ExternalizedProperty LocationY(MemberName=Y) => #5
        #0, #4, #5 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #6
        #6, #2, #3 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=1, Z=1) => #7
        #7, #1 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
        -> WorkflowOutput
    -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #6
    #1, #6 -> CombineLatest => #7
    #7, #6 -> Sample
    -> MemberSelector(Selector=Item1) => #9
    ExternalizedMapping(Velocity) => #10
    #9, #10 -> moveVector3test(Velocity=-0.01) => #11
    IntProperty(Value=-1)
    -> Add(Operand=IntProperty(Value=1)) => #13
    -> PropertyMapping(indexValue) => #14
    #13 -> Add(Operand=IntProperty(Value=1)) => #15
    -> PropertyMapping(indexValue) => #16
    #15 -> Add(Operand=IntProperty(Value=1)) => #17
    -> Add(Operand=IntProperty(Value=1)) => #18
    -> Add(Operand=IntProperty(Value=1)) => #19
    -> Add(Operand=IntProperty(Value=1)) => #20
    -> Add(Operand=IntProperty(Value=1)) => #21
    -> Add(Operand=IntProperty(Value=1)) => #22
    -> Add(Operand=IntProperty(Value=1)) => #23
    -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(indexValue) => #25
    #23 -> PropertyMapping(indexValue) => #26
    #22 -> PropertyMapping(indexValue) => #27
    #21 -> PropertyMapping(indexValue) => #28
    #20 -> PropertyMapping(indexValue) => #29
    #19 -> PropertyMapping(indexValue) => #30
    #18 -> PropertyMapping(indexValue) => #31
    #17 -> PropertyMapping(indexValue) => #32
    #11, #32 -> indexIntoVector3Array(indexValue=2)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #34
    #11, #16 -> indexIntoVector3Array(indexValue=1)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #36
    #11, #14 -> indexIntoVector3Array(indexValue=0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #38
    #0, #38 -> GroupWorkflow => #39
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1.82039523, Y=-0.119156495, Z=-4.8217454) => #3
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
        ExternalizedMapping(MeshName) => #5
        ExternalizedMapping => #6
          Ambient(Category="Model Material")
          Diffuse(Category="Model Material")
          Specular(Category="Model Material")
          SpecularExponent(Category="Model Material")
        ExternalizedMapping(Value(DisplayName=RotationZ))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #9
        #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
        ExternalizedMapping(Value(DisplayName=RotationY))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #13
        #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
        ExternalizedMapping(Value(DisplayName=RotationX))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #17
        #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=0) => #18
        #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=1, Z=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Model) => #20
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Model) => #22
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=Model) => #24
        #20, #22, #24 -> Zip => #25
        #25, #6 -> GroupWorkflow UpdateMaterial => #26
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=Ambient)) => #1
            #0, #1 -> PropertySourceOfCreateLookAtVector3(MemberName=Eye, Value(X=1, Y=1, Z=1))
            -> Bonsai.Shaders.UpdateUniform(UniformName=Ka, ShaderName=Model) => #3
            ExternalizedMapping(Value(DisplayName=Diffuse)) => #4
            #3, #4 -> PropertySourceOfCreateLookAtVector3(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> Bonsai.Shaders.UpdateUniform(UniformName=Kd, ShaderName=Model) => #6
            ExternalizedMapping(Value(DisplayName=Specular)) => #7
            #6, #7 -> PropertySourceOfCreateLookAtVector3(MemberName=Eye, Value(X=0, Y=0, Z=0))
            -> Bonsai.Shaders.UpdateUniform(UniformName=Ks, ShaderName=Model) => #9
            ExternalizedMapping(Value(DisplayName=SpecularExponent)) => #10
            #9, #10 -> FloatProperty(Value=10)
            -> Bonsai.Shaders.UpdateUniform(UniformName=Ns, ShaderName=Model)
            -> WorkflowOutput
        #26, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=Model, MeshName=Sphere)
        -> Disable Bonsai.Shaders.DrawMeshInstanced
          ShaderName=Model
          MeshName=icoSphereHIgh
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=4, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #36, #0 -> GroupWorkflow => #40
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-1.941616, Y=-1.39018071, Z=-5.084649) => #3
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
        ExternalizedMapping(MeshName) => #5
        ExternalizedMapping => #6
          Ambient(Category="Model Material")
          Diffuse(Category="Model Material")
          Specular(Category="Model Material")
          SpecularExponent(Category="Model Material")
        ExternalizedMapping(Value(DisplayName=RotationZ))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #9
        #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
        ExternalizedMapping(Value(DisplayName=RotationY))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #13
        #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
        ExternalizedMapping(Value(DisplayName=RotationX))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #17
        #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=0) => #18
        #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=1, Z=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Model) => #20
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Model) => #22
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=Model) => #24
        #20, #22, #24 -> Zip => #25
        #25, #6 -> GroupWorkflow UpdateMaterial => #26
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        #26, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=Model, MeshName=Sphere)
        -> Disable Bonsai.Shaders.DrawMeshInstanced
          ShaderName=Model
          MeshName=icoSphereHIgh
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=4, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #34, #0 -> GroupWorkflow => #41
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=ViewMatrix) => #1
        ExternalizedMapping(X(DisplayName=TranslationX), Y(DisplayName=TranslationY), Z(DisplayName=TranslationZ)) => #2
        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1.984509, Y=1.86624694, Z=-6.67282772) => #3
        ExternalizedMapping(X(DisplayName=ScaleX), Y(DisplayName=ScaleY), Z(DisplayName=ScaleZ)) => #4
        ExternalizedMapping(MeshName) => #5
        ExternalizedMapping => #6
          Ambient(Category="Model Material")
          Diffuse(Category="Model Material")
          Specular(Category="Model Material")
          SpecularExponent(Category="Model Material")
        ExternalizedMapping(Value(DisplayName=RotationZ))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #9
        #3, #9 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0) => #10
        ExternalizedMapping(Value(DisplayName=RotationY))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #13
        #10, #13 -> Bonsai.Shaders.RotateY(Order=Prepend, Angle=0) => #14
        ExternalizedMapping(Value(DisplayName=RotationX))
        -> BonVision.AngleProperty(Value=0)
        -> PropertyMapping(Angle) => #17
        #14, #17 -> Bonsai.Shaders.RotateX(Order=Prepend, Angle=0) => #18
        #18, #4 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=1, Z=1)
        -> Bonsai.Shaders.UpdateUniform(UniformName=modelview, ShaderName=Model) => #20
        #0 -> MemberSelector(Selector=ProjectionMatrix)
        -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=Model) => #22
        #0 -> MemberSelector(Selector=Light)
        -> Bonsai.Shaders.UpdateUniform(UniformName=light, ShaderName=Model) => #24
        #20, #22, #24 -> Zip => #25
        #25, #6 -> GroupWorkflow UpdateMaterial => #26
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        #26, #5 -> Bonsai.Shaders.DrawMesh(ShaderName=Model, MeshName=Sphere)
        -> Disable Bonsai.Shaders.DrawMeshInstanced
          ShaderName=Model
          MeshName=icoSphereHIgh
          Usage=DynamicDraw
          InstanceAttributes(InstanceAttributeMapping(Size=4, Normalized=false, Type=Float, Divisor=1))
        -> WorkflowOutput
    #11 -> indexIntoVector3Array(indexValue=3)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #43
    #43, #0 -> GroupWorkflow => #44
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1.17076278, Y=0.4810112, Z=-8.437843) => #3
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    #11, #31 -> indexIntoVector3Array(indexValue=3)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #46
    #46, #0 -> GroupWorkflow => #47
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    #11, #30 -> indexIntoVector3Array(indexValue=4)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #49
    #49, #0 -> GroupWorkflow => #50
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=0.886905253, Y=-0.831472754, Z=-5.41819048) => #3
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    #11, #29 -> indexIntoVector3Array(indexValue=5)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #52
    #52, #0 -> GroupWorkflow => #53
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-0.856677234, Y=-0.842767239, Z=-8.455544) => #3
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    #11, #28 -> indexIntoVector3Array(indexValue=6)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #55
    #55, #0 -> GroupWorkflow => #56
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1.1319505, Y=1.312508, Z=-4.89276838) => #3
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    #11, #27 -> indexIntoVector3Array(indexValue=7)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #58
    #58, #0 -> GroupWorkflow => #59
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1.13217127, Y=-1.61791372, Z=-5.51593447) => #3
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    #11, #26 -> indexIntoVector3Array(indexValue=8)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #61
    #61, #0 -> GroupWorkflow => #62
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-0.557316542, Y=-0.84811604, Z=-7.097373) => #3
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    #11, #25 -> indexIntoVector3Array(indexValue=9)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #64
    #64, #0 -> GroupWorkflow => #65
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-1.52197468, Y=0.297179431, Z=-7.89804649) => #3
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    #39, #40, #41, #44, #47, #50, #53, #56, #59, #62, #65 -> Zip
    -> WorkflowOutput
genRandVector3Array(numDots=10) => #14
#14, #12 -> GroupWorkflow
    SubscribeSubject DrawStimuli3D => #0
    WorkflowInput Source1 => #1
    SubscribeSubject DrawStimuli
    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray)
    -> GroupWorkflow Transform
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    -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #6
    #1, #6 -> CombineLatest => #7
    #7, #6 -> Sample
    -> MemberSelector(Selector=Item1) => #9
    ExternalizedMapping(Velocity) => #10
    #9, #10 -> moveVector3test(Velocity=-0.01) => #11
    IntProperty(Value=-1)
    -> Add(Operand=IntProperty(Value=1)) => #13
    -> PropertyMapping(indexValue) => #14
    #13 -> Add(Operand=IntProperty(Value=1)) => #15
    -> PropertyMapping(indexValue) => #16
    #15 -> Add(Operand=IntProperty(Value=1)) => #17
    -> Add(Operand=IntProperty(Value=1)) => #18
    -> Add(Operand=IntProperty(Value=1)) => #19
    -> Add(Operand=IntProperty(Value=1)) => #20
    -> Add(Operand=IntProperty(Value=1)) => #21
    -> Add(Operand=IntProperty(Value=1)) => #22
    -> Add(Operand=IntProperty(Value=1)) => #23
    -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(indexValue) => #25
    #23 -> PropertyMapping(indexValue) => #26
    #22 -> PropertyMapping(indexValue) => #27
    #21 -> PropertyMapping(indexValue) => #28
    #20 -> PropertyMapping(indexValue) => #29
    #19 -> PropertyMapping(indexValue) => #30
    #18 -> PropertyMapping(indexValue) => #31
    #17 -> PropertyMapping(indexValue) => #32
    #11, #32 -> indexIntoVector3Array(indexValue=2)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #34
    #11, #16 -> indexIntoVector3Array(indexValue=1)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #36
    #11, #14 -> indexIntoVector3Array(indexValue=0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #38
    #0, #38 -> GroupWorkflow => #39
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-0.9454027, Y=-0.0235172641, Z=-7.70975065) => #3
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    #36, #0 -> GroupWorkflow => #40
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-0.930055141, Y=-1.66054273, Z=-5.12574863) => #3
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    #34, #0 -> GroupWorkflow => #41
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-0.6012519, Y=-1.36161351, Z=-4.74597025) => #3
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    #11 -> indexIntoVector3Array(indexValue=3)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #43
    #43, #0 -> GroupWorkflow => #44
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=-1.83786654, Y=-0.6028286, Z=-5.23978138) => #3
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    #11, #31 -> indexIntoVector3Array(indexValue=3)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #46
    #46, #0 -> GroupWorkflow => #47
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    #11, #30 -> indexIntoVector3Array(indexValue=4)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #49
    #49, #0 -> GroupWorkflow => #50
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        #1, #2 -> Bonsai.Shaders.Translate(Order=Prepend, X=1.02019393, Y=-1.69548738, Z=-7.602073) => #3
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    #11, #29 -> indexIntoVector3Array(indexValue=5)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #52
    #52, #0 -> GroupWorkflow => #53
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    #11, #28 -> indexIntoVector3Array(indexValue=6)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #55
    #55, #0 -> GroupWorkflow => #56
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    #11, #27 -> indexIntoVector3Array(indexValue=7)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #58
    #58, #0 -> GroupWorkflow => #59
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    #11, #26 -> indexIntoVector3Array(indexValue=8)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #61
    #61, #0 -> GroupWorkflow => #62
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    #11, #25 -> indexIntoVector3Array(indexValue=9)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #64
    #64, #0 -> GroupWorkflow => #65
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    #39, #40, #41, #44, #47, #50, #53, #56, #59, #62, #65 -> Zip
    -> WorkflowOutput
genRandVector3Array(numDots=10) => #16
#16, #12 -> GroupWorkflow
    SubscribeSubject DrawStimuli3D => #0
    WorkflowInput Source1 => #1
    SubscribeSubject DrawStimuli
    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray)
    -> GroupWorkflow Transform
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    -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #6
    #1, #6 -> CombineLatest => #7
    #7, #6 -> Sample
    -> MemberSelector(Selector=Item1) => #9
    ExternalizedMapping(Velocity) => #10
    #9, #10 -> moveVector3test(Velocity=-0.01) => #11
    IntProperty(Value=-1)
    -> Add(Operand=IntProperty(Value=1)) => #13
    -> PropertyMapping(indexValue) => #14
    #13 -> Add(Operand=IntProperty(Value=1)) => #15
    -> PropertyMapping(indexValue) => #16
    #15 -> Add(Operand=IntProperty(Value=1)) => #17
    -> Add(Operand=IntProperty(Value=1)) => #18
    -> Add(Operand=IntProperty(Value=1)) => #19
    -> Add(Operand=IntProperty(Value=1)) => #20
    -> Add(Operand=IntProperty(Value=1)) => #21
    -> Add(Operand=IntProperty(Value=1)) => #22
    -> Add(Operand=IntProperty(Value=1)) => #23
    -> Add(Operand=IntProperty(Value=1))
    -> PropertyMapping(indexValue) => #25
    #23 -> PropertyMapping(indexValue) => #26
    #22 -> PropertyMapping(indexValue) => #27
    #21 -> PropertyMapping(indexValue) => #28
    #20 -> PropertyMapping(indexValue) => #29
    #19 -> PropertyMapping(indexValue) => #30
    #18 -> PropertyMapping(indexValue) => #31
    #17 -> PropertyMapping(indexValue) => #32
    #11, #32 -> indexIntoVector3Array(indexValue=2)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #34
    #11, #16 -> indexIntoVector3Array(indexValue=1)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #36
    #11, #14 -> indexIntoVector3Array(indexValue=0)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #38
    #0, #38 -> GroupWorkflow => #39
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    #36, #0 -> GroupWorkflow => #40
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    #34, #0 -> GroupWorkflow => #41
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    #11 -> indexIntoVector3Array(indexValue=3)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #43
    #43, #0 -> GroupWorkflow => #44
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    #11, #31 -> indexIntoVector3Array(indexValue=3)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #46
    #46, #0 -> GroupWorkflow => #47
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    #11, #30 -> indexIntoVector3Array(indexValue=4)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #49
    #49, #0 -> GroupWorkflow => #50
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    #11, #29 -> indexIntoVector3Array(indexValue=5)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #52
    #52, #0 -> GroupWorkflow => #53
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    #11, #28 -> indexIntoVector3Array(indexValue=6)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #55
    #55, #0 -> GroupWorkflow => #56
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    #11, #27 -> indexIntoVector3Array(indexValue=7)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #58
    #58, #0 -> GroupWorkflow => #59
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    #11, #26 -> indexIntoVector3Array(indexValue=8)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #61
    #61, #0 -> GroupWorkflow => #62
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    #11, #25 -> indexIntoVector3Array(indexValue=9)
    -> PropertyMapping(TranslationX(Selector=X), TranslationY(Selector=Y), TranslationZ(Selector=Z)) => #64
    #64, #0 -> GroupWorkflow => #65
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    #39, #40, #41, #44, #47, #50, #53, #56, #59, #62, #65 -> Zip
    -> WorkflowOutput
genRandVector3Array(numDots=10) => #18
#18, #12 -> GroupWorkflow
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genRandVector3Array(numDots=10) => #20
#20, #12 -> GroupWorkflow
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genRandVector3Array(numDots=10) => #22
#22, #12 -> GroupWorkflow
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genRandVector3Array(numDots=10) => #24
#24, #12 -> GroupWorkflow
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genRandVector3Array(numDots=10) => #26
#26, #12 -> GroupWorkflow
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genRandVector3Array(numDots=10) => #28
#28, #12 -> GroupWorkflow
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genRandVector3Array(numDots=10) => #30
#30, #12 -> GroupWorkflow
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