WorkflowBuilder(Version=2.4.0-preview)
FloatProperty(Value=1)
-> BehaviorSubject "Difficulty Level"

Bonsai.Numerics.CreateRandom(Seed=42)
-> AsyncSubject Random

ExternalizedProperty PortName(MemberName=PortName, Category=Arduino) => #4
-> GroupWorkflow dueComm2lick
    StringProperty(Value=c0)
    -> BehaviorSubject serialToSend

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject leftLicks

    SubscribeSubject serialToSend => #12
    ExternalizedMapping(PortName) => #18
    -> Disable Bonsai.IO.SerialStringRead(PortName=COM3, NewLine=\n)
    -> Disable Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 4:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Disable Parse(Pattern=%i\t%i\t%i\t%i) => #3
    -> Disable MemberSelector(Selector=Item2)
    -> Disable DistinctUntilChanged
    -> Disable MulticastSubject leftLicks
    #3 -> Disable MemberSelector(Selector=Item3)
    -> Disable DistinctUntilChanged
    -> Disable MulticastSubject rightLicks
    #3 -> Disable MemberSelector(Selector=Item1)
    -> Disable MulticastSubject WheelInput
    #12, #18 -> Disable Bonsai.IO.SerialStringWrite(PortName=COM3, NewLine=\r)
    -> IntProperty(Value=1)
    -> Accumulate

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject rightLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject WheelInput

    Bonsai.Windows.Input.KeyDown(Filter=A)
    -> StringProperty(Value=r30) => #29
    Bonsai.Windows.Input.KeyDown(Filter=B)
    -> StringProperty(Value=l40) => #28
    Disable Bonsai.Windows.Input.KeyDown(Filter=C)
    -> Disable StringProperty(Value=c1) => #33
    Disable Bonsai.Windows.Input.KeyDown(Filter=D)
    -> Disable StringProperty(Value=c0) => #34
    #29, #28, #33, #34 -> Merge
    -> MulticastSubject serialToSend

    SubscribeSubject LeftCorrect
    -> Skip(Count=1)
    -> StringProperty(Value=l40)
    -> MulticastSubject serialToSend

    SubscribeSubject RightCorrect
    -> Skip(Count=1)
    -> StringProperty(Value=r30)
    -> MulticastSubject serialToSend
Disable ExternalizedProperty "No Response pin"(MemberName="No Response pin", Category=Arduino) => #5
Disable ExternalizedProperty "Incorrect Response pin"(MemberName="Incorrect Response pin", Category=Arduino) => #6
Disable ExternalizedProperty "Left Correct pin"(MemberName="Left Correct pin", Category=Arduino) => #7
Disable ExternalizedProperty "Right Correct pin"(MemberName="Right Correct pin", Category=Arduino) => #8
#4, #5, #6, #7, #8 -> GroupWorkflow ArduinoPinMapping
    BooleanProperty(Value=false)
    -> BehaviorSubject IncorrectResponse

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject RightCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject NoResponse

    SubscribeSubject IncorrectResponse => #8
    ExternalizedProperty "Incorrect Response pin"(MemberName=Pin) => #12
    ExternalizedProperty PortName(MemberName=PortName) => #15
    #8, #12, #15 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM4, Pin=0)

    Disable SubscribeSubject NoResponse
    Disable ExternalizedProperty "No Response pin"(MemberName=Pin)
    Disable ExternalizedProperty "Left Correct pin"(MemberName=Pin)
    Disable ExternalizedProperty "Right Correct pin"(MemberName=Pin)

ExternalizedProperty TopBorder(MemberName=TopBorder) => #9
ExternalizedProperty BottomBorder(MemberName=BottomBorder) => #10
ExternalizedProperty LeftBorder(MemberName=LeftBorder) => #11
ExternalizedProperty RightBorder(MemberName=RightBorder) => #12
#9, #10, #11, #12 -> GroupWorkflow "Display and Resources"
    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=First
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.LoadResources

    ExternalizedProperty TopBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #6
    ExternalizedProperty BottomBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #8
    ExternalizedProperty LeftBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #10
    ExternalizedProperty RightBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #12
    #6, #8, #10, #12 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

Bonsai.Windows.Input.KeyDown(Filter=G)
-> FloatProperty(Value=0) => #17
Bonsai.Windows.Input.KeyDown(Filter=H)
-> FloatProperty(Value=1) => #18
#17, #18 -> Merge
-> BehaviorSubject lastKeyState
-> BehaviorSubject delayKeyState

SubscribeSubject lastKeyState
-> Condition => #40
    WorkflowInput Source1
    -> Equal(Operand=FloatProperty(Value=0))
    -> WorkflowOutput
SubscribeSubject lastKeyState
-> Condition => #41
    WorkflowInput Source1
    -> Equal(Operand=FloatProperty(Value=1))
    -> WorkflowOutput
ExternalizedMapping(waitForResponseTime, InterStimInterval) => #24
SubscribeSubject TrialOver => #26
#40, #26 -> Sample => #28
#28, #24 -> CreateObservable CreateLeftTrials => #37
    SubscribeSubject Random => #3
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=2
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-3.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=0
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #11
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #11, #3 -> Bonsai.Numerics.Permutation => #2
    ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime, Description="Max time to wait for a response from subject", Category="Time Options") => #5
    ExternalizedProperty outputOnTime(MemberName=outputOnTime, Description="Duration of time to activate arduino for a correct response", Category="Time Options") => #6
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #7
    ExternalizedProperty InterStimInterval(MemberName=InterStimInterval, Description="delay time between end of arduino activation and next stimulus presentation", Category="Time Options") => #8
    #2, #8, #7, #6, #5 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters => #1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #5
            #1 -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            #1 -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #1 -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #29
            #29, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-3.5)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            #29, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #28
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #23
            #28 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #25
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #23, #25 -> Zip => #17
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            Disable Bonsai.Windows.Input.KeyDown(Filter=C) => #22
            #4, #22 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> Disable Sink OffState => #19
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #2
        ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #3
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #4
        #19, #2, #3, #4 -> SelectMany Response => #18
            ExternalizedProperty waitForResponseTime(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT1S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #6
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #7
            WorkflowInput Source1 => #8
            -> MemberSelector(Selector=Item1.VelXLeft) => #17
            #8 -> MemberSelector(Selector=Item1.VelXRight) => #18
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #9
            #17, #18, #9 -> Zip
            -> Disable MulticastSubject ptrack => #12
            #12, #6, #7 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response")
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedProperty InterStimInterval(MemberName=DueTime, Description="delay time after response") => #6
        #18, #6 -> Delay(DueTime=PT1S) => #5
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.5, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #12
        #5, #12 -> Delay(DueTime=PT0.773S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
SubscribeSubject TrialOver => #29
#41, #29 -> Sample => #30
#30, #24 -> CreateObservable CreateRightTrials => #38
    ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime, Description="Max time to wait for a response from subject", Category="Time Options") => #0
    ExternalizedProperty outputOnTime(MemberName=outputOnTime, Description="Duration of time to activate arduino for a correct response", Category="Time Options") => #1
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #2
    ExternalizedProperty InterStimInterval(MemberName=InterStimInterval, Description="delay time between end of arduino activation and next stimulus presentation", Category="Time Options") => #3
    SubscribeSubject Random => #7
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=2
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=0
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-8
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #11
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #11, #7 -> Bonsai.Numerics.Permutation => #6
    #6, #0, #1, #2, #3 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters => #1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #5
            #1 -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            #1 -> PropertyMapping(VelX(Selector=VelXLeft), VelY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #1 -> PropertyMapping(VelX(Selector=VelXRight), VelY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #29
            #29, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(numDots) => #35
                    #28, #35 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #35 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(dotLifetimeBool) => #36
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #31, #36 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #45
                    #41, #45 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #45 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #41
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Bonsai.Shaders.Delay(DueTime=PT1S) => #42
                    FloatProperty(Value=0) => #43
                    #41, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #42, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            #29, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                ExternalizedMapping(VelX, VelY) => #12
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #41
                    #44, #41 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #41 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7, #12 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11, #12 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #16
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #46
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #46, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    ExternalizedMapping(Value(DisplayName=VelX))
                    -> FloatProperty(Value=-8)
                    -> Delay(DueTime=PT1S) => #44
                    ExternalizedMapping(Value(DisplayName=VelY))
                    -> FloatProperty(Value=0)
                    -> Delay(DueTime=PT1S) => #45
                    FloatProperty(Value=0) => #43
                    #44, #43 -> Merge
                    -> ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    #45, #43 -> Merge
                    -> ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-8, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #13, #15, #16, #14 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #28
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              NearClip=0.1
              FarClip=1000
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            -> Disable IncludeWorkflow(Path=BonVision:Environment.GammaCorrection.bonsai, ClearColor=Gray, GammaLut=nil) => #23
            #28 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #25
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #23, #25 -> Zip => #17
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip => #4
            Disable Bonsai.Windows.Input.KeyDown(Filter=C) => #22
            #4, #22 -> Disable SubscribeWhen
            -> WorkflowOutput
        -> Disable Sink OffState => #19
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #2
        ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #3
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #4
        #19, #2, #3, #4 -> SelectMany Response => #18
            ExternalizedProperty waitForResponseTime(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT1S, Period=PT0S)
            -> FloatProperty(Value=0) => #3
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #6
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #7
            WorkflowInput Source1 => #8
            -> MemberSelector(Selector=Item1.VelXLeft) => #17
            #8 -> MemberSelector(Selector=Item1.VelXRight) => #18
            SubscribeSubject leftLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=-1) => #0
            SubscribeSubject rightLicks
            -> Skip(Count=1)
            -> First
            -> FloatProperty(Value=1) => #1
            #0, #1, #3 -> Amb => #9
            #17, #18, #9 -> Zip
            -> Disable MulticastSubject ptrack => #12
            #12, #6, #7 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response")
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif VelXR > VelXL: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif VelXR < VelXL: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedProperty InterStimInterval(MemberName=DueTime, Description="delay time after response") => #6
        #18, #6 -> Delay(DueTime=PT1S) => #5
        Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0.5, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #12
        #5, #12 -> Delay(DueTime=PT0.896S)
        -> Unit
        -> MulticastSubject TrialOver
        -> WorkflowOutput

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
#37, #38 -> Merge
-> Switch
-> WorkflowOutput

SubscribeSubject delayKeyState
-> First
-> Unit
-> BehaviorSubject TrialOver

GroupWorkflow "Performance Tracking 1"
    SubscribeSubject ptrack
    -> Skip(Count=1)
    -> GroupWorkflow "Prop Correct" => #8
        WorkflowInput Source1 => #2
        -> Condition Up/Left
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> LessThanOrEqual(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> GroupWorkflow "Calc P Correct Up" => #16
            WorkflowInput Source1 => #5
            -> FloatProperty(Value=1)
            -> Accumulate => #0
            #5 -> Condition "check correct"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item3)
                -> Equal(Operand=FloatProperty(Value=-1))
                -> WorkflowOutput
            -> FloatProperty(Value=1) => #3
            #5 -> Condition "check incorrect"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item3)
                -> NotEqual(Operand=FloatProperty(Value=-1))
                -> WorkflowOutput
            -> FloatProperty(Value=0) => #8
            #3, #8 -> Merge
            -> Accumulate => #1
            #1, #0 -> Zip
            -> Divide => #2
            #2, #0 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #5
        #16 -> MemberSelector(Selector=Item2) => #7
        #2 -> Condition Right
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> WorkflowOutput
        -> GroupWorkflow "Calc P Correct R" => #15
            WorkflowInput Source1 => #5
            -> FloatProperty(Value=1)
            -> Accumulate => #0
            #5 -> Condition "check correct"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item3)
                -> Equal(Operand=FloatProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=1) => #3
            #5 -> Condition "check incorrect"
                WorkflowInput Source1
                -> MemberSelector(Selector=Item3)
                -> NotEqual(Operand=FloatProperty(Value=1))
                -> WorkflowOutput
            -> FloatProperty(Value=0) => #8
            #3, #8 -> Merge
            -> Accumulate => #1
            #1, #0 -> Zip
            -> Divide => #2
            #2, #0 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        #4, #5 -> CombineLatest => #0
        -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
        #15 -> MemberSelector(Selector=Item2) => #6
        #6, #7 -> CombineLatest => #8
        -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
        #1, #9 -> CombineLatest => #10
        #0, #8 -> Zip => #11
        #10, #11 -> Zip
        -> WorkflowOutput
    -> MemberSelector(Selector=Item1) => #4
    -> GroupWorkflow "pCorrect Tag"
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
    -> Bonsai.Dsp.Transpose
    #4 -> GroupWorkflow "n Trials tag"
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
    -> Bonsai.Dsp.Transpose
    #8 -> MemberSelector(Selector=Item2) => #5
    ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
    #5, #6 -> GroupWorkflow AdaptiveTrialControl
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item2) => #2
        -> MemberSelector(Selector=Item1) => #3
        #2 -> MemberSelector(Selector=Item2) => #4
        #0 -> MemberSelector(Selector=Item1) => #8
        -> MemberSelector(Selector=Item1) => #9
        #8 -> MemberSelector(Selector=Item2) => #10
        #0 -> FloatProperty(Value=1) => #20
        ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
        #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
        #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
        #5, #6 -> Zip
        -> LogicalAnd => #7
        ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
        #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
        #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
        #11, #12 -> Zip
        -> LogicalAnd => #13
        #7, #13 -> Zip
        -> LogicalAnd
        -> Condition "Criteria Fulfilled" => #27
            WorkflowInput Source1
            -> WorkflowOutput
        -> FloatProperty(Value=2) => #18
        #20, #27 -> TakeUntil
        -> MulticastSubject "Difficulty Level"
        ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
        #18, #26 -> Delay(DueTime=PT1S)
        -> MulticastSubject "Difficulty Level"
        -> WorkflowOutput

    GroupWorkflow "Initialise ptrack"
        FloatProperty(Value=0) => #0
        FloatProperty(Value=0) => #1
        FloatProperty(Value=0) => #2
        #2, #1, #0 -> Zip
        -> BehaviorSubject ptrack
        -> WorkflowOutput
