WorkflowBuilder(Version=2.4.0-preview)
Disable SubscribeSubject "Difficulty Level"
-> Disable Condition "Block 2" => #25
    WorkflowInput Source1
    -> Equal(Operand=FloatProperty(Value=2))
    -> WorkflowOutput
Disable SubscribeSubject "Difficulty Level"
-> Disable Condition "Block 3" => #27
    WorkflowInput Source1
    -> Equal(Operand=FloatProperty(Value=3))
    -> WorkflowOutput
ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #20
ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #21
ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #22
ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #23
#20, #21, #22, #23 -> GroupWorkflow "Trial Block 1" => #24
    SubscribeSubject Random => #3
    ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime, Description="Max time to wait for a response from subject", Category="Time Options") => #5
    ExternalizedProperty outputOnTime(MemberName=outputOnTime, Description="Duration of time to activate arduino for a correct response", Category="Time Options") => #6
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #7
    ExternalizedProperty InterStimInterval(MemberName=InterStimInterval, Description="delay time between end of arduino activation and next stimulus presentation", Category="Time Options") => #8
    -> GroupWorkflow "Performance Tracking 1"
        SubscribeSubject ptrack
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #8
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThanOrEqual(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #16
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #16 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #15
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #4, #5 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #15 -> MemberSelector(Selector=Item2) => #6
            #6, #7 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #8 -> MemberSelector(Selector=Item2) => #5
        ExternalizedProperty InterStimInterval(MemberName=InterStimInterval) => #6
        #5, #6 -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #0 -> FloatProperty(Value=1) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #5, #6 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #11, #12 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #27
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=2) => #18
            #20, #27 -> TakeUntil
            -> MulticastSubject "Difficulty Level"
            ExternalizedProperty InterStimInterval(MemberName=DueTime) => #26
            #18, #26 -> Delay(DueTime=PT3S)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput

        GroupWorkflow "Initialise ptrack"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack
            -> WorkflowOutput
    SpeedDiscSpecification
      Trials
        SpeedDiscParameters
          Duration=2
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=-3.5
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=0
          VelocityYRight=0
          CoherenceRight=100
        SpeedDiscParameters
          Duration=2
          Size=3
          Colour1=0
          Colour2=1
          numDots1=150
          numDots2=150
          dotLifeBool=0
          dotLifetime=20
          Contrast=1
          VelocityXLeft=0
          VelocityYLeft=0
          CoherenceLeft=100
          VelocityXRight=-3.5
          VelocityYRight=0
          CoherenceRight=100
    -> GroupWorkflow EnsureSpeedDiscParameters => #12
        WorkflowInput Source1
        -> ElementIndex => #8
        -> MemberSelector(Selector=Index) => #2
        #8 -> MemberSelector(Selector=Value.Duration) => #3
        #8 -> MemberSelector(Selector=Value.numDots2) => #10
        #8 -> MemberSelector(Selector=Value.Size) => #38
        #8 -> MemberSelector(Selector=Value.Colour1) => #39
        #8 -> MemberSelector(Selector=Value.Colour2) => #40
        #8 -> MemberSelector(Selector=Value.numDots1) => #41
        #8 -> MemberSelector(Selector=Value.dotLifeBool) => #42
        #8 -> MemberSelector(Selector=Value.dotLifetime) => #43
        #8 -> MemberSelector(Selector=Value.Contrast) => #44
        #8 -> MemberSelector(Selector=Value.VelocityXLeft) => #45
        #8 -> MemberSelector(Selector=Value.VelocityYLeft) => #46
        #8 -> MemberSelector(Selector=Value.CoherenceLeft) => #47
        #8 -> MemberSelector(Selector=Value.VelocityXRight) => #48
        #8 -> MemberSelector(Selector=Value.VelocityYRight) => #49
        #8 -> MemberSelector(Selector=Value.CoherenceRight) => #50
        ExternalizedProperty Duration(MemberName=Value, Description="The duration of the trial.", Category=Default) => #7
        #3, #7 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #4
        ExternalizedMapping(Value(DisplayName=DotSize)) => #24
        #38, #24 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #9
        ExternalizedMapping(Value(DisplayName=Colour1)) => #25
        #39, #25 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #23
        ExternalizedMapping(Value(DisplayName=Colour2)) => #26
        #40, #26 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #11
        ExternalizedMapping(Value(DisplayName=numDots1)) => #27
        #41, #27 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #12
        ExternalizedMapping(Value(DisplayName=numDots2)) => #28
        #10, #28 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #13
        #2, #4, #9, #23, #11, #12, #13 -> Zip => #5
        ExternalizedMapping(Value(DisplayName=dotLifeBool)) => #29
        #42, #29 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #14
        ExternalizedMapping(Value(DisplayName=dotLifetime)) => #30
        #43, #30 -> GetValueOrDefault(Operand=IntProperty(Value=0)) => #15
        ExternalizedMapping(Value(DisplayName=Contrast)) => #31
        #44, #31 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #16
        #14, #15, #16 -> Zip => #51
        ExternalizedMapping(Value(DisplayName=VelXleft)) => #32
        #45, #32 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #17
        ExternalizedMapping(Value(DisplayName=VelYleft)) => #33
        #46, #33 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #18
        ExternalizedMapping(Value(DisplayName=CohLeft)) => #34
        #47, #34 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #19
        ExternalizedMapping(Value(DisplayName=VelXright)) => #35
        #48, #35 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #20
        ExternalizedMapping(Value(DisplayName=VelYright)) => #36
        #49, #36 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #21
        ExternalizedMapping(Value(DisplayName=CohRight)) => #37
        #50, #37 -> GetValueOrDefault(Operand=FloatProperty(Value=1)) => #22
        #17, #18, #19, #20, #21, #22 -> Zip => #52
        #5, #51, #52 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Id,
            Item1.Item2 as Duration,
            Item1.Item3 as Size,
            Item1.Item4 as Colour1,
            Item1.Item5 as Colour2,
            Item1.Item6 as numDots1,
            Item1.Item7 as numDots2,
            Item2.Item1 as dotLifeBool,
            Item2.Item2 as dotLifetime,
            Item2.Item3 as Contrast,
            Item3.Item1 as VelXLeft,
            Item3.Item2 as VelYLeft,
            Item3.Item3 as CohLeft,
            Item3.Item4 as VelXRight,
            Item3.Item5 as VelYRight,
            Item3.Item6 as CohRight)
        -> WorkflowOutput
    #12, #3 -> Bonsai.Numerics.Permutation => #2
    #2, #5, #6, #7, #8 -> CreateObservable CreateTrial
        WorkflowInput Source1 => #0
        -> ReplaySubject Parameters(BufferSize=nil)
        #0 -> SelectMany DrawStimulus
            SubscribeSubject Parameters => #1
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT2S) => #5
            #1 -> PropertyMapping(ColorA(Selector=Contrast), Diameter(Selector=Size), dotLifetime(Selector=dotLifetime), dotLifetimeBool(Selector=dotLifeBool)) => #18
            #1 -> PropertyMapping(VelocityX(Selector=VelXLeft), VelocityY(Selector=VelYLeft), Coherence(Selector=CohLeft)) => #19
            #1 -> PropertyMapping(VelocityX(Selector=VelXRight), VelocityY(Selector=VelYRight), Coherence(Selector=CohRight)) => #20
            Bonsai.Shaders.RenderFrame => #12
            SubscribeSubject Borders
            -> PropertyMapping(Top(Selector=Item1), Bottom(Selector=Item2), Left(Selector=Item3), Right(Selector=Item4)) => #16
            #12, #16 -> IncludeWorkflow(Path=BonVision:Environment.OrthographicViewport.bonsai, Left=-180, Right=180, Bottom=-60, Top=60) => #26
            #26, #18, #19 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, VelocityX, VelocityY, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                #0, #3, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                #0, #3, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=-3.5, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #12, #14, #15, #13 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureLeft => #11
            #26, #20 -> GroupWorkflow MovingDots_SpeedDiscrim
                WorkflowInput Source1 => #0
                ExternalizedMapping(ColorA, Diameter, VelocityX, VelocityY, Coherence, dotLifetime, dotLifetimeBool) => #3
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #7
                #0, #3, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #12
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #28
                    ExternalizedMapping(dotLifetime) => #31
                    ExternalizedMapping(dotLifetimeBool) => #35
                    ExternalizedMapping(numDots) => #36
                    #28, #36 -> GenerateDotField(numDots=75, left=-180, right=180, top=60, bottom=-60) => #26
                    #31, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #30
                    #26, #30 -> Zip => #32
                    #32, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #35, #31 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #33
                    #33, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #7 -> GroupWorkflow MovingBlackDots(Description="Draws multiple colored circles using the input array as position data.") => #13
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty(MemberName=Z) => #6
                    FloatProperty(Value=0) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=0, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField4(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #34, #30 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                SubscribeSubject Parameters
                -> MemberSelector(Selector=numDots1)
                -> Divide(Operand=FloatProperty(Value=2))
                -> PropertyMapping(numDots) => #11
                #0, #3, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #14
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField2(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #0, #3, #11 -> GroupWorkflow MovingWhiteDots(Description="Draws multiple colored circles using the input array as position data.") => #15
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    FloatProperty(Value=1) => #9
                    -> ExternalizedProperty(MemberName=X) => #4
                    #9 -> ExternalizedProperty(MemberName=Y) => #5
                    #9 -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=3)
                    -> PropertyMapping(ExtentX, ExtentY) => #12
                    WorkflowInput Source1
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #16
                    #16, #1, #2, #12 -> GroupWorkflow Transform => #37
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=3, Y=3, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #37, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #21
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #22
                    ExternalizedProperty Coherence(MemberName=Coherence) => #23
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #25
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #27
                    ExternalizedMapping(dotLifetime) => #30
                    ExternalizedMapping(dotLifetimeBool) => #34
                    ExternalizedMapping(numDots) => #36
                    #30, #36 -> GenerateDotLives(dotLifetime=20, numDots=75) => #29
                    #27, #36 -> GenerateDotField3(numDots=75, left=-180, right=180, top=60, bottom=-60) => #35
                    #35, #29 -> Zip => #31
                    #31, #8 -> CombineLatest => #19
                    #19, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #18
                    #18, #21, #22, #23, #25, #30, #34 -> moveDots_2dLife(VelocityX=0, VelocityY=0, Coherence=100, dotLifetimeBool=0, dotLifetime=20, left=-180, right=180, top=60, bottom=-60)
                    -> MemberSelector(Selector=Item1) => #32
                    #32, #25 -> wrapAroundDots(Left=-180, Right=180, Top=60, Bottom=-60)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                #12, #14, #15, #13 -> Zip
                -> WorkflowOutput
            -> Bonsai.Shaders.RenderTexture
              RenderState=""
              ClearColor=Gray
              ClearMask="DepthBufferBit ColorBufferBit"
              Width=nil
              Height=nil
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
            -> BehaviorSubject TextureRight => #14
            #11, #14 -> Zip
            -> IncludeWorkflow => #25
              Path=BonVision:Environment.PerspectiveViewport.bonsai
              Eye(X=0, Y=0, Z=0)
              Target(X=0, Y=0, Z=-100)
              Up(X=0, Y=1, Z=0)
              Light(X=0, Y=100000, Z=0)
              FieldOfView=75
            -> Sink BindLeft
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureLeft => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #21
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=-1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #25 -> Sink BindRight
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject TextureRight => #2
                #0, #2 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #4
                ExternalizedMapping(ShaderName) => #7
                #4, #7 -> Bonsai.Shaders.BindTexture(TextureSlot=Texture0, ShaderName=TexturedModel, TextureTarget=Texture2D)
                -> WorkflowOutput
            -> IncludeWorkflow => #22
              Path=BonVision:Primitives.DrawTexturedModel.bonsai
              TranslationX=1
              TranslationY=0
              TranslationZ=-3.5
              RotationZ=0
              RotationY=1.57
              RotationX=0
              ScaleX=6
              ScaleY=2
              ScaleZ=1
              MeshName=Plane
              Ambient(X=0, Y=0, Z=0)
              Diffuse(X=1, Y=1, Z=1)
              Specular(X=0, Y=0, Z=0)
              SpecularExponent=100
            #21, #22 -> Zip => #17
            #17, #5 -> TakeUntil
            -> Last => #2
            Source1=#1, Source3=#2 -> Zip
            -> WorkflowOutput
        -> Disable Sink OffState => #10
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #2
        ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #3
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #4
        #10, #2, #3, #4 -> SelectMany Response => #9
            ExternalizedProperty waitForResponseTime(MemberName=DueTime, Description="time to wait for a response")
            -> Disable Timer(DueTime=PT5S, Period=PT0S)
            -> Disable FloatProperty(Value=0) => #3
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #6
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #7
            WorkflowInput Source1 => #8
            -> MemberSelector(Selector=Item1.VelXLeft) => #17
            #8 -> MemberSelector(Selector=Item1.VelXRight) => #18
            Disable SubscribeSubject leftLicks
            -> Disable Skip(Count=1)
            -> Disable First
            -> Disable FloatProperty(Value=-1) => #0
            Disable SubscribeSubject rightLicks
            -> Disable Skip(Count=1)
            -> Disable First
            -> Disable FloatProperty(Value=1) => #1
            #0, #1, #3 -> Disable Amb => #9
            #17, #18, #9 -> Zip
            -> Disable MulticastSubject ptrack => #12
            #12, #6, #7 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response")
                ExternalizedProperty timeoutTime(MemberName=DueTime)

                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      VelXL = abs(value.Item1);
                      VelXR = abs(value.Item2);

                      if VelXR > VelXL: # stim is right
                          output = 2; #CORRECT RIGHT

                      elif VelXR < VelXL: # stim is up/left
                          output = 1; #correct left

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
                SubscribeSubject Parameters => #15
                #15, #0 -> Zip
                -> IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector="")
            -> WorkflowOutput
        ExternalizedProperty InterStimInterval(MemberName=DueTime, Description="delay time after response") => #6
        #9, #6 -> Delay(DueTime=PT3S)

        Disable GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
    -> Concat
    -> Repeat
    -> WorkflowOutput
#24, #25 -> Disable TakeUntil
#20, #21, #22, #23 -> Disable GroupWorkflow "Trial Block 2" => #26
    SubscribeSubject Random => #3
    DotMotionSpecification
      Trials
        DotMotionParameters
          Duration=1
          Size=1
          Colour1=nil
          Colour2=nil
          Contrast=nil
          VelocityX=1
          VelocityY=nil
          VelocityZ=nil
          Coherence=100
          numDots1=nil
          numDots2=nil
          dotLifeBool=nil
          dotLifetime=nil
        DotMotionParameters
          Duration=1
          Size=1
          Colour1=nil
          Colour2=nil
          Contrast=nil
          VelocityX=0
          VelocityY=1
          VelocityZ=nil
          Coherence=100
          numDots1=nil
          numDots2=nil
          dotLifeBool=nil
          dotLifetime=nil
        DotMotionParameters
          Duration=1
          Size=nil
          Colour1=nil
          Colour2=nil
          Contrast=nil
          VelocityX=-0.66
          VelocityY=0.66
          VelocityZ=nil
          Coherence=100
          numDots1=nil
          numDots2=nil
          dotLifeBool=nil
          dotLifetime=nil
    -> IncludeWorkflow => #11
      Path=Extensions\EnsureDotParameters.bonsai
      Duration=1
      Size=1
      Colour1=1
      Contrast=1
      VelX=0
      VelY=0
      VelZ=0
      Coherence=100
      numDots1=200
      dotLifetime=0
      dotLifeBool=1000
      numDots2=0
      Colour2=0
    #11, #3 -> Bonsai.Numerics.Permutation => #2
    ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime, Description="Max time to wait for a response from subject", Category="Time Options") => #6
    ExternalizedProperty outputOnTime(MemberName=outputOnTime, Description="Duration of time to activate arduino for a correct response", Category="Time Options") => #7
    ExternalizedProperty timeoutTime(MemberName=timeoutTime, Description="timeout duration", Category="Time Options") => #8
    ExternalizedProperty InterStimInterval(MemberName=InterStimInterval, Description="delay time between end of arduino activation and next stimulus presentation", Category="Time Options") => #9
    #2, #6, #7, #8, #9 -> CreateObservable CreateTrial
        WorkflowInput Source1
        -> ReplaySubject Parameters(BufferSize=nil)

        ExternalizedProperty waitForResponseTime(MemberName=waitForResponseTime) => #2
        ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #3
        ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #4
        ExternalizedProperty InterStimInterval(MemberName=DueTime, Description="delay time after response") => #6
        GroupWorkflow OnState
            FloatProperty(Value=1)
            -> First
            -> MulticastSubject QuadState
            -> WorkflowOutput
        -> SelectMany DrawStimulus
            SubscribeSubject DrawStimuli => #0
            SubscribeSubject Parameters => #4
            -> Disable IncludeWorkflow Events(Path=BonVision:Logging.LogEvent.bonsai, Format=nil, Selector=nil)
            -> PropertyMapping(Coherence(Selector=Coherence), VelocityX(Selector=VelocityX), VelocityY(Selector=VelocityY), Diameter(Selector=Size), numDots(Selector=numDots1)) => #1
            #1, #0 -> GroupWorkflow MotionCoherenceStimulus => #13
                ExternalizedProperty Coherence(MemberName=Coherence) => #1
                ExternalizedProperty VelocityX(MemberName=VelocityX) => #2
                ExternalizedProperty VelocityY(MemberName=VelocityY) => #3
                ExternalizedProperty Diameter(MemberName=Diameter) => #4
                ExternalizedProperty numDots(MemberName=numDots)
                -> GenerateDotField(numDots=200, left=-30, right=30, top=30, bottom=-30) => #0
                #0, #1, #2, #3, #4 -> GroupWorkflow DrawMovingCircleArray-2d(Description="Draws multiple colored circles using the input array as position data.")
                    ExternalizedProperty LocationX(MemberName=LocationX) => #1
                    ExternalizedProperty LocationY(MemberName=LocationY) => #2
                    ExternalizedProperty ColorR(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=X) => #4
                    ExternalizedProperty ColorG(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=Y) => #5
                    ExternalizedProperty ColorB(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=Z) => #6
                    ExternalizedProperty ColorA(MemberName=Value)
                    -> FloatProperty(Value=1)
                    -> ExternalizedProperty(MemberName=W) => #7
                    ExternalizedProperty Diameter(MemberName=Value)
                    -> PropertySourceOfCreateScaleSingle(MemberName=X, Value=1)
                    -> PropertyMapping(ExtentX, ExtentY) => #17
                    WorkflowInput Source1 => #22
                    SubscribeSubject DrawStimuli
                    -> Bonsai.Shaders.UpdateUniform(UniformName=projection, ShaderName=CircleArray) => #21
                    #21, #1, #2, #17 -> GroupWorkflow Transform => #33
                        WorkflowInput Source1 => #0
                        ExternalizedProperty Angle(MemberName=Angle) => #2
                        ExternalizedProperty ExtentX(MemberName=X) => #4
                        ExternalizedProperty ExtentY(MemberName=Y) => #5
                        ExternalizedProperty LocationX(MemberName=X) => #6
                        ExternalizedProperty LocationY(MemberName=Y) => #7
                        #0, #6, #7 -> Bonsai.Shaders.CreateTranslation(X=0.5, Y=0, Z=0) => #10
                        #10, #4, #5 -> Bonsai.Shaders.Scale(Order=Prepend, X=1, Y=1, Z=1) => #9
                        #9, #2 -> Bonsai.Shaders.RotateZ(Order=Prepend, Angle=0)
                        -> Bonsai.Shaders.UpdateUniform(UniformName=transform, ShaderName=CircleArray)
                        -> WorkflowOutput
                    #33, #4, #5, #6, #7 -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1)
                    -> Bonsai.Shaders.UpdateUniform(UniformName=color, ShaderName=CircleArray) => #8
                    #22, #8 -> CombineLatest => #26
                    #26, #8 -> Sample
                    -> MemberSelector(Selector=Item1) => #24
                    ExternalizedProperty VelocityX(MemberName=VelocityX) => #28
                    ExternalizedProperty VelocityY(MemberName=VelocityY) => #29
                    ExternalizedProperty Coherence(MemberName=Coherence) => #30
                    SubscribeSubject Borders
                    -> PropertyMapping(top(Selector=Item1), bottom(Selector=Item2), left(Selector=Item3), right(Selector=Item4)) => #32
                    #24, #28, #29, #30, #32 -> moveDots_2d(VelocityX=-0.66, VelocityY=0.66, Coherence=100, left=-30, right=30, top=30, bottom=-24)
                    -> Bonsai.Shaders.DrawMeshInstanced
                      ShaderName=CircleArray
                      MeshName=Quad
                      Usage=DynamicDraw
                      InstanceAttributes(InstanceAttributeMapping(Size=2, Normalized=false, Type=Float, Divisor=1))
                    -> WorkflowOutput
                -> WorkflowOutput

                WorkflowInput Source1
            SubscribeSubject Parameters
            -> MemberSelector(Selector=Duration)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> ExternalizedProperty DueTime(MemberName=DueTime)
            -> Bonsai.Shaders.Timer(DueTime=PT1S) => #3
            #13, #3 -> TakeUntil
            -> Last => #9
            #9, #4 -> CombineLatest
            -> WorkflowOutput
        -> Sink OffState => #10
            WorkflowInput Source1
            -> FloatProperty(Value=0)
            -> MulticastSubject QuadState
            -> WorkflowOutput
        #10, #2, #3, #4 -> SelectMany Response => #9
            Bonsai.Windows.Input.KeyDown(Filter=Right)
            -> First
            -> FloatProperty(Value=1) => #3
            Bonsai.Windows.Input.KeyDown(Filter=Left)
            -> First
            -> FloatProperty(Value=-1) => #2
            ExternalizedProperty waitForResponseTime(MemberName=DueTime, Description="time to wait for a response")
            -> Timer(DueTime=PT3S, Period=PT0S)
            -> FloatProperty(Value=0) => #5
            #2, #3, #5 -> Amb => #11
            ExternalizedProperty outputOnTime(MemberName=outputOnTime) => #8
            ExternalizedProperty timeoutTime(MemberName=timeoutTime) => #9
            WorkflowInput Source1 => #10
            -> MemberSelector(Selector=Item2.VelocityX) => #16
            #10 -> MemberSelector(Selector=Item2.VelocityY) => #17
            #16, #17, #11 -> Zip
            -> MulticastSubject ptrack2 => #15
            #15, #8, #9 -> GroupWorkflow ComputeResultWorkflow
              Description:
                This grouped workflow computes the result of the trial
                (0, 1, 2 or 3) and activates arduino digital outputs
                accordingly
              Workflow
                ExternalizedProperty outputOnTime(MemberName=DueTime, Description="duration of arduino activation for correct response") => #1
                ExternalizedProperty timeoutTime(MemberName=DueTime) => #2
                WorkflowInput Source1
                -> Bonsai.Scripting.PythonTransform ComputeResult => #0
                  Script:
                    @returns(int)
                    def process(value):

                      trialParam = value.Item1;
                      trialResponse = value.Item3;

                      if trialResponse == 0:
                        output = 3; # no response

                      elif trialParam > 0: # stim is right
                        if trialResponse > 0:
                          output = 2; #CORRECT RIGHT
                        elif trialResponse < 0:
                          output = 0; #wrong

                      elif trialParam <= 0: # stim is up/left
                        if trialResponse < 0:
                          output = 1; #correct left
                        elif trialResponse > 0:
                          output = 0; #wrong

                      return output
                -> Equal(Operand=IntProperty(Value=0))
                -> Condition IncorrectResponse => #19
                    WorkflowInput Source1
                    -> WorkflowOutput
                #19, #1 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject IncorrectResponse => #9
                #0 -> Equal(Operand=IntProperty(Value=1))
                -> Condition LeftCorrect => #20
                    WorkflowInput Source1
                    -> WorkflowOutput
                #20, #1 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject LeftCorrect => #10
                #0 -> Equal(Operand=IntProperty(Value=2))
                -> Condition RightCorrect => #21
                    WorkflowInput Source1
                    -> WorkflowOutput
                Source2=#1, Source2=#21 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT1S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject RightCorrect => #11
                #0 -> Equal(Operand=IntProperty(Value=3))
                -> Condition NoResponse => #22
                    WorkflowInput Source1
                    -> WorkflowOutput
                Source2=#2, Source2=#22 -> GroupWorkflow "Delayed Boolean"
                  Description:
                    This grouped workflow propogates the first boolean
                    (true/false, dependent on the trial result), and sends
                    a second false boolean after a specified time.

                    This is used to control how long the digital output
                    of the arduino is set to HIGH for.
                  Workflow
                    WorkflowInput Source1 => #4
                    ExternalizedProperty DueTime(MemberName=DueTime) => #6
                    #4, #6 -> Delay(DueTime=PT5S)
                    -> BooleanProperty(Value=false) => #1
                    #4, #1 -> Merge
                    -> DistinctUntilChanged
                    -> WorkflowOutput
                -> MulticastSubject NoResponse => #12
                #9, #10, #11, #12 -> Merge
                -> Take(Count=2)
                -> WorkflowOutput
            -> WorkflowOutput
        #9, #6 -> Delay(DueTime=PT3S)
    -> Concat
    -> Repeat
    -> WorkflowOutput

    GroupWorkflow "Performance Tracking 2"
        SubscribeSubject ptrack2
        -> Skip(Count=1)
        -> GroupWorkflow "Prop Correct" => #7
            WorkflowInput Source1 => #2
            -> Condition Up/Left
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> LessThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct UpLeft" => #18
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #5
            #18 -> MemberSelector(Selector=Item2) => #7
            #2 -> Condition Right
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> GreaterThan(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct R" => #17
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #4
            #17 -> MemberSelector(Selector=Item2) => #6
            #2 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=FloatProperty(Value=0))
                -> WorkflowOutput
            -> GroupWorkflow "Calc P Correct Up" => #20
                WorkflowInput Source1 => #5
                -> FloatProperty(Value=1)
                -> Accumulate => #0
                #5 -> Condition "check correct"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> Equal(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=1) => #3
                #5 -> Condition "check incorrect"
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item3)
                    -> NotEqual(Operand=FloatProperty(Value=-1))
                    -> WorkflowOutput
                -> FloatProperty(Value=0) => #8
                #3, #8 -> Merge
                -> Accumulate => #1
                #1, #0 -> Zip
                -> Divide => #2
                #2, #0 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1) => #13
            #4, #5, #13 -> CombineLatest => #0
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #1
            #20 -> MemberSelector(Selector=Item2) => #14
            #6, #7, #14 -> CombineLatest => #8
            -> Bonsai.Dsp.Buffer(Count=1, Skip=nil) => #9
            #1, #9 -> CombineLatest => #10
            #0, #8 -> Zip => #11
            #10, #11 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #4
        -> GroupWorkflow "pCorrect Tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #4 -> GroupWorkflow "n Trials tag"
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Bonsai.Dsp.Transpose
        #7 -> MemberSelector(Selector=Item2)
        -> GroupWorkflow AdaptiveTrialControl
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #2
            -> MemberSelector(Selector=Item1) => #3
            #2 -> MemberSelector(Selector=Item2) => #4
            #2 -> MemberSelector(Selector=Item3) => #25
            #0 -> MemberSelector(Selector=Item1) => #8
            -> MemberSelector(Selector=Item1) => #9
            #8 -> MemberSelector(Selector=Item2) => #10
            #8 -> MemberSelector(Selector=Item3) => #27
            #0 -> FloatProperty(Value=2) => #20
            ExternalizedProperty nTrialsRequired(MemberName=Value) => #15
            #3, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #5
            #4, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #6
            #25, #15 -> GreaterThanOrEqual(Operand=FloatProperty(Value=5)) => #26
            #5, #6, #26 -> Zip
            -> LogicalAnd => #7
            ExternalizedProperty "pCorrect Required"(MemberName=Value) => #16
            #9, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #11
            #10, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #12
            #27, #16 -> GreaterThanOrEqual(Operand=FloatProperty(Value=0.8)) => #28
            #11, #12, #28 -> Zip
            -> LogicalAnd => #13
            #7, #13 -> Zip
            -> LogicalAnd
            -> Condition "Criteria Fulfilled" => #29
                WorkflowInput Source1
                -> WorkflowOutput
            -> FloatProperty(Value=3)
            -> MulticastSubject "Difficulty Level"
            -> WorkflowOutput
            #20, #29 -> TakeUntil
            -> MulticastSubject "Difficulty Level"

        GroupWorkflow "Initialise ptrack2"
            FloatProperty(Value=0) => #0
            FloatProperty(Value=0) => #1
            FloatProperty(Value=0) => #2
            #2, #1, #0 -> Zip
            -> BehaviorSubject ptrack2
            -> WorkflowOutput
#26, #27 -> Disable TakeUntil => #2
#2, #25 -> Disable SubscribeWhen

FloatProperty(Value=1)
-> BehaviorSubject "Difficulty Level"

StringProperty(Value=StartSession)
-> Take(Count=1)
-> IncludeWorkflow Events(Path=BonVision:Logging.TimestampedEventLogger.bonsai, Overwrite=false, Suffix=Timestamp)

Bonsai.Numerics.CreateRandom(Seed=42)
-> AsyncSubject Random

ExternalizedProperty PortName(MemberName=PortName, Category=Arduino) => #11
-> GroupWorkflow dueComm2lick
    StringProperty(Value=c0)
    -> BehaviorSubject serialToSend

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject leftLicks

    Bonsai.Windows.Input.KeyDown(Filter=A)
    -> StringProperty(Value=r5000) => #15
    Bonsai.Windows.Input.KeyDown(Filter=B)
    -> StringProperty(Value=l5000) => #14
    Bonsai.Windows.Input.KeyDown(Filter=C)
    -> StringProperty(Value=c1) => #22
    Bonsai.Windows.Input.KeyDown(Filter=D)
    -> StringProperty(Value=c0) => #23
    #15, #14, #22, #23 -> Merge
    -> MulticastSubject serialToSend

    SubscribeSubject serialToSend => #18
    ExternalizedMapping(PortName) => #30
    -> Bonsai.IO.SerialStringRead(PortName=COM7, NewLine=\n)
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.PythonTransform
          Script:
            @returns(bool)
            def process(value):
              mylist = value.split("\t")

              if len(mylist) == 4:
                return True
              else:
                return False
        -> WorkflowOutput
    -> Parse(Pattern=%i\t%i\t%i\t%i) => #3
    -> MemberSelector(Selector=Item2)
    -> DistinctUntilChanged
    -> MulticastSubject rightLicks
    #3 -> MemberSelector(Selector=Item3)
    -> DistinctUntilChanged
    -> MulticastSubject leftLicks
    #18, #30 -> Bonsai.IO.SerialStringWrite(PortName=COM7, NewLine=\r)

    SubscribeSubject leftLicks
    SubscribeSubject rightLicks

    IntProperty(Value=0)
    -> Skip(Count=1)
    -> BehaviorSubject rightLicks
ExternalizedProperty "No Response pin"(MemberName="No Response pin", Category=Arduino) => #12
ExternalizedProperty "Incorrect Response pin"(MemberName="Incorrect Response pin", Category=Arduino) => #13
ExternalizedProperty "Left Correct pin"(MemberName="Left Correct pin", Category=Arduino) => #14
ExternalizedProperty "Right Correct pin"(MemberName="Right Correct pin", Category=Arduino) => #15
#11, #12, #13, #14, #15 -> GroupWorkflow ArduinoPinMapping
    BooleanProperty(Value=false)
    -> BehaviorSubject IncorrectResponse

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject RightCorrect

    BooleanProperty(Value=false)
    -> BehaviorSubject NoResponse

    SubscribeSubject IncorrectResponse => #8
    ExternalizedProperty "Incorrect Response pin"(MemberName=Pin) => #14
    ExternalizedProperty PortName(MemberName=PortName) => #17
    #8, #14, #17 -> Disable Bonsai.Arduino.DigitalOutput(PortName=COM7, Pin=0)

    SubscribeSubject LeftCorrect
    -> Skip(Count=1)
    -> StringProperty(Value=l500)
    -> MulticastSubject serialToSend

    SubscribeSubject RightCorrect
    -> Skip(Count=1)
    -> StringProperty(Value=r500)
    -> MulticastSubject serialToSend

    SubscribeSubject NoResponse
    ExternalizedProperty "No Response pin"(MemberName=Pin)
    ExternalizedProperty "Left Correct pin"(MemberName=Pin)
    ExternalizedProperty "Right Correct pin"(MemberName=Pin)

ExternalizedProperty TopBorder(MemberName=TopBorder) => #16
ExternalizedProperty BottomBorder(MemberName=BottomBorder) => #17
ExternalizedProperty LeftBorder(MemberName=LeftBorder) => #18
ExternalizedProperty RightBorder(MemberName=RightBorder) => #19
#16, #17, #18, #19 -> GroupWorkflow "Display and Resources"
    Bonsai.Shaders.CreateWindow
      Width=1280
      Height=960
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=0
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.PrimitiveResources.bonsai)
    -> Bonsai.Shaders.ShaderResources(Shaders="")
    -> Bonsai.Shaders.MeshResources(Meshes="")
    -> Bonsai.Shaders.TextureResources(Textures="")
    -> Bonsai.Shaders.LoadResources

    ExternalizedProperty TopBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=60)
    -> ReplaySubject Top(BufferSize=nil) => #6
    ExternalizedProperty BottomBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-60)
    -> ReplaySubject Bottom(BufferSize=nil) => #8
    ExternalizedProperty LeftBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=-180)
    -> ReplaySubject Left(BufferSize=nil) => #10
    ExternalizedProperty RightBorder(MemberName=Value, Category=Display)
    -> FloatProperty(Value=180)
    -> ReplaySubject Right(BufferSize=nil) => #12
    #6, #8, #10, #12 -> Zip
    -> ReplaySubject Borders(BufferSize=nil)

Disable GroupWorkflow QuadState
    SubscribeSubject DrawStimuli => #0
    SubscribeSubject QuadState
    -> PropertyMapping(ColorR(Selector=it), ColorG(Selector=it), ColorB(Selector=it)) => #1
    #0, #1 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=1, ExtentY=1, LocationX=29, LocationY=-29, ColorR=0, ColorG=0, ColorB=0, ColorA=1)

    FloatProperty(Value=0)
    -> BehaviorSubject QuadState
