<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:;assembly=Extensions" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>1280</q1:Width>
          <q1:Height>960</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>true</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Hidden</q1:WindowBorder>
          <q1:WindowState>Normal</q1:WindowState>
          <q1:DisplayDevice>Second</q1:DisplayDevice>
          <q1:TargetRenderFrequency>0</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderTexture">
          <q1:RenderState />
          <q1:ClearColor>Black</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:Width xsi:nil="true" />
          <q1:Height xsi:nil="true" />
          <q1:WrapS>Repeat</q1:WrapS>
          <q1:WrapT>Repeat</q1:WrapT>
          <q1:MinFilter>Linear</q1:MinFilter>
          <q1:MagFilter>Linear</q1:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TextureLeft</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Coherence</MemberName>
        <Name>Coherence</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>VelocityX</MemberName>
        <Name>VelocityX</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>VelocityY</MemberName>
        <Name>VelocityY</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Diameter</MemberName>
        <Name>Diameter</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>numDots</MemberName>
        <Name>numDots</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>200</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderTexture">
          <q1:RenderState />
          <q1:ClearColor>Black</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:Width xsi:nil="true" />
          <q1:Height xsi:nil="true" />
          <q1:WrapS>Repeat</q1:WrapS>
          <q1:WrapT>Repeat</q1:WrapT>
          <q1:MinFilter>Linear</q1:MinFilter>
          <q1:MagFilter>Linear</q1:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>TextureRight</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Borders</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Top" Selector="Item1" />
          <Property Name="Bottom" Selector="Item2" />
          <Property Name="Left" Selector="Item3" />
          <Property Name="Right" Selector="Item4" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Coherence</MemberName>
        <Name>Coherence1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>VelocityX</MemberName>
        <Name>VelocityX1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>VelocityY</MemberName>
        <Name>VelocityY1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Diameter</MemberName>
        <Name>Diameter1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>numDots</MemberName>
        <Name>numDots1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>200</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:TextureResources">
          <q1:Textures>
            <q1:TextureConfiguration xsi:type="q1:ImageTexture">
              <q1:Name>gausstext</q1:Name>
              <q1:Width xsi:nil="true" />
              <q1:Height xsi:nil="true" />
              <q1:InternalFormat>Rgba</q1:InternalFormat>
              <q1:WrapS>Repeat</q1:WrapS>
              <q1:WrapT>Repeat</q1:WrapT>
              <q1:MinFilter>Linear</q1:MinFilter>
              <q1:MagFilter>Linear</q1:MagFilter>
              <q1:FileName>gausstext.bmp</q1:FileName>
              <q1:ColorType>Grayscale</q1:ColorType>
              <q1:FlipMode>Vertical</q1:FlipMode>
            </q1:TextureConfiguration>
          </q1:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
          <TranslationX>0</TranslationX>
          <TranslationY>-1</TranslationY>
          <TranslationZ>-5.5</TranslationZ>
          <RotationZ>1.57</RotationZ>
          <RotationY>1.57</RotationY>
          <RotationX>0</RotationX>
          <ScaleX>15</ScaleX>
          <ScaleY>10</ScaleY>
          <ScaleZ>10</ScaleZ>
          <MeshName>Plane</MeshName>
          <Ambient>
            <X>1</X>
            <Y>1</Y>
            <Z>1</Z>
          </Ambient>
          <Diffuse>
            <X>1</X>
            <Y>1</Y>
            <Z>1</Z>
          </Diffuse>
          <Specular>
            <X>0</X>
            <Y>0</Y>
            <Z>0</Z>
          </Specular>
          <SpecularExponent>100</SpecularExponent>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Display and Resources</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Top</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-30</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Bottom</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-180</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Left</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>180</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Right</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>Borders</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>TopBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>BottomBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>LeftBorder</Name>
              <Category>Display</Category>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>RightBorder</Name>
              <Category>Display</Category>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="0" Label="Source1" />
            <Edge From="11" To="2" Label="Source1" />
            <Edge From="12" To="4" Label="Source1" />
            <Edge From="13" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>-1</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>-3.5</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>1.57</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>6</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>Plane</MeshName>
        <Ambient>
          <X>0.5</X>
          <Y>0.5</Y>
          <Z>0.5</Z>
        </Ambient>
        <Diffuse>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>100</SpecularExponent>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>1</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>-3.5</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>1.57</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>6</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <MeshName>Plane</MeshName>
        <Ambient>
          <X>0.5</X>
          <Y>0.5</Y>
          <Z>0.5</Z>
        </Ambient>
        <Diffuse>
          <X>1</X>
          <Y>1</Y>
          <Z>1</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>100</SpecularExponent>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>BindLeft</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureLeft</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BindTexture">
                <q1:TextureSlot>Texture0</q1:TextureSlot>
                <q1:ShaderName>TexturedModel</q1:ShaderName>
                <q1:TextureTarget>Texture2D</q1:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ShaderName" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="1" Label="Source1" />
            <Edge From="6" To="2" Label="Source1" />
            <Edge From="7" To="5" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>BindRight</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureRight</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BindTexture">
                <q1:TextureSlot>Texture0</q1:TextureSlot>
                <q1:ShaderName>TexturedModel</q1:ShaderName>
                <q1:TextureTarget>Texture2D</q1:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ShaderName" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="1" Label="Source1" />
            <Edge From="6" To="2" Label="Source1" />
            <Edge From="7" To="5" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveViewport.bonsai">
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <Target>
          <X>0</X>
          <Y>0</Y>
          <Z>-100</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <Light>
          <X>0</X>
          <Y>100000</Y>
          <Z>0</Z>
        </Light>
        <FieldOfView>75</FieldOfView>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawMovingCircleArray-2d</Name>
        <Description>Draws multiple colored circles using the input array as position data.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationX</MemberName>
              <Name>LocationX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationY</MemberName>
              <Name>LocationY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateVector4">
                <q1:X>1</q1:X>
                <q1:Y>1</q1:Y>
                <q1:Z>1</q1:Z>
                <q1:W>1</q1:W>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Z</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>W</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>color</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorR</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorG</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorB</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Diameter</Name>
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateScaleSingle">
              <MemberName>X</MemberName>
              <Value>2</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMeshInstanced">
                <q1:ShaderName>CircleArray</q1:ShaderName>
                <q1:MeshName>Quad</q1:MeshName>
                <q1:Usage>DynamicDraw</q1:Usage>
                <q1:InstanceAttributes>
                  <q1:InstanceAttributeMapping>
                    <q1:Size>2</q1:Size>
                    <q1:Normalized>false</q1:Normalized>
                    <q1:Type>Float</q1:Type>
                    <q1:Divisor>1</q1:Divisor>
                  </q1:InstanceAttributeMapping>
                </q1:InstanceAttributes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:moveDots_2d">
                <q2:VelocityX>-0.5</q2:VelocityX>
                <q2:VelocityY>0</q2:VelocityY>
                <q2:Coherence>100</q2:Coherence>
                <q2:left>-180</q2:left>
                <q2:right>180</q2:right>
                <q2:top>30</q2:top>
                <q2:bottom>-30</q2:bottom>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>VelocityX</MemberName>
              <Name>VelocityX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>VelocityY</MemberName>
              <Name>VelocityY</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Coherence</MemberName>
              <Name>Coherence</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Borders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="top" Selector="Item1" />
                <Property Name="bottom" Selector="Item2" />
                <Property Name="left" Selector="Item3" />
                <Property Name="right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:GenerateDotField">
                <q2:numDots>200</q2:numDots>
                <q2:left>-180</q2:left>
                <q2:right>180</q2:right>
                <q2:top>30</q2:top>
                <q2:bottom>-30</q2:bottom>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Borders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="top" Selector="Item1" />
                <Property Name="bottom" Selector="Item2" />
                <Property Name="left" Selector="Item3" />
                <Property Name="right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="numDots" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Transform</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Angle</MemberName>
                    <Name>Angle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateUniform">
                      <q1:UniformName>transform</q1:UniformName>
                      <q1:ShaderName>CircleArray</q1:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>ExtentX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>ExtentY</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>LocationX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>LocationY</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:RotateZ">
                      <q1:Order>Prepend</q1:Order>
                      <q1:Angle>0</q1:Angle>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:Scale">
                      <q1:Order>Prepend</q1:Order>
                      <q1:X>2</q1:X>
                      <q1:Y>2</q1:Y>
                      <q1:Z>1</q1:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:CreateTranslation">
                      <q1:X>0.5</q1:X>
                      <q1:Y>0</q1:Y>
                      <q1:Z>0</q1:Z>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="2" To="8" Label="Source2" />
                  <Edge From="3" To="1" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="10" Label="Source2" />
                  <Edge From="7" To="10" Label="Source3" />
                  <Edge From="8" To="3" Label="Source1" />
                  <Edge From="9" To="8" Label="Source1" />
                  <Edge From="10" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="36" Label="Source2" />
            <Edge From="2" To="36" Label="Source3" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="3" Label="Source2" />
            <Edge From="5" To="3" Label="Source3" />
            <Edge From="6" To="3" Label="Source4" />
            <Edge From="7" To="3" Label="Source5" />
            <Edge From="8" To="26" Label="Source2" />
            <Edge From="8" To="25" Label="Source2" />
            <Edge From="9" To="4" Label="Source1" />
            <Edge From="10" To="5" Label="Source1" />
            <Edge From="11" To="6" Label="Source1" />
            <Edge From="12" To="7" Label="Source1" />
            <Edge From="13" To="9" Label="Source1" />
            <Edge From="14" To="10" Label="Source1" />
            <Edge From="15" To="11" Label="Source1" />
            <Edge From="16" To="12" Label="Source1" />
            <Edge From="17" To="36" Label="Source4" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="17" Label="Source1" />
            <Edge From="20" To="0" Label="Source1" />
            <Edge From="21" To="36" Label="Source1" />
            <Edge From="22" To="21" Label="Source1" />
            <Edge From="23" To="20" Label="Source1" />
            <Edge From="24" To="23" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="24" Label="Source1" />
            <Edge From="27" To="23" Label="Source2" />
            <Edge From="28" To="23" Label="Source3" />
            <Edge From="29" To="23" Label="Source4" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="23" Label="Source5" />
            <Edge From="32" To="25" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="32" Label="Source1" />
            <Edge From="35" To="32" Label="Source2" />
            <Edge From="36" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-30</Bottom>
        <Top>30</Top>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawMovingCircleArray-2d</Name>
        <Description>Draws multiple colored circles using the input array as position data.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationX</MemberName>
              <Name>LocationX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>LocationY</MemberName>
              <Name>LocationY</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateVector4">
                <q1:X>1</q1:X>
                <q1:Y>1</q1:Y>
                <q1:Z>1</q1:Z>
                <q1:W>1</q1:W>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>X</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Y</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Z</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>W</MemberName>
              <Name />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>color</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorR</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorG</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorB</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>ColorA</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Value</MemberName>
              <Name>Diameter</Name>
            </Expression>
            <Expression xsi:type="PropertySourceOfCreateScaleSingle">
              <MemberName>X</MemberName>
              <Value>2</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:DrawMeshInstanced">
                <q1:ShaderName>CircleArray</q1:ShaderName>
                <q1:MeshName>Quad</q1:MeshName>
                <q1:Usage>DynamicDraw</q1:Usage>
                <q1:InstanceAttributes>
                  <q1:InstanceAttributeMapping>
                    <q1:Size>2</q1:Size>
                    <q1:Normalized>false</q1:Normalized>
                    <q1:Type>Float</q1:Type>
                    <q1:Divisor>1</q1:Divisor>
                  </q1:InstanceAttributeMapping>
                </q1:InstanceAttributes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>projection</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:moveDots_2d">
                <q2:VelocityX>-1</q2:VelocityX>
                <q2:VelocityY>0</q2:VelocityY>
                <q2:Coherence>100</q2:Coherence>
                <q2:left>-180</q2:left>
                <q2:right>180</q2:right>
                <q2:top>30</q2:top>
                <q2:bottom>-30</q2:bottom>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Sample" />
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>VelocityX</MemberName>
              <Name>VelocityX</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>VelocityY</MemberName>
              <Name>VelocityY</Name>
            </Expression>
            <Expression xsi:type="ExternalizedProperty">
              <MemberName>Coherence</MemberName>
              <Name>Coherence</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Borders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="top" Selector="Item1" />
                <Property Name="bottom" Selector="Item2" />
                <Property Name="left" Selector="Item3" />
                <Property Name="right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q2:GenerateDotField">
                <q2:numDots>200</q2:numDots>
                <q2:left>-180</q2:left>
                <q2:right>180</q2:right>
                <q2:top>30</q2:top>
                <q2:bottom>-30</q2:bottom>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Borders</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="top" Selector="Item1" />
                <Property Name="bottom" Selector="Item2" />
                <Property Name="left" Selector="Item3" />
                <Property Name="right" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="numDots" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Transform</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Angle</MemberName>
                    <Name>Angle</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:UpdateUniform">
                      <q1:UniformName>transform</q1:UniformName>
                      <q1:ShaderName>CircleArray</q1:ShaderName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>ExtentX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>ExtentY</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>X</MemberName>
                    <Name>LocationX</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedProperty">
                    <MemberName>Y</MemberName>
                    <Name>LocationY</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:RotateZ">
                      <q1:Order>Prepend</q1:Order>
                      <q1:Angle>0</q1:Angle>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:Scale">
                      <q1:Order>Prepend</q1:Order>
                      <q1:X>2</q1:X>
                      <q1:Y>2</q1:Y>
                      <q1:Z>1</q1:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="q1:CreateTranslation">
                      <q1:X>0.5</q1:X>
                      <q1:Y>0</q1:Y>
                      <q1:Z>0</q1:Z>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="10" Label="Source1" />
                  <Edge From="2" To="8" Label="Source2" />
                  <Edge From="3" To="1" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="10" Label="Source2" />
                  <Edge From="7" To="10" Label="Source3" />
                  <Edge From="8" To="3" Label="Source1" />
                  <Edge From="9" To="8" Label="Source1" />
                  <Edge From="10" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="36" Label="Source2" />
            <Edge From="2" To="36" Label="Source3" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="3" Label="Source2" />
            <Edge From="5" To="3" Label="Source3" />
            <Edge From="6" To="3" Label="Source4" />
            <Edge From="7" To="3" Label="Source5" />
            <Edge From="8" To="26" Label="Source2" />
            <Edge From="8" To="25" Label="Source2" />
            <Edge From="9" To="4" Label="Source1" />
            <Edge From="10" To="5" Label="Source1" />
            <Edge From="11" To="6" Label="Source1" />
            <Edge From="12" To="7" Label="Source1" />
            <Edge From="13" To="9" Label="Source1" />
            <Edge From="14" To="10" Label="Source1" />
            <Edge From="15" To="11" Label="Source1" />
            <Edge From="16" To="12" Label="Source1" />
            <Edge From="17" To="36" Label="Source4" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="17" Label="Source1" />
            <Edge From="20" To="0" Label="Source1" />
            <Edge From="21" To="36" Label="Source1" />
            <Edge From="22" To="21" Label="Source1" />
            <Edge From="23" To="20" Label="Source1" />
            <Edge From="24" To="23" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="24" Label="Source1" />
            <Edge From="27" To="23" Label="Source2" />
            <Edge From="28" To="23" Label="Source3" />
            <Edge From="29" To="23" Label="Source4" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="23" Label="Source5" />
            <Edge From="32" To="25" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="32" Label="Source1" />
            <Edge From="35" To="32" Label="Source2" />
            <Edge From="36" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Sink">
          <Name>BindFloor</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="SubscribeSubject">
                <Name>TextureFloor</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="WithLatestFrom" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="q1:BindTexture">
                  <q1:TextureSlot>Texture0</q1:TextureSlot>
                  <q1:ShaderName>TexturedModel</q1:ShaderName>
                  <q1:TextureTarget>Texture2D</q1:TextureTarget>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Name" />
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="ShaderName" />
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="1" Label="Source1" />
              <Edge From="6" To="2" Label="Source1" />
              <Edge From="7" To="5" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="25" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="30" Label="Source1" />
      <Edge From="4" To="3" Label="Source1" />
      <Edge From="5" To="31" Label="Source1" />
      <Edge From="6" To="31" Label="Source2" />
      <Edge From="7" To="31" Label="Source3" />
      <Edge From="8" To="31" Label="Source4" />
      <Edge From="9" To="31" Label="Source5" />
      <Edge From="10" To="9" Label="Source1" />
      <Edge From="11" To="32" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="3" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="32" Label="Source2" />
      <Edge From="16" To="33" Label="Source1" />
      <Edge From="17" To="33" Label="Source2" />
      <Edge From="18" To="33" Label="Source3" />
      <Edge From="19" To="33" Label="Source4" />
      <Edge From="20" To="33" Label="Source5" />
      <Edge From="21" To="20" Label="Source1" />
      <Edge From="22" To="1" Label="Source1" />
      <Edge From="25" To="22" Label="Source1" />
      <Edge From="28" To="26" Label="Source1" />
      <Edge From="29" To="27" Label="Source1" />
      <Edge From="30" To="28" Label="Source1" />
      <Edge From="30" To="29" Label="Source1" />
      <Edge From="30" To="34" Label="Source1" />
      <Edge From="31" To="2" Label="Source1" />
      <Edge From="32" To="31" Label="Source6" />
      <Edge From="32" To="33" Label="Source6" />
      <Edge From="33" To="12" Label="Source1" />
      <Edge From="34" To="23" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.TextureResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SinkBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.WithLatestFrom, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.BindTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector4, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Shaders.CreateScale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null],[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMeshInstanced, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>moveDots_2d, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>GenerateDotField, Extensions, Version=0.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RotateZ, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Scale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateTranslation, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>